<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:Harp.StepperDriver;assembly=Harp.StepperDriver"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="WorkflowInput">
        <Name>Source1</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="PortName" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.AindManipulator:CreateAindManipulator.bonsai">
        <OperationMode>Active</OperationMode>
        <OperationLed>On</OperationLed>
        <DumpRegisters>false</DumpRegisters>
        <VisualIndicators>On</VisualIndicators>
        <Heartbeat>Enabled</Heartbeat>
        <IgnoreErrors>false</IgnoreErrors>
        <PortName>COMx</PortName>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Name" DisplayName="TriggerHarpReadDumpSubjectName" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>TriggerHarpReadDump</Name>
      </Expression>
      <Expression xsi:type="harp:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="harp:CreateOperationControlPayload">
          <harp:OperationMode>Active</harp:OperationMode>
          <harp:DumpRegisters>true</harp:DumpRegisters>
          <harp:MuteReplies>false</harp:MuteReplies>
          <harp:VisualIndicators>On</harp:VisualIndicators>
          <harp:OperationLed>On</harp:OperationLed>
          <harp:Heartbeat>Enabled</harp:Heartbeat>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>StepperDriverCommands</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>StepperDriverEvents</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="p1:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p1:CreateEnableEncodersPayload">
          <p1:EnableEncoders>Encoder1</p1:EnableEncoders>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>StepperDriverCommands</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT0.05S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="p1:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p1:CreateEncoderModePayload">
          <p1:EncoderMode>Position</p1:EncoderMode>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>StepperDriverCommands</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT0.05S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="p1:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p1:CreateEncoderSamplingRatePayload">
          <p1:EncoderSamplingRate>Rate100Hz</p1:EncoderSamplingRate>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>StepperDriverCommands</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="2" Label="Source1" />
      <Edge From="1" To="2" Label="Source2" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>