WorkflowBuilder(Version=2.8.5)
WorkflowInput Source1
-> SelectMany BlockLogic
    WorkflowInput Source1
    -> Take(Count=1)
    -> AsyncSubject ThisBlock

    BehaviorSubject<AindTelekinesisDataSchema.TaskLogic.Trial> CurrentTrial
    BehaviorSubject<System.Int32> BlockLength
    BehaviorSubject<System.Int32> SampleTrial

    IntProperty(Value=0)
    -> Take(Count=1)
    -> BehaviorSubject TrialNumberInBlock

    SubscribeSubject ThisBlock => #9
    -> AindTelekinesisDataSchema.TaskLogic.MatchBlockStatistics(Type=TypeMapping<AindTelekinesisDataSchema.TaskLogic.BlockGenerator>)
    -> SelectMany BlockGenerator => #11
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject _ThisBlock

        SubscribeSubject _ThisBlock
        -> MemberSelector(Selector=BlockSize)
        -> IncludeWorkflow(Path=Extensions\SampleDistributionWithRngSeed.bonsai)
        -> Bonsai.Scripting.Expressions.ExpressionTransform ToInt32
          Expression: Convert.ToInt32(it)
        -> MulticastSubject BlockLength

        SubscribeSubject _ThisBlock
        -> MemberSelector(Selector=TrialStatistics)
        -> MulticastSubject CurrentTrial

        SubscribeSubject _ThisBlock
        -> MemberSelector(Selector=IsBaited)
        -> MulticastSubject IsBaitedMode

        SubscribeSubject CurrentTrial
        -> Take(Count=1)
        -> ToList
        -> WorkflowOutput
    #9 -> AindTelekinesisDataSchema.TaskLogic.MatchBlockStatistics(Type=TypeMapping<AindTelekinesisDataSchema.TaskLogic.Block>)
    -> SelectMany Block => #13
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject _ThisBlock

        SubscribeSubject _ThisBlock
        -> SelectMany Shuffle
            WorkflowInput Source1 => #0
            -> Condition Shuffle
                WorkflowInput Source1
                -> MemberSelector(Selector=Shuffle)
                -> WorkflowOutput
            -> MemberSelector(Selector=Trials)
            -> Merge => #3
            SubscribeSubject RngSeed => #4
            #3, #4 -> Bonsai.Numerics.Permutation => #5
            #0 -> Condition DontShuffle
                WorkflowInput Source1
                -> MemberSelector(Selector=Shuffle)
                -> BitwiseNot
                -> WorkflowOutput
            -> MemberSelector(Selector=Trials)
            -> Merge => #8
            #5, #8 -> Merge
            -> ToList
            -> WorkflowOutput
        -> BehaviorSubject _TrialList
        -> MemberSelector(Selector=Count)
        -> MulticastSubject BlockLength

        SubscribeSubject _TrialList => #8
        SubscribeSubject TrialNumberInBlock
        -> PropertyMapping(Value) => #10
        #8, #10 -> Index(Operand=IntProperty(Value=0))
        -> Take(Count=1)
        -> MulticastSubject CurrentTrial

        SubscribeSubject _ThisBlock
        -> MemberSelector(Selector=IsBaited)
        -> MulticastSubject IsBaitedMode

        SubscribeSubject _TrialList
        -> WorkflowOutput
    #11, #13 -> Merge
    -> BehaviorSubject BlockTrialList

    SubscribeSubject CurrentTrial
    -> Take(Count=1)
    -> GroupWorkflow CreateTrial
        WorkflowInput Source1
        -> CreateObservable CreateTrial
            WorkflowInput Source1
            -> AsyncSubject ThisTrial

            BehaviorSubject<System.Reactive.Unit> ForceEndTrial
            -> IncludeWorkflow(Path=Extensions\CreateSoftwareEventInline.bonsai, EventName=ForceEndTrial)
            -> AindTelekinesisDataSchema.TaskLogic.HarvestAction(Probability=1, Amount=1, Delay=0, ForceDuration=0.5, UpperForceThreshold=32768, LowerForceThreshold=5000, IsOperant=true) => #4
            Timer(DueTime=PT0S, Period=PT0S)
            -> SelectMany QuiescencePeriod
                SubscribeSubject ThisTrial
                -> MemberSelector(Selector=QuiescencePeriod)
                -> AsyncSubject ThisPeriod

                BooleanProperty(Value=false)
                -> Take(Count=1)
                -> MulticastSubject ForceSpoutAvailability

                SubscribeSubject ThisPeriod
                -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=QuiescencePeriod)
                -> MulticastSubject SoftwareEvents

                SubscribeSubject ThisPeriod
                -> IncludeWorkflow(Path=Extensions\IsNull.bonsai)
                -> Condition => #11
                    WorkflowInput Source1
                    -> WorkflowOutput
                GroupWorkflow DitheringLogic => #12
                    SubscribeSubject CurrentForce
                    -> MemberSelector(Selector=Value) => #1
                    -> MemberSelector(Selector=LeftForce) => #2
                    SubscribeSubject ThisPeriod
                    -> MemberSelector(Selector=ForceThreshold)
                    -> PropertyMapping(Value) => #5
                    #2, #5 -> GreaterThan(Operand=WorkflowProperty<System.Int16>(Value=0)) => #6
                    #1 -> MemberSelector(Selector=RightForce) => #7
                    SubscribeSubject ThisPeriod
                    -> MemberSelector(Selector=ForceThreshold)
                    -> PropertyMapping(Value) => #10
                    #7, #10 -> GreaterThan(Operand=WorkflowProperty<System.Int16>(Value=0)) => #11
                    #6, #11 -> Zip
                    -> BitwiseOr
                    -> DistinctUntilChanged
                    -> CreateObservable Dither
                        WorkflowInput Source1 => #0
                        SubscribeSubject ThisPeriod
                        -> MemberSelector(Selector=Duration)
                        -> IncludeWorkflow(Path=Extensions\SampleDistributionWithRngSeed.bonsai)
                        -> AllenNeuralDynamics.Core.TimeSpanFromSeconds
                        -> PropertyMapping(DueTime)
                        -> Timer(DueTime=PT0S, Period=PT0S) => #6
                        #0, #6 -> Zip
                        -> MemberSelector(Selector=Item1)
                        -> WorkflowOutput
                    -> Switch
                    -> BitwiseNot
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> WorkflowOutput

                    SubscribeSubject ThisPeriod
                    -> MemberSelector(Selector=HasCue)
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> Unit
                    -> MulticastSubject TriggerQuiescencePeriodCue
                SubscribeSubject ThisPeriod
                -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai) => #14
                #12, #14 -> SubscribeWhen => #15
                #11, #15 -> Merge
                -> Take(Count=1)
                -> WorkflowOutput
            -> SelectMany InitiationPeriod
                SubscribeSubject ThisTrial
                -> MemberSelector(Selector=InitiationPeriod)
                -> AsyncSubject ThisPeriod

                SubscribeSubject ThisPeriod
                -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=InitiationPeriod)
                -> MulticastSubject SoftwareEvents

                SubscribeSubject ThisPeriod
                -> MemberSelector(Selector=HasCue)
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> Unit
                -> MulticastSubject TriggerInitiationCue

                SubscribeSubject ThisPeriod
                -> MemberSelector(Selector=Duration)
                -> IncludeWorkflow(Path=Extensions\SampleDistributionWithRngSeed.bonsai)
                -> AllenNeuralDynamics.Core.TimeSpanFromSeconds
                -> PropertyMapping(DueTime)
                -> Timer(DueTime=PT0S, Period=PT0S)
                -> BooleanProperty(Value=true) => #17
                GroupWorkflow AbortOnForce => #18
                    SubscribeSubject CurrentForce
                    -> MemberSelector(Selector=Value) => #1
                    -> MemberSelector(Selector=LeftForce) => #2
                    SubscribeSubject ThisPeriod
                    -> MemberSelector(Selector=AbortOnForceThreshold)
                    -> PropertyMapping(Value) => #5
                    #2, #5 -> GreaterThan(Operand=WorkflowProperty<System.Int16>(Value=0)) => #6
                    #1 -> MemberSelector(Selector=RightForce) => #7
                    SubscribeSubject ThisPeriod
                    -> MemberSelector(Selector=AbortOnForceThreshold)
                    -> PropertyMapping(Value) => #10
                    #7, #10 -> GreaterThan(Operand=WorkflowProperty<System.Int16>(Value=0)) => #11
                    #6, #11 -> Zip
                    -> BitwiseOr
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> WorkflowOutput
                SubscribeSubject ThisPeriod
                -> MemberSelector(Selector=AbortOnForce)
                -> Condition => #21
                    WorkflowInput Source1
                    -> WorkflowOutput
                #18, #21 -> SubscribeWhen
                -> Unit
                -> MulticastSubject ForceEndTrial
                -> BooleanProperty(Value=false) => #25
                #17, #25 -> Merge
                -> Take(Count=1)
                -> WorkflowOutput
            -> SelectMany DrawRewards
                SubscribeSubject IsBaitedMode => #0
                -> BitwiseNot
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> SelectMany BaitReward
                    SubscribeSubject LeftHasReward
                    -> Take(Count=1) => #1
                    SubscribeSubject ThisTrial
                    -> MemberSelector(Selector=LeftHarvest)
                    -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai)
                    -> IncludeWorkflow(Path=Extensions\CalculateReward.bonsai)
                    -> MemberSelector(Selector=HasValue) => #6
                    SubscribeSubject ThisTrial
                    -> MemberSelector(Selector=LeftHarvest)
                    -> IncludeWorkflow(Path=Extensions\IsNull.bonsai) => #9
                    #6, #9 -> Merge
                    -> Take(Count=1) => #11
                    #1, #11 -> Zip
                    -> BitwiseOr
                    -> MulticastSubject LeftHasReward => #14
                    SubscribeSubject RightHasReward
                    -> Take(Count=1) => #16
                    SubscribeSubject ThisTrial
                    -> MemberSelector(Selector=RightHarvest)
                    -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai)
                    -> IncludeWorkflow(Path=Extensions\CalculateReward.bonsai)
                    -> MemberSelector(Selector=HasValue) => #21
                    SubscribeSubject ThisTrial
                    -> MemberSelector(Selector=RightHarvest)
                    -> IncludeWorkflow(Path=Extensions\IsNull.bonsai) => #24
                    #21, #24 -> Merge
                    -> Take(Count=1) => #26
                    #16, #26 -> Zip
                    -> BitwiseOr
                    -> MulticastSubject RightHasReward => #29
                    #14, #29 -> Zip
                    -> Take(Count=1)
                    -> WorkflowOutput
                -> Unit => #4
                #0 -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> Unit => #6
                #4, #6 -> Merge
                -> Take(Count=1)
                -> WorkflowOutput
            -> SelectMany ResponsePeriod
                SubscribeSubject ThisTrial
                -> MemberSelector(Selector=ResponsePeriod)
                -> AsyncSubject ThisPeriod

                SubscribeSubject ThisPeriod
                -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=ResponsePeriod)
                -> MulticastSubject SoftwareEvents

                SubscribeSubject ThisPeriod
                -> MemberSelector(Selector=HasCue)
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> Unit
                -> MulticastSubject TriggerResponseCue

                BehaviorSubject<System.Tuple(AindTelekinesisDataSchema.TaskLogic.HarvestAction,System.Boolean)> outcome
                -> Take(Count=1) => #12
                -> BooleanProperty(Value=false)
                -> MulticastSubject ContinuousFeedbackEnabled => #14
                #14, #12 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> WorkflowOutput

                BooleanProperty(Value=true)
                -> Take(Count=1)
                -> MulticastSubject ContinuousFeedbackEnabled

                SubscribeSubject ThisPeriod
                -> MemberSelector(Selector=Duration)
                -> IncludeWorkflow(Path=Extensions\SampleDistributionWithRngSeed.bonsai)
                -> AllenNeuralDynamics.Core.TimeSpanFromSeconds
                -> PropertyMapping(DueTime)
                -> Timer(DueTime=PT0S, Period=PT0S)
                -> Unit
                -> MulticastSubject ForceEndTrial
                -> AindTelekinesisDataSchema.TaskLogic.HarvestAction(Probability=0, Amount=0, Delay=0, ForceDuration=0, UpperForceThreshold=32768, LowerForceThreshold=5000, IsOperant=false) => #29
                BooleanProperty(Value=false) => #30
                #29, #30 -> WithLatestFrom
                -> MulticastSubject outcome

                PropertySource<AindTelekinesisDataSchema.TaskLogic.HarvestAction,AindTelekinesisDataSchema.TaskLogic.HarvestMode>(MemberName=HarvestMode, Value=RegionOfInterest)
                -> GroupWorkflow RoiTrialTypeResponse
                    WorkflowInput Source1
                    -> Defer ROITrialResponse
                        WorkflowInput Source1
                        -> Take(Count=1)
                        -> AsyncSubject trialType

                        SubscribeSubject ThisTrial
                        -> MemberSelector(Selector=LeftHarvest)
                        -> IncludeWorkflow(Path=Extensions\ObserveRoiAction.bonsai) => #5
                        SubscribeSubject LeftHasReward => #6
                        #5, #6 -> WithLatestFrom => #7
                        SubscribeSubject ThisTrial
                        -> MemberSelector(Selector=RightHarvest)
                        -> IncludeWorkflow(Path=Extensions\ObserveRoiAction.bonsai) => #10
                        SubscribeSubject RightHasReward => #11
                        #10, #11 -> WithLatestFrom => #12
                        #7, #12 -> Merge
                        -> WorkflowOutput
                    -> WorkflowOutput
                -> MulticastSubject outcome

                PropertySource<AindTelekinesisDataSchema.TaskLogic.HarvestAction,AindTelekinesisDataSchema.TaskLogic.HarvestMode>(MemberName=HarvestMode, Value=Accumulation)
                -> IncludeWorkflow(Path=Extensions\AccumulationTrialTypeResponse.bonsai)
                -> MulticastSubject outcome
            -> SelectMany Reward => #10
                WorkflowInput Source1
                -> AsyncSubject HarvestEnv

                SubscribeSubject HarvestEnv
                -> MemberSelector(Selector=Item1)
                -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=HarvestActionSelected)
                -> MulticastSubject SoftwareEvents

                SubscribeSubject HarvestEnv
                -> Condition IsAction
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item1.Action)
                    -> Equal(Operand=WorkflowProperty<AindTelekinesisDataSchema.TaskLogic.HarvestActionLabel>(Value=None))
                    -> BitwiseNot
                    -> WorkflowOutput
                -> SelectMany ComputeReward => #8
                    SubscribeSubject HarvestEnv
                    -> MemberSelector(Selector=Item1)
                    -> AsyncSubject HarvestAction

                    SubscribeSubject HarvestEnv
                    -> MemberSelector(Selector=Item2)
                    -> AsyncSubject IsBaited

                    BooleanProperty(Value=true)
                    -> Take(Count=1)
                    -> MulticastSubject ForceSpoutAvailability

                    SubscribeSubject HarvestAction
                    -> MemberSelector(Selector=Delay)
                    -> AllenNeuralDynamics.Core.TimeSpanFromSeconds
                    -> PropertyMapping(DueTime)
                    -> Timer(DueTime=PT0S, Period=PT0S) => #13
                    SubscribeSubject HarvestAction
                    -> MemberSelector(Selector=IsOperant) => #15
                    #13, #15 -> Zip => #16
                    -> Condition IsOperant
                        WorkflowInput Source1
                        -> MemberSelector(Selector=Item2)
                        -> WorkflowOutput
                    -> SelectMany WaitForLick => #18
                        SubscribeSubject HarvestAction
                        -> MemberSelector(Selector=TimeToCollect)
                        -> IncludeWorkflow(Path=Extensions\SampleDistributionWithRngSeed.bonsai)
                        -> AllenNeuralDynamics.Core.TimeSpanFromSeconds
                        -> PropertyMapping(DueTime)
                        -> Timer(DueTime=PT0S, Period=PT0S) => #5
                        SubscribeSubject HarvestAction
                        -> MemberSelector(Selector=TimeToCollect)
                        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai) => #8
                        #5, #8 -> SubscribeWhen
                        -> BooleanProperty(Value=false) => #10
                        SubscribeSubject LickEvent
                        -> BooleanProperty(Value=true) => #12
                        #10, #12 -> Merge
                        -> Take(Count=1)
                        -> WorkflowOutput
                    -> Condition IsLick
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> IncludeWorkflow(Path=Extensions\DrawReward.bonsai)
                    -> MulticastSubject GiveReward
                    -> BooleanProperty(Value=true) => #22
                    #18 -> Condition IsLickDeadline
                        WorkflowInput Source1
                        -> BitwiseNot
                        -> WorkflowOutput
                    -> BooleanProperty(Value=false) => #24
                    #16 -> MemberSelector(Selector=Item2)
                    -> Condition IsOpenLoop
                        WorkflowInput Source1
                        -> BitwiseNot
                        -> WorkflowOutput
                    -> IncludeWorkflow(Path=Extensions\DrawReward.bonsai)
                    -> MulticastSubject GiveReward
                    -> BooleanProperty(Value=true) => #29
                    #22, #24, #29 -> Merge
                    -> Take(Count=1) => #31
                    SubscribeSubject HarvestAction => #32
                    #31, #32 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2)
                    -> WorkflowOutput
                SubscribeSubject HarvestEnv
                -> Condition IsNullAction
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item1.Action)
                    -> Equal(Operand=WorkflowProperty<AindTelekinesisDataSchema.TaskLogic.HarvestActionLabel>(Value=None))
                    -> WorkflowOutput
                -> SelectMany SkipReward => #11
                    SubscribeSubject HarvestEnv
                    -> MemberSelector(Selector=Item1)
                    -> AsyncSubject HarvestAction

                    BooleanProperty(Value=false)
                    -> Take(Count=1)
                    -> MulticastSubject ForceSpoutAvailability

                    SubscribeSubject HarvestAction
                    -> WorkflowOutput
                #8, #11 -> Merge
                -> Take(Count=1)
                -> WorkflowOutput
            #4, #10 -> Merge
            -> Take(Count=1) => #12
            SubscribeSubject ThisTrial
            -> MemberSelector(Selector=InterTrialInterval)
            -> IncludeWorkflow(Path=Extensions\SampleDistributionWithRngSeed.bonsai)
            -> AllenNeuralDynamics.Core.TimeSpanFromSeconds
            -> PropertyMapping(DueTime) => #17
            #12, #17 -> Delay(DueTime=PT0S)
            -> SelectMany CreateTrialOutcome
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject HarvestAction

                SubscribeSubject HarvestAction
                -> InputMapping(HarvestAction(Selector=it)) => #4
                SubscribeSubject GiveReward
                -> PropertyMapping(Reward) => #6
                SubscribeSubject HarvestAction
                -> MemberSelector(Selector=Action)
                -> Equal(Operand=WorkflowProperty<AindTelekinesisDataSchema.TaskLogic.HarvestActionLabel>(Value=None))
                -> PropertyMapping(IsAborted) => #10
                SubscribeSubject TrialNumber
                -> PropertyMapping(TrialNumber) => #12
                #4, #6, #10, #12 -> CreateTrialOutcome(TrialNumber=0, Reward=nil, IsAborted=true)
                -> WorkflowOutput
            -> IncludeWorkflow(Path=Extensions\CreateSoftwareEventInline.bonsai, EventName=TrialOutcome)
            -> Take(Count=1)
            -> WorkflowOutput

            SubscribeSubject ThisTrial
            -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=Trial)
            -> MulticastSubject SoftwareEvents
        -> WorkflowOutput
    -> Merge
    -> SelectMany UpdateNextTrial
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject TrialOutcome

        Defer TrialNumber++
            SubscribeSubject TrialNumber
            -> Take(Count=1)
            -> Add(Operand=IntProperty(Value=1))
            -> MulticastSubject TrialNumber
            -> Take(Count=1)
            -> WorkflowOutput
        -> SelectMany TrialNumberInBlock++
            SubscribeSubject TrialNumberInBlock
            -> Take(Count=1)
            -> Add(Operand=IntProperty(Value=1))
            -> MulticastSubject TrialNumberInBlock
            -> Take(Count=1)
            -> WorkflowOutput
        -> SelectMany DrawTrial
            SubscribeSubject ThisBlock => #0
            -> AindTelekinesisDataSchema.TaskLogic.MatchBlockStatistics(Type=TypeMapping<AindTelekinesisDataSchema.TaskLogic.Block>)
            -> SelectMany SampleFromBlockTrialList => #2
                SubscribeSubject TrialNumberInBlock
                -> SelectMany SampleTrial
                    WorkflowInput Source1
                    -> Take(Count=1)
                    -> AsyncSubject Index

                    SubscribeSubject BlockTrialList => #3
                    SubscribeSubject Index
                    -> PropertyMapping(Value) => #5
                    #3, #5 -> Index(Operand=IntProperty(Value=0))
                    -> Take(Count=1)
                    -> WorkflowOutput
                -> Take(Count=1)
                -> WorkflowOutput
            #0 -> AindTelekinesisDataSchema.TaskLogic.MatchBlockStatistics(Type=TypeMapping<AindTelekinesisDataSchema.TaskLogic.BlockGenerator>)
            -> SelectMany GetCurrentTrial => #4
                SubscribeSubject CurrentTrial
                -> Take(Count=1)
                -> WorkflowOutput
            #2, #4 -> Merge
            -> Take(Count=1)
            -> WorkflowOutput
        -> SelectMany RunUpdaters
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject Trial

            SubscribeSubject Trial => #3
            SubscribeSubject Trial
            -> MemberSelector(Selector=RightHarvest)
            -> IncludeWorkflow(Path=Extensions\UpdateAction.bonsai) => #6
            SubscribeSubject Trial
            -> MemberSelector(Selector=LeftHarvest)
            -> IncludeWorkflow(Path=Extensions\UpdateAction.bonsai) => #9
            #3, #6, #9 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform Rename
              Expression: new(Item1 as CurrentTrial, Item2 as UpdatedRightHarvest, Item3 as UpdatedLeftHarvest)
            -> WorkflowOutput
        -> SelectMany CreateNewTrial
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject UpdatedHarvestActions

            SubscribeSubject UpdatedHarvestActions
            -> MemberSelector(Selector=CurrentTrial)
            -> PropertyMapping => #5
              InterTrialInterval(Selector=InterTrialInterval)
              QuiescencePeriod(Selector=QuiescencePeriod)
              InitiationPeriod(Selector=InitiationPeriod)
              ResponsePeriod(Selector=ResponsePeriod)
            SubscribeSubject UpdatedHarvestActions
            -> PropertyMapping(LeftHarvest(Selector=UpdatedLeftHarvest), RightHarvest(Selector=UpdatedRightHarvest)) => #7
            #5, #7 -> AindTelekinesisDataSchema.TaskLogic.Trial
            -> Take(Count=1)
            -> WorkflowOutput
        -> Take(Count=1)
        -> WorkflowOutput
    -> MulticastSubject CurrentTrial
    -> Take(Count=1) => #22
    SubscribeSubject BlockLength
    -> PropertyMapping(Count) => #24
    #22, #24 -> RepeatCount(Count=0)
    -> Last
    -> WorkflowOutput
-> WorkflowOutput
