<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:p1="clr-namespace:Harp.LoadCells;assembly=Harp.LoadCells"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p2="clr-namespace:AindTelekinesisDataSchema.Rig;assembly=Extensions"
                 xmlns:p3="clr-namespace:AllenNeuralDynamics.AindManipulator;assembly=AllenNeuralDynamics.AindManipulator"
                 xmlns:beh="clr-namespace:Harp.Behavior;assembly=Harp.Behavior"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:p4="clr-namespace:AllenNeuralDynamics.Core;assembly=AllenNeuralDynamics.Core"
                 xmlns:spk="clr-namespace:Bonsai.Spinnaker;assembly=Bonsai.Spinnaker"
                 xmlns:vid="clr-namespace:Bonsai.Video;assembly=Bonsai.Video"
                 xmlns:p5="clr-namespace:AllenNeuralDynamics.AindBehaviorServices.DataTypes;assembly=AllenNeuralDynamics.AindBehaviorServices"
                 xmlns:zmq="clr-namespace:Bonsai.ZeroMQ;assembly=Bonsai.ZeroMQ"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="SubscribeSubject">
        <Name>HarpLoadCellsEvents</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:FilterMessageType">
          <harp:FilterType>Include</harp:FilterType>
          <harp:MessageType>Event</harp:MessageType>
        </Combinator>
      </Expression>
      <Expression xsi:type="p1:FilterRegister">
        <harp:FilterType>Include</harp:FilterType>
        <harp:Register xsi:type="p1:LoadCellData" />
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>HarpTimestampSource</Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>HarpDevices</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>StartExperiment</Name>
            </Expression>
            <Expression xsi:type="Unit" />
            <Expression xsi:type="rx:PublishSubject">
              <Name>TriggerHarpReadDump</Name>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>HarpLoadCellsDevice</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
                    <rx:Name>HarpLoadCellsCommands</rx:Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RigSchema</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>HarpLoadCells.PortName</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="PortName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:Device">
                      <harp:OperationMode>Active</harp:OperationMode>
                      <harp:OperationLed>On</harp:OperationLed>
                      <harp:DumpRegisters>true</harp:DumpRegisters>
                      <harp:VisualIndicators>On</harp:VisualIndicators>
                      <harp:Heartbeat>Disabled</harp:Heartbeat>
                      <harp:IgnoreErrors>false</harp:IgnoreErrors>
                      <harp:PortName>COMx</harp:PortName>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>HarpLoadCellsEvents</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>HarpLoadCellsEvents</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="p1:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="p1:CreateEnableEventsPayload">
                      <p1:EnableEvents>LoadCellData</p1:EnableEvents>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>HarpLoadCellsCommands</Name>
                  </Expression>
                  <Expression xsi:type="p1:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="p1:CreateAcquisitionStatePayload">
                      <p1:AcquisitionState>Enabled</p1:AcquisitionState>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>HarpLoadCellsCommands</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Name" DisplayName="TriggerHarpReadDumpSubjectName" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TriggerHarpReadDump</Name>
                  </Expression>
                  <Expression xsi:type="harp:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="harp:CreateOperationControlPayload">
                      <harp:OperationMode>Active</harp:OperationMode>
                      <harp:DumpRegisters>true</harp:DumpRegisters>
                      <harp:MuteReplies>false</harp:MuteReplies>
                      <harp:VisualIndicators>On</harp:VisualIndicators>
                      <harp:OperationLed>On</harp:OperationLed>
                      <harp:Heartbeat>Enabled</harp:Heartbeat>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>HarpLoadCellsCommands</Name>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\LoadCellsCalibration.bonsai" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="4" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\HarpBehaviorDevice.bonsai" />
            <Expression xsi:type="SubscribeSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>HarpLickometer.PortName</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="PortName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\HarpLicketySplitDevice.bonsai">
              <PortName>COMx</PortName>
              <TriggerHarpReadDumpSubjectName>TriggerHarpReadDump</TriggerHarpReadDumpSubjectName>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>HarpClockGenerator.PortName</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="PortName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.HarpUtils:HarpTimestampGeneratorGen3Device.bonsai">
              <PortName>COMx</PortName>
              <TriggerHarpReadDumpSubjectName>TriggerHarpReadDump</TriggerHarpReadDumpSubjectName>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>HarpAnalogInput.PortName</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="PortName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.HarpUtils:HarpAnalogInputDevice.bonsai">
              <PortName>COMx</PortName>
              <TriggerHarpReadDumpSubjectName>TriggerHarpReadDump</TriggerHarpReadDumpSubjectName>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>HarpAnalogInput</Selector>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:FilterNotNull.bonsai" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Manipulator</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Calibration</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Input</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:SerializeToJson" />
            </Expression>
            <Expression xsi:type="p3:DeserializeFromJson">
              <p3:Type xsi:type="TypeMapping" TypeArguments="p3:AindManipulatorCalibrationInput" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Manipulator</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>PortName</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="PortName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\AindManipulator.bonsai">
              <PortName>COMx</PortName>
              <TriggerHarpReadDumpSubjectName>TriggerHarpReadDump</TriggerHarpReadDumpSubjectName>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="20" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source2" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="26" To="31" Label="Source1" />
            <Edge From="27" To="28" Label="Source1" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="29" To="30" Label="Source1" />
            <Edge From="30" To="31" Label="Source2" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Cameras</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="GroupWorkflow">
              <Name>TriggeredCameras</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RigSchema</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>TriggeredCameraController</Selector>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>TriggeredCameraController</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>FrameRate.Value</Selector>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>CameraFrameRate</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>CameraFrameRate</Name>
                  </Expression>
                  <Expression xsi:type="beh:Format">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Register xsi:type="beh:Camera0Frequency" />
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>HarpBehaviorCommands</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>HarpBehaviorEvents</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="harp:FilterMessageType">
                      <harp:FilterType>Include</harp:FilterType>
                      <harp:MessageType>Event</harp:MessageType>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="beh:Parse">
                    <harp:Register xsi:type="beh:TimestampedCamera0Frame" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value</Selector>
                  </Expression>
                  <Expression xsi:type="BitwiseAnd">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="beh:FrameAcquired">
                      <Value>FrameAcquired</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="GreaterThan">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Byte">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2.Seconds</Selector>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>FrameEvent</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TriggeredCameraController</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Cameras</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="rx:CreateObservable">
                    <Name>InstantiateCamera</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>ThisCamera</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="BooleanProperty">
                            <Value>true</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>TriggeredCamerasInitialized</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>ThisCamera</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Value</Selector>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="SerialNumber" Selector="SerialNumber" />
                            <Property Name="ExposureTime" Selector="Exposure" />
                            <Property Name="Gain" Selector="Gain" />
                            <Property Name="Binning" Selector="Binning" />
                            <Property Name="ColorProcessing" Selector="ColorProcessing" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p4:AindSpinnakerCapture">
                            <spk:Index xsi:nil="true" />
                            <spk:ColorProcessing>Default</spk:ColorProcessing>
                            <p4:ExposureTime>19000</p4:ExposureTime>
                            <p4:Gain>0</p4:Gain>
                            <p4:Binning>1</p4:Binning>
                            <p4:Gamma xsi:nil="true" />
                            <p4:PixelFormat>Mono8</p4:PixelFormat>
                            <p4:RegionOfInterest>
                              <p4:X>0</p4:X>
                              <p4:Y>0</p4:Y>
                              <p4:Width>0</p4:Width>
                              <p4:Height>0</p4:Height>
                            </p4:RegionOfInterest>
                            <p4:AdcBitDepth xsi:nil="true" />
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>FrameEvent</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="harp:CreateTimestamped" />
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>ThisCamera</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Key</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:WithLatestFrom" />
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="9" Label="Source1" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="8" To="9" Label="Source2" />
                        <Edge From="9" To="11" Label="Source1" />
                        <Edge From="10" To="11" Label="Source2" />
                        <Edge From="11" To="12" Label="Source1" />
                        <Edge From="12" To="15" Label="Source1" />
                        <Edge From="13" To="14" Label="Source1" />
                        <Edge From="14" To="15" Label="Source2" />
                        <Edge From="15" To="16" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Annotation">
                    <Name>SpinnakerApiNote</Name>
                    <Text><![CDATA[For some reason, if you try to access the spinnaker API back to back, a threading error is emitted]]></Text>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timer">
                      <rx:DueTime>PT0S</rx:DueTime>
                      <rx:Period>PT0.1S</rx:Period>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="rx:GroupBy">
                    <rx:KeySelector>Item2</rx:KeySelector>
                    <rx:ElementSelector>Item1</rx:ElementSelector>
                  </Expression>
                  <Expression xsi:type="rx:ReplaySubject">
                    <Name>TriggeredCamerasStream</Name>
                    <rx:BufferSize xsi:nil="true" />
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Boolean">
                    <rx:Name>TriggeredCamerasInitialized</rx:Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>1</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:Accumulate" />
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TriggeredCameraController</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Cameras</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Count</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Value" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="GreaterThanOrEqual">
                    <Operand xsi:type="IntProperty">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Delay">
                      <rx:DueTime>PT0.1S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>TriggeredCamerasReady</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="11" To="16" Label="Source2" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="19" To="20" Label="Source1" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="21" To="22" Label="Source1" />
                  <Edge From="22" To="25" Label="Source1" />
                  <Edge From="23" To="24" Label="Source1" />
                  <Edge From="24" To="25" Label="Source2" />
                  <Edge From="25" To="26" Label="Source1" />
                  <Edge From="26" To="27" Label="Source1" />
                  <Edge From="27" To="28" Label="Source1" />
                  <Edge From="28" To="29" Label="Source1" />
                  <Edge From="30" To="31" Label="Source1" />
                  <Edge From="31" To="32" Label="Source1" />
                  <Edge From="32" To="37" Label="Source1" />
                  <Edge From="33" To="34" Label="Source1" />
                  <Edge From="34" To="35" Label="Source1" />
                  <Edge From="35" To="36" Label="Source1" />
                  <Edge From="36" To="37" Label="Source2" />
                  <Edge From="37" To="38" Label="Source1" />
                  <Edge From="38" To="39" Label="Source1" />
                  <Edge From="39" To="40" Label="Source1" />
                  <Edge From="40" To="41" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>MonitoringCameras</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RigSchema</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>MonitoringCameraController</Selector>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:FilterNotNull.bonsai" />
                  <Expression xsi:type="MemberSelector">
                    <Selector>Cameras</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="rx:CreateObservable">
                    <Name>InstantiateCamera</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>ThisCamera</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>ThisCamera</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Value</Selector>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Index</Selector>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Index" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="vid:VideoCaptureDevice">
                            <vid:Index>0</vid:Index>
                            <vid:CaptureProperties />
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>HarpTimestampSource</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:WithLatestFrom" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="harp:CreateTimestamped" />
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>ThisCamera</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Key</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:WithLatestFrom" />
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="9" Label="Source1" />
                        <Edge From="8" To="9" Label="Source2" />
                        <Edge From="9" To="10" Label="Source1" />
                        <Edge From="10" To="13" Label="Source1" />
                        <Edge From="11" To="12" Label="Source1" />
                        <Edge From="12" To="13" Label="Source2" />
                        <Edge From="13" To="14" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="rx:GroupBy">
                    <rx:KeySelector>Item2</rx:KeySelector>
                    <rx:ElementSelector>Item1</rx:ElementSelector>
                  </Expression>
                  <Expression xsi:type="rx:ReplaySubject">
                    <Name>MonitoringCamerasStream</Name>
                    <rx:BufferSize xsi:nil="true" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges />
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Networking</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>SoftwareEvents</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p5:SerializeToJson" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Networking.ZmqPublisher</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="ConnectionString" Selector="ConnectionString" />
                <Property Name="Topic" Selector="Topic" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="zmq:Publisher">
                <zmq:ConnectionString>@tcp://localhost:5556</zmq:ConnectionString>
                <zmq:Topic>telekinesis</zmq:Topic>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="5" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>