<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:beh="clr-namespace:Harp.Behavior;assembly=Harp.Behavior"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="SubscribeSubject">
        <Name>RigSchema</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>HarpBehavior.PortName</Selector>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="PortName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.HarpUtils:HarpBehaviorDevice.bonsai">
        <PortName>COM5</PortName>
        <TriggerHarpReadDumpSubjectName>TriggerHarpReadDump</TriggerHarpReadDumpSubjectName>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="SubscribeSubject">
        <Name>HarpBehaviorEvents</Name>
      </Expression>
      <Expression xsi:type="harp:Parse">
        <harp:Register xsi:type="harp:TimestampedTimestampSeconds" />
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>HarpBehaviorHeartBeat</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>HarpBehaviorEvents</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>Valve+Speaker+Start+Stop</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="beh:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="beh:CreateOutputPulseEnablePayload">
          <beh:OutputPulseEnable>DOPort0 DOPort1 SupplyPort0 DO2</beh:OutputPulseEnable>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>HarpBehaviorCommands</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>HarpBehaviorEvents</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="beh:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="beh:CreateOutputClearPayload">
          <beh:OutputClear>SupplyPort1 SupplyPort2</beh:OutputClear>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>HarpBehaviorCommands</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>HarpBehaviorEvents</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>Photodiode</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="beh:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="beh:CreatePokeInputFilterPayload">
          <beh:PokeInputFilter>1</beh:PokeInputFilter>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>HarpBehaviorCommands</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="11" Label="Source1" />
      <Edge From="10" To="11" Label="Source2" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="20" Label="Source1" />
      <Edge From="19" To="20" Label="Source2" />
      <Edge From="20" To="21" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>