WorkflowBuilder(Version=2.9.1)
Defer Logging
    Defer Behavior
        ExternalizedMapping(Value(DisplayName=Modality))
        -> PropertySource<AllenNeuralDynamics.Core.AppendModalitySuffix,System.Nullable(AllenNeuralDynamics.Core.Modality)>(MemberName=Modality, Value=Behavior)
        -> Take(Count=1)
        -> AsyncSubject Modality

        GroupWorkflow HarpLogging
            SubscribeSubject HarpLickometerEvents => #0
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #2
            AllenNeuralDynamics.LicketySplit.GetMetadata
            -> PropertyMapping(DeviceMetadata) => #4
            #0, #2, #4 -> IncludeWorkflow
              Path=AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai
              DeviceMetadata:
                %YAML 1.1
                ---
                # yaml-language-server: $schema=https://raw.githubusercontent.com/harp-tech/reflex-generator/main/schema/device.json
                device: LicketySplit
                whoAmI: 1400
                firmwareVersion: "0.0"
                hardwareTargets: "0.5"
                registers:
                  LickState:
                    address: 32
                    type: U8
                    access: Event
                    maskType: LickChannels
                    description: Emits an event when the state of any lick detector changes. Value will be High when lick detected and Low otherwise.
                  Channel0TriggerThreshold: &thresholdreg
                    address: 33
                    type: U8
                    access: Write
                    description: Threshold value to detect the lick. Values below this threshold will be considered a detected lick.
                  Channel0UntriggerThreshold:
                    <<: *thresholdreg
                    address: 34
                    description: Threshold value to release the lick detection state. Values above this threshold will untrigger a detected lick.
                bitMasks:
                  LickChannels:
                    description: The channel of the lick detector.
                    bits:
                      Channel0: 0x1
                      Channel1: 0x2
              Modality=Behavior
              DeviceName=Lickometer

            SubscribeSubject HarpBehaviorEvents => #6
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #8
            Harp.Behavior.GetDeviceMetadata
            -> PropertyMapping(DeviceMetadata) => #10
            #6, #8, #10 -> IncludeWorkflow
              Path=AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai
              DeviceMetadata:
                %YAML 1.1
                ---
                # yaml-language-server: $schema=https://harp-tech.org/draft-02/schema/device.json
                device: Behavior
                whoAmI: 1216
                firmwareVersion: "3.2"
                hardwareTargets: "1.1"
                registers:
                  DigitalInputState:
                    address: 32
                    access: Event
                    type: U8
                    maskType: DigitalInputs
                    description: Reflects the state of DI digital lines of each Port
                  Reserved0: &reserved
                    address: 33
                    type: U8
                    access: Read
                    description: Reserved for future use
                    visibility: private
                  OutputSet: &output
                    address: 34
                    type: U16
                    access: Write
                    maskType: DigitalOutputs
                    description: Set the specified digital output lines.
                  OutputClear:
                    <<: *output
                    address: 35
                    description: Clear the specified digital output lines
                  OutputToggle:
                    <<: *output
                    address: 36
                    description: Toggle the specified digital output lines
                  OutputState:
                    <<: *output
                    address: 37
                    description: Write the state of all digital output lines
                  PortDIOSet: &portDIO
                    address: 38
                    type: U8
                    access: Write
                    maskType: PortDigitalIOS
                    description: Set the specified port DIO lines
                  PortDIOClear:
                    <<: *portDIO
                    address: 39
                    description: Clear the specified port DIO lines
                  PortDIOToggle:
                    <<: *portDIO
                    address: 40
                    description: Toggle the specified port DIO lines
                  PortDIOState:
                    <<: *portDIO
                    address: 41
                    description: Write the state of all port DIO lines
                  PortDIODirection:
                    <<: *portDIO
                    address: 42
                    description: Specifies which of the port DIO lines are outputs
                  PortDIOStateEvent:
                    <<: *portDIO
                    address: 43
                    access: Event
                    description: Specifies the state of the port DIO lines on a line change
                  AnalogData:
                    address: 44
                    type: S16
                    length: 3
                    access: Event
                    description: Voltage at the ADC input and encoder value on Port 2
                    payloadSpec:
                      AnalogInput0:
                        offset: 0
                        description: The voltage at the output of the ADC channel 0.
                      Encoder:
                        offset: 1
                        description: The quadrature counter value on Port 2
                      AnalogInput1:
                        offset: 2
                        description: The voltage at the output of the ADC channel 1.
                  OutputPulseEnable:
                    <<: *output
                    address: 45
                    description: Enables the pulse function for the specified output lines
                  PulseDOPort0: &pulseDO
                    address: 46
                    type: U16
                    access: Write
                    minValue: 1
                    description: Specifies the duration of the output pulse in milliseconds.
                  PulseDOPort1:
                    <<: *pulseDO
                    address: 47
                  PulseDOPort2:
                    <<: *pulseDO
                    address: 48
                  PulseSupplyPort0:
                    <<: *pulseDO
                    address: 49
                  PulseSupplyPort1:
                    <<: *pulseDO
                    address: 50
                  PulseSupplyPort2:
                    <<: *pulseDO
                    address: 51
                  PulseLed0:
                    <<: *pulseDO
                    address: 52
                  PulseLed1:
                    <<: *pulseDO
                    address: 53
                  PulseRgb0:
                    <<: *pulseDO
                    address: 54
                  PulseRgb1:
                    <<: *pulseDO
                    address: 55
                  PulseDO0:
                    <<: *pulseDO
                    address: 56
                  PulseDO1:
                    <<: *pulseDO
                    address: 57
                  PulseDO2:
                    <<: *pulseDO
                    address: 58
                  PulseDO3:
                    <<: *pulseDO
                    address: 59
                  PwmFrequencyDO0: &pwmFreq
                    address: 60
                    type: U16
                    access: Write
                    minValue: 1
                    description: Specifies the frequency of the PWM at DO0.
                  PwmFrequencyDO1:
                    <<: *pwmFreq
                    address: 61
                    description: Specifies the frequency of the PWM at DO1.
                  PwmFrequencyDO2:
                    <<: *pwmFreq
                    address: 62
                    description: Specifies the frequency of the PWM at DO2.
                  PwmFrequencyDO3:
                    <<: *pwmFreq
                    address: 63
                    description: Specifies the frequency of the PWM at DO3.
                  PwmDutyCycleDO0: &pwmDutyCycle
                    address: 64
                    type: U8
                    access: Write
                    minValue: 1
                    maxValue: 99
                    description: Specifies the duty cycle of the PWM at DO0.
                  PwmDutyCycleDO1:
                    <<: *pwmDutyCycle
                    address: 65
                    description: Specifies the duty cycle of the PWM at DO1.
                  PwmDutyCycleDO2:
                    <<: *pwmDutyCycle
                    address: 66
                    description: Specifies the duty cycle of the PWM at DO2.
                  PwmDutyCycleDO3:
                    <<: *pwmDutyCycle
                    address: 67
                    description: Specifies the duty cycle of the PWM at DO3.
                  PwmStart: &pwmStartStop
                    address: 68
                    type: U8
                    access: Write
                    maskType: PwmOutputs
                    description: Starts the PWM on the selected output lines.
                  PwmStop:
                    <<: *pwmStartStop
                    address: 69
                    description: Stops the PWM on the selected output lines.
                  RgbAll:
                    address: 70
                    type: &rgbType U8
                    length: 6
                    access: &rgbAccess Write
                    description: Specifies the state of all RGB LED channels.
                    payloadSpec:
                      Green0:
                        offset: 0
                        description: The intensity of the green channel in the RGB0 LED.
                      Red0:
                        offset: 1
                        description: The intensity of the red channel in the RGB0 LED.
                      Blue0:
                        offset: 2
                        description: The intensity of the blue channel in the RGB0 LED.
                      Green1:
                        offset: 3
                        description: The intensity of the green channel in the RGB1 LED.
                      Red1:
                        offset: 4
                        description: The intensity of the red channel in the RGB1 LED.
                      Blue1:
                        offset: 5
                        description: The intensity of the blue channel in the RGB1 LED.
                  Rgb0: &rgbRegister
                    address: 71
                    type: *rgbType
                    length: 3
                    access: *rgbAccess
                    description: Specifies the state of the RGB0 LED channels.
                    interfaceType: RgbPayload
                    payloadSpec:
                      Green:
                        offset: 0
                        description: The intensity of the green channel in the RGB LED.
                      Red:
                        offset: 1
                        description: The intensity of the red channel in the RGB LED.
                      Blue:
                        offset: 2
                        description: The intensity of the blue channel in the RGB LED.
                  Rgb1:
                    <<: *rgbRegister
                    address: 72
                    description: Specifies the state of the RGB1 LED channels.
                  Led0Current: &ledCurrent
                    address: 73
                    type: U8
                    access: Write
                    minValue: 2
                    maxValue: 100
                    description: Specifies the configuration of current to drive LED 0.
                  Led1Current:
                    <<: *ledCurrent
                    address: 74
                    description: Specifies the configuration of current to drive LED 1.
                  Led0MaxCurrent: &ledMaxCurrent
                    address: 75
                    type: U8
                    access: Write
                    minValue: 5
                    maxValue: 100
                    description: Specifies the configuration of current to drive LED 0.
                  Led1MaxCurrent:
                    <<: *ledMaxCurrent
                    address: 76
                    description: Specifies the configuration of current to drive LED 1.
                  EventEnable:
                    address: 77
                    type: U8
                    access: Write
                    maskType: Events
                    description: Specifies the active events in the device.
                  StartCameras: &cameraControl
                    address: 78
                    type: U8
                    access: Write
                    maskType: CameraOutputs
                    description: Specifies the camera outputs to enable in the device.
                  StopCameras:
                    <<: *cameraControl
                    access: [Write, Event]
                    address: 79
                    description: Specifies the camera outputs to disable in the device. An event will be issued when the trigger signal is actually stopped being generated.
                  EnableServos: &servoControl
                    address: 80
                    type: U8
                    access: Write
                    maskType: ServoOutputs
                    description: Specifies the servo outputs to enable in the device.
                  DisableServos:
                    <<: *servoControl
                    address: 81
                    description: Specifies the servo outputs to disable in the device.
                  EnableEncoders:
                    address: 82
                    type: U8
                    access: Write
                    maskType: EncoderInputs
                    description: Specifies the port quadrature counters to enable in the device.
                  EncoderMode:
                    address: 83
                    type: U8
                    access: Write
                    maskType: EncoderModeConfig
                    description: Configures the operation mode of the quadrature encoders.
                  Reserved2:
                    <<: *reserved
                    address: 84
                  Reserved3:
                    <<: *reserved
                    address: 85
                  Reserved4:
                    <<: *reserved
                    address: 86
                  Reserved5:
                    <<: *reserved
                    address: 87
                  Reserved6:
                    <<: *reserved
                    address: 88
                  Reserved7:
                    <<: *reserved
                    address: 89
                  Reserved8:
                    <<: *reserved
                    address: 90
                  Reserved9:
                    <<: *reserved
                    address: 91
                  Camera0Frame: &frameAcquired
                    address: 92
                    type: U8
                    access: Event
                    maskType: FrameAcquired
                    description: Specifies that a frame was acquired on camera 0.
                  Camera0Frequency: &cameraFreq
                    address: 93
                    type: U16
                    access: Write
                    minValue: 1
                    maxValue: 600
                    description: Specifies the trigger frequency for camera 0.
                  Camera1Frame:
                    <<: *frameAcquired
                    address: 94
                    description: Specifies that a frame was acquired on camera 1.
                  Camera1Frequency:
                    <<: *cameraFreq
                    address: 95
                    description: Specifies the trigger frequency for camera 1.
                  Reserved10:
                    <<: *reserved
                    address: 96
                  Reserved11:
                    <<: *reserved
                    address: 97
                  Reserved12:
                    <<: *reserved
                    address: 98
                  Reserved13:
                    <<: *reserved
                    address: 99
                  ServoMotor2Period: &servoPeriod
                    address: 100
                    type: U16
                    access: Write
                    minValue: 2
                    maxValue: 65534
                    description: Specifies the period of the servo motor in DO2, in microseconds.
                  ServoMotor2Pulse: &servoPulse
                    address: 101
                    type: U16
                    access: Write
                    minValue: 6
                    maxValue: 65530
                    description: Specifies the pulse of the servo motor in DO2, in microseconds.
                  ServoMotor3Period:
                    <<: *servoPeriod
                    address: 102
                    description: Specifies the period of the servo motor in DO3, in microseconds.
                  ServoMotor3Pulse:
                    <<: *servoPulse
                    address: 103
                    description: Specifies the pulse of the servo motor in DO3, in microseconds.
                  Reserved14:
                    <<: *reserved
                    address: 104
                  Reserved15:
                    <<: *reserved
                    address: 105
                  Reserved16:
                    <<: *reserved
                    address: 106
                  Reserved17:
                    <<: *reserved
                    address: 107
                  EncoderReset:
                    address: 108
                    type: U8
                    access: Write
                    maskType: EncoderInputs
                    description: Reset the counter of the specified encoders to zero.
                  Reserved18:
                    <<: *reserved
                    address: 109
                  EnableSerialTimestamp:
                    address: 110
                    type: U8
                    access: Write
                    description: Enables the timestamp for serial TX.
                  MimicPort0IR: &mimic
                    address: 111
                    type: U8
                    access: Write
                    maskType: MimicOutput
                    description: Specifies the digital output to mimic the Port 0 IR state.
                  MimicPort1IR:
                    <<: *mimic
                    address: 112
                    description: Specifies the digital output to mimic the Port 1 IR state.
                  MimicPort2IR:
                    <<: *mimic
                    address: 113
                    description: Specifies the digital output to mimic the Port 2 IR state.
                  Reserved20:
                    <<: *reserved
                    address: 114
                  Reserved21:
                    <<: *reserved
                    address: 115
                  Reserved22:
                    <<: *reserved
                    address: 116
                  MimicPort0Valve:
                    <<: *mimic
                    address: 117
                    description: Specifies the digital output to mimic the Port 0 valve state.
                  MimicPort1Valve:
                    <<: *mimic
                    address: 118
                    description: Specifies the digital output to mimic the Port 1 valve state.
                  MimicPort2Valve:
                    <<: *mimic
                    address: 119
                    description: Specifies the digital output to mimic the Port 2 valve state.
                  Reserved23:
                    <<: *reserved
                    address: 120
                  Reserved24:
                    <<: *reserved
                    address: 121
                  PokeInputFilter:
                    address: 122
                    type: U8
                    access: Write
                    description: Specifies the low pass filter time value for poke inputs, in ms.
                bitMasks:
                  DigitalInputs:
                    description: Specifies the state of port digital input lines.
                    bits:
                      DIPort0: 0x1
                      DIPort1: 0x2
                      DIPort2: 0x4
                      DI3: 0x8
                  DigitalOutputs:
                    description: Specifies the state of port digital output lines.
                    bits:
                      DOPort0: 0x1
                      DOPort1: 0x2
                      DOPort2: 0x4
                      SupplyPort0: 0x8
                      SupplyPort1: 0x10
                      SupplyPort2: 0x20
                      Led0: 0x40
                      Led1: 0x80
                      Rgb0: 0x100
                      Rgb1: 0x200
                      DO0: 0x400
                      DO1: 0x800
                      DO2: 0x1000
                      DO3: 0x2000
                  PortDigitalIOS:
                    description: Specifies the state of the port DIO lines.
                    bits:
                      DIO0: 0x1
                      DIO1: 0x2
                      DIO2: 0x4
                  PwmOutputs:
                    description: Specifies the state of PWM output lines.
                    bits:
                      PwmDO0: 0x1
                      PwmDO1: 0x2
                      PwmDO2: 0x4
                      PwmDO3: 0x8
                  Events:
                    description: Specifies the active events in the device.
                    bits:
                      PortDI: 0x1
                      PortDIO: 0x2
                      AnalogData: 0x4
                      Camera0: 0x8
                      Camera1: 0x10
                  CameraOutputs:
                    description: Specifies camera output enable bits.
                    bits:
                      CameraOutput0: 0x1
                      CameraOutput1: 0x2
                  ServoOutputs:
                    description: Specifies servo output enable bits.
                    bits:
                      ServoOutput2: 0x4
                      ServoOutput3: 0x8
                  EncoderInputs:
                    description: Specifies quadrature counter enable bits.
                    bits:
                      EncoderPort2: 0x4
                  FrameAcquired:
                    description: Specifies that camera frame was acquired.
                    bits:
                      FrameAcquired: 0x1
                groupMasks:
                  MimicOutput:
                    description: Specifies the target IO on which to mimic the specified register.
                    values:
                      None: 0
                      DIO0: 1
                      DIO1: 2
                      DIO2: 3
                      DO0: 4
                      DO1: 5
                      DO2: 6
                      DO3: 7
                  EncoderModeConfig:
                    description: Specifies the type of reading made from the quadrature encoder.
                    values:
                      Position: 0
                      Displacement: 1
              Modality=Behavior
              DeviceName=Behavior

            SubscribeSubject StepperDriverEvents => #12
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #14
            Harp.StepperDriver.GetDeviceMetadata
            -> PropertyMapping(DeviceMetadata) => #16
            #12, #14, #16 -> IncludeWorkflow
              Path=AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai
              DeviceMetadata:
                %YAML 1.1
                ---
                # yaml-language-server: $schema=https://harp-tech.org/draft-02/schema/device.json
                device: StepperDriver
                whoAmI: 1130
                firmwareVersion: "0.7"
                hardwareTargets: "1.0"
                registers:
                  ##################################
                  # Enable and disable
                  ##################################
                  EnableDriver:
                    address: 32
                    type: U8
                    access: Write
                    maskType: StepperMotors
                    description: Enables the driver for a specific motor. If the driver is already enabled, the driver remains enabled.
                  DisableDriver:
                    address: 33
                    type: U8
                    access: Write
                    maskType: StepperMotors
                    description: Disables the driver for a specific stepper motor, which prevents current from being sent to the motor or load. If the driver is already disabled, the driver remains disabled.
                  EnableEncoders:
                    address: 34
                    type: U8
                    access: Write
                    maskType: QuadratureEncoders
                    description: Specifies a set of port quadrature counters to enable in the device.
                  DisableEncoders:
                    address: 35
                    type: U8
                    access: Write
                    maskType: QuadratureEncoders
                    description: Specifies a set of port quadrature counters to disable in the device.
                  EnableDigitalInputs:
                    address: 36
                    type: U8
                    access: Write
                    maskType: DigitalInputs
                    description: Specifies a set of digital inputs to enable in the device.
                  DisableDigitalInputs:
                    address: 37
                    type: U8
                    access: Write
                    maskType: DigitalInputs
                    description: Specifies a set of digital inputs to disable in the device.

                  ##################################
                  # Configuration
                  ##################################
                  Motor0OperationMode: &opmode
                    address: 38
                    type: U8
                    access: Write
                    maskType: MotorOperationMode
                    description: Configures the operation mode for motor 0.
                  Motor1OperationMode:
                    <<: *opmode
                    address: 39
                    description: Configures the operation mode for motor 1.
                  Motor2OperationMode:
                    <<: *opmode
                    address: 40
                    description: Configures the operation mode for motor 2.
                  Motor3OperationMode:
                    <<: *opmode
                    address: 41
                    description: Configures the operation mode for motor 3.
                  Motor0MicrostepResolution: &microstep_resolution
                    address: 42
                    type: U8
                    access: Write
                    maskType: MicrostepResolution
                    description: Configures the microstep resolution for motor 0.
                  Motor1MicrostepResolution:
                    <<: *microstep_resolution
                    address: 43
                    description: Configures the microstep resolution for motor 1.
                  Motor2MicrostepResolution:
                    <<: *microstep_resolution
                    address: 44
                    description: Configures the microstep resolution for motor 2.
                  Motor3MicrostepResolution:
                    <<: *microstep_resolution
                    address: 45
                    description: Configures the microstep resolution for motor 3.

                  Motor0MaximumRunCurrent: &maxcurrent
                    address: 46
                    minValue: 0.139
                    maxValue: 2.1
                    defaultValue: 0.2
                    type: Float
                    access: Write
                    description: Configures the maximum run RMS current per phase for motor 0.
                  Motor1MaximumRunCurrent:
                    <<: *maxcurrent
                    address: 47
                    description: Configures the maximum run RMS current per phase for motor 1.
                  Motor2MaximumRunCurrent:
                    <<: *maxcurrent
                    address: 48
                    description: Configures the maximum run RMS current per phase for motor 2.
                  Motor3MaximumRunCurrent:
                    <<: *maxcurrent
                    address: 49
                    description: Configures the maximum run RMS current per phase for motor 3.

                  Motor0HoldCurrentReduction: &currentreduction
                    address: 50
                    type: U8
                    access: Write
                    maskType: HoldCurrentReduction
                    description: Configures the hold current reduction for motor 0.
                  Motor1HoldCurrentReduction:
                    <<: *currentreduction
                    address: 51
                    description: Configures the hold current reduction for motor 1.
                  Motor2HoldCurrentReduction:
                    <<: *currentreduction
                    address: 52
                    description: Configures the hold current reduction for motor 2.
                  Motor3HoldCurrentReduction:
                    <<: *currentreduction
                    address: 53
                    description: Configures the hold current reduction for motor 3.

                  Motor0StepInterval: &nominalinterval
                    address: 54
                    minValue: 100
                    maxValue: 20000
                    defaultValue: 250
                    type: U16
                    access: Write
                    description: Configures the time between step motor pulses (us) when running at nominal speed for motor 0.
                  Motor1StepInterval:
                    <<: *nominalinterval
                    address: 55
                    description: Configures the time between step motor pulses (us) when running at nominal speed for motor 1.
                  Motor2StepInterval:
                    <<: *nominalinterval
                    address: 56
                    description: Configures the time between step motor pulses (us) when running at nominal speed for motor 2.
                  Motor3StepInterval:
                    <<: *nominalinterval
                    address: 57
                    description: Configures the time between step motor pulses (us) when running at nominal speed for motor 3.

                  Motor0MaximumStepInterval: &maxinterval
                    address: 58
                    minValue: 100
                    maxValue: 20000
                    defaultValue: 2000
                    type: U16
                    access: Write
                    description: Configures the time between step motor pulses (us) used when starting or stopping a movement for motor 0.
                  Motor1MaximumStepInterval:
                    <<: *maxinterval
                    address: 59
                    description: Configures the time between step motor pulses (us) used when starting or stopping a movement for motor 1.
                  Motor2MaximumStepInterval:
                    <<: *maxinterval
                    address: 60
                    description: Configures the time between step motor pulses (us) used when starting or stopping a movement for motor 2.
                  Motor3MaximumStepInterval:
                    <<: *maxinterval
                    address: 61
                    description: Configures the time between step motor pulses (us) used when starting or stopping a movement for motor 3.

                  Motor0StepAccelerationInterval: &accperiod
                    address: 62
                    minValue: 2
                    maxValue: 2000
                    defaultValue: 10
                    type: U16
                    access: Write
                    description: Configures the acceleration for motor 0. The time between step pulses is decreased by this value when accelerating and increased when decelerating.
                  Motor1StepAccelerationInterval:
                    <<: *accperiod
                    address: 63
                    description: Configures the acceleration for motor 1. The time between step pulses is decreased by this value when accelerating and increased when decelerating.
                  Motor2StepAccelerationInterval:
                    <<: *accperiod
                    address: 64
                    description: Configures the acceleration for motor 2. The time between step pulses is decreased by this value when accelerating and increased when decelerating.
                  Motor3StepAccelerationInterval:
                    <<: *accperiod
                    address: 65
                    description: Configures the acceleration for motor 3. The time between step pulses is decreased by this value when accelerating and increased when decelerating.

                  EncoderMode:
                    address: 66
                    type: U8
                    access: Write
                    maskType: EncoderModeConfig
                    description: Configures the operation mode of the quadrature encoder.
                  EncoderSamplingRate:
                    address: 67
                    type: U8
                    access: Write
                    maskType: EncoderSamplingRateConfig
                    description: Configures the sampling rate of the quadrature encoder event.

                  Input0OpMode: &input_mode
                    address: 68
                    type: U8
                    access: Write
                    maskType: InputOpModeConfig
                    description: Configures the operation mode for digital input 0.
                  Input1OpMode:
                    <<: *input_mode
                    address: 69
                    description: Configures the operation mode for digital input 1.
                  Input2OpMode:
                    <<: *input_mode
                    address: 70
                    description: Configures the operation mode for digital input 2.
                  Input3OpMode:
                    <<: *input_mode
                    address: 71
                    description: Configures the operation mode for digital input 3.

                  InterlockEnabled:
                    address: 72
                    type: U8
                    access: Write
                    maskType: InterlockEnabledConfig
                    description: Configures the external interlock connector state required for the device to be enabled.

                  AccumulatedStepsSamplingRate:
                    address: 73
                    type: U8
                    access: Write
                    maskType: AccumulatedStepsSamplingRateConfig
                    description: Configures the dispatch rate of the accumulated steps event.

                  ##################################
                  # Events
                  ##################################
                  MotorStopped:
                    address: 74
                    type: U8
                    access: Event
                    description: Emitted when any of the motors stops.
                    payloadSpec:
                      State:
                        description: Specifies which motors are currently stopped.
                        maskType: StepperMotors
                        mask: 0x0F
                      Changed:
                        description: Specifies which motor just stopped.
                        maskType: StepperMotors
                        mask: 0xF0
                  MotorOverVoltageDetection:
                    address: 75
                    type: U8
                    access: Event
                    maskType: StepperMotors
                    description: Contains a bit mask specifying the motor where the over voltage detection and protection mechanism occurred, which can happen when the there's a quick deceleration from a high velocity or when the motor stalls (not implemented).
                  MotorRaisedError:
                    address: 76
                    type: U8
                    access: Event
                    maskType: StepperMotors
                    description: Contains a bit mask specifying the motor that triggered the error which can be happen in case of short-circuit or driver temperature above 165 degrees celsius.

                  Encoders:
                    address: 77
                    type: S16
                    length: 3
                    access: [Event, Write]
                    description: Contains the quadrature encoder readings.
                    payloadSpec:
                      Encoder0:
                        offset: 0
                        description: The quadrature counter on port ENC 0.
                      Encoder1:
                        offset: 1
                        description: The quadrature counter on port ENC 1.
                      Encoder2:
                        offset: 2
                        description: The quadrature counter on port ENC 2.

                  DigitalInputState:
                    address: 78
                    access: Event
                    type: U8
                    maskType: DigitalInputStates
                    description: Reflects the state of the digital input lines.

                  DeviceState:
                    address: 79
                    type: U8
                    access: Event
                    maskType: DeviceStateMode
                    description: Contains the state of the device.

                  ##################################
                  # Movement control
                  ##################################

                  MoveRelative:
                    address: 80
                    type: S32
                    length: 4
                    access: Write
                    description: Moves all motors by the number of steps written in this array register and set the direction according to the value's signal. If a motor is disable, the user should set the value to 0.
                    payloadSpec:
                      Motor0:
                        offset: 0
                        description: Contains the number of steps used to move motor 0.
                      Motor1:
                        offset: 1
                        description: Contains the number of steps used to move motor 1.
                      Motor2:
                        offset: 2
                        description: Contains the number of steps used to move motor 2.
                      Motor3:
                        offset: 3
                        description: Contains the number of steps used to move motor 3.

                  Motor0MoveRelative: &motorsteps
                    address: 81
                    type: S32
                    access: Write
                    description: Moves motor 0 by the number of steps written in this register and set the direction according to the value's signal.
                  Motor1MoveRelative:
                    <<: *motorsteps
                    address: 82
                    description: Moves motor 1 by the number of steps written in this register and set the direction according to the value's signal.
                  Motor2MoveRelative:
                    <<: *motorsteps
                    address: 83
                    description: Moves motor 2 by the number of steps written in this register and set the direction according to the value's signal.
                  Motor3MoveRelative:
                    <<: *motorsteps
                    address: 84
                    description: Moves motor 3 by the number of steps written in this register and set the direction according to the value's signal.

                  MoveAbsolute:
                    address: 85
                    type: S32
                    length: 4
                    access: Write
                    description: Moves all motors to the absolute position written in this array register. If a motor is disable, the user should set the value to 0.
                    payloadSpec:
                      Motor0:
                        offset: 0
                        description: Contains the absolute position to move motor 0.
                      Motor1:
                        offset: 1
                        description: Contains the absolute position to move motor 1.
                      Motor2:
                        offset: 2
                        description: Contains the absolute position to move motor 2.
                      Motor3:
                        offset: 3
                        description: Contains the absolute position to move motor 3.

                  Motor0MoveAbsolute: &motorabsolutesteps
                    address: 86
                    type: S32
                    access: Write
                    description: Moves motor 0 to the absolute position written in this register.
                  Motor1MoveAbsolute:
                    <<: *motorabsolutesteps
                    address: 87
                    description: Moves motor 1 to the absolute position written in this register.
                  Motor2MoveAbsolute:
                    <<: *motorabsolutesteps
                    address: 88
                    description: Moves motor 2 to the absolute position written in this register.
                  Motor3MoveAbsolute:
                    <<: *motorabsolutesteps
                    address: 89
                    description: Moves motor 3 to the absolute position written in this register.

                  AccumulatedSteps:
                    address: 90
                    type: S32
                    length: 4
                    access: [Event, Write]
                    description: Contains the accumulated steps of all motors. Write a value to set the accumulated steps. An event will be emitted with a dispatch rate defined in AccumulatedStepsSamplingRate.
                    payloadSpec:
                      Motor0:
                        offset: 0
                        description: Contains the accumulated steps of motor 0.
                      Motor1:
                        offset: 1
                        description: Contains the accumulated steps of motor 1.
                      Motor2:
                        offset: 2
                        description: Contains the accumulated steps of motor 2.
                      Motor3:
                        offset: 3
                        description: Contains the accumulated steps of motor 3.

                  Mortor0AccumulatedSteps: &motorsaccumulatedsteps
                    address: 91
                    type: S32
                    access: Write
                    description: Contains the accumulated number of steps of motor 0. Write a value to set the current number of accumulated steps.
                  Mortor1AccumulatedSteps:
                    <<: *motorsaccumulatedsteps
                    address: 92
                    description: Contains the accumulated number of steps of motor 1. Write a value to set the current number of accumulated steps.
                  Mortor2AccumulatedSteps:
                    <<: *motorsaccumulatedsteps
                    address: 93
                    description: Contains the accumulated number of steps of motor 2. Write a value to set the current number of accumulated steps.
                  Mortor3AccumulatedSteps:
                    <<: *motorsaccumulatedsteps
                    address: 94
                    description: Contains the accumulated number of steps of motor 3. Write a value to set the current number of accumulated steps.

                  MaxPosition:
                    address: 95
                    type: S32
                    length: 4
                    access: Write
                    description: Defines the limit of the accumulated steps for the positive movement of all motors. The device will not let the motors move further than this value. A value equal to 0 will disable the limits.
                    payloadSpec:
                      Motor0:
                        offset: 0
                        description: Defines the limit of the accumulated steps for the positive movement of motor 0. The device will not let the motor move further than this value.
                      Motor1:
                        offset: 1
                        description: Defines the limit of the accumulated steps for the positive movement of motor 1. The device will not let the motor move further than this value.
                      Motor2:
                        offset: 2
                        description: Defines the limit of the accumulated steps for the positive movement of motor 2. The device will not let the motor move further than this value.
                      Motor3:
                        offset: 3
                        description: Defines the limit of the accumulated steps for the positive movement of motor 3. The device will not let the motor move further than this value.

                  Motor0MaxPosition: &motorsmaxsteps
                    address: 96
                    type: S32
                    access: Write
                    description: Specifies the limit of the accumulated steps for the positive movement of motor 0. The device will not let the motor move further than this value. A value equal to 0 disables the feature.
                  Motor1MaxPosition:
                    <<: *motorsmaxsteps
                    address: 97
                    description: Specifies the limit of the accumulated steps for the positive movement of motor 1. The device will not let the motor move further than this value. A value equal to 0 disables the feature.
                  Motor2MaxPosition:
                    <<: *motorsmaxsteps
                    address: 98
                    description: Specifies the limit of the accumulated steps for the positive movement of motor 2. The device will not let the motor move further than this value. A value equal to 0 disables the feature.
                  Motor3MaxPosition:
                    <<: *motorsmaxsteps
                    address: 99
                    description: Specifies the limit of the accumulated steps for the positive movement of motor 3. The device will not let the motor move further than this value. A value equal to 0 disables the feature.

                  MinPosition:
                    address: 100
                    type: S32
                    length: 4
                    access: Write
                    description: Defines the limit of the accumulated steps for the negative movement of all motors. The device will not let the motors move further than this value. A value equal to 0 will disable the limits.
                    payloadSpec:
                      Motor0:
                        offset: 0
                        description: Defines the limit of the accumulated steps for the negative movement of motor 0. The device will not let the motor move further than this value.
                      Motor1:
                        offset: 1
                        description: Defines the limit of the accumulated steps for the negative movement of motor 1. The device will not let the motor move further than this value.
                      Motor2:
                        offset: 2
                        description: Defines the limit of the accumulated steps for the negative movement of motor 2. The device will not let the motor move further than this value.
                      Motor3:
                        offset: 3
                        description: Defines the limit of the accumulated steps for the negative movement of motor 3. The device will not let the motor move further than this value.

                  Motor0MinPosition: &motorsminsteps
                    address: 101
                    type: S32
                    access: Write
                    description: Specifies the limit of the accumulated steps for the negative movement of motor 0. The device will not let the motor move further than this value. A value equal to 0 disables the feature.
                  Motor1MinPosition:
                    <<: *motorsminsteps
                    address: 102
                    description: Specifies the limit of the accumulated steps for the negative movement of motor 1. The device will not let the motor move further than this value. A value equal to 0 disables the feature.
                  Motor2MinPosition:
                    <<: *motorsminsteps
                    address: 103
                    description: Specifies the limit of the accumulated steps for the negative movement of motor 2. The device will not let the motor move further than this value. A value equal to 0 disables the feature.
                  Motor3MinPosition:
                    <<: *motorsminsteps
                    address: 104
                    description: Specifies the limit of the accumulated steps for the negative movement of motor 3. The device will not let the motor move further than this value. A value equal to 0 disables the feature.

                  StepRelative:
                    address: 105
                    type: S32
                    length: 4
                    access: Write
                    description: Starts the movement of all motors with the step interval defined by this array. The value's signal defines the direction.
                    payloadSpec:
                      Motor0:
                        offset: 0
                        description: Starts the movement of motor 0 with the step interval defined by this register. The value's signal defines the direction.
                      Motor1:
                        offset: 1
                        description: Starts the movement of motor 1 with the step interval defined by this register. The value's signal defines the direction.
                      Motor2:
                        offset: 2
                        description: Starts the movement of motor 2 with the step interval defined by this register. The value's signal defines the direction.
                      Motor3:
                        offset: 3
                        description: Starts the movement of motor 3 with the step interval defined by this register. The value's signal defines the direction.

                  Motor0StepRelative: &immediatesteps
                    address: 106
                    type: S32
                    access: Write
                    description: Starts the movement of motor 0 with the step interval defined by this register, disregarding the acceleration protocol. The sign of the value specifies the direction.
                  Motor1StepRelative:
                    <<: *immediatesteps
                    address: 107
                    description: Starts the movement of motor 1 with the step interval defined by this register, disregarding the acceleration protocol. The sign of the value specifies the direction.
                  Motor2StepRelative:
                    <<: *immediatesteps
                    address: 108
                    description: Starts the movement of motor 2 with the step interval defined by this register, disregarding the acceleration protocol. The sign of the value specifies the direction.
                  Motor3StepRelative:
                    <<: *immediatesteps
                    address: 109
                    description: Starts the movement of motor 3 with the step interval defined by this register, disregarding the acceleration protocol. The sign of the value specifies the direction.

                  ##################################
                  # Actions
                  ##################################
                  StopMotors:
                    address: 110
                    type: U8
                    access: Write
                    maskType: StepperMotors
                    description: Stops the motors selected in the bit-mask immediately.
                  ResetMotors:
                    address: 111
                    type: U8
                    access: Write
                    visibility: private
                    maskType: StepperMotors
                    description: Resets the internal motor driver which also clears any eventual error (not implemented).
                  ResetEncoders:
                    address: 112
                    type: U8
                    access: Write
                    maskType: QuadratureEncoders
                    description: Resets the encoder.

                  ##################################
                  # Reserved
                  ##################################
                  Reserved0: &reserved
                    address: 113
                    type: U8
                    access: Write
                    visibility: private
                    description: Contains the CFG configuration pins of the TMC2210 driver that controls motor 0.
                  Reserved1:
                    <<: *reserved
                    address: 114
                    description: Contains the CFG configuration pins of the TMC2210 driver that controls motor 1.
                  Reserved2:
                    <<: *reserved
                    address: 115
                    description: Contains the CFG configuration pins of the TMC2210 driver that controls motor 2.
                  Reserved3:
                    <<: *reserved
                    address: 116
                    description: Contains the CFG configuration pins of the TMC2210 driver that controls motor 3.
                  Reserved4:
                    <<: *reserved
                    address: 117
                    visibility: private
                    description: Contains the raw data of the digital potentiometer that controls current limit of motor 0.
                  Reserved5:
                    <<: *reserved
                    address: 118
                    visibility: private
                    description: Contains the raw data of the digital potentiometer that controls current limit of motor 1.
                  Reserved6:
                    <<: *reserved
                    address: 119
                    visibility: private
                    description: Contains the raw data of the digital potentiometer that controls current limit of motor 2.
                  Reserved7:
                    <<: *reserved
                    address: 120
                    visibility: private
                    description: Contains the raw data of the digital potentiometer that controls current limit of motor 3.

                  ##################################
                  # Reserved block
                  ##################################
                  Reserved8: &reserved_unused
                    address: 121
                    visibility: private
                    type: U8
                    access: Read
                    description: Reserved register.
                  Reserved9:
                    <<: *reserved_unused
                    address: 122
                  Reserved10:
                    <<: *reserved_unused
                    address: 123
                  Reserved11:
                    <<: *reserved_unused
                    address: 124
                  Reserved12:
                    <<: *reserved_unused
                    address: 125
                  Reserved13:
                    <<: *reserved_unused
                    address: 126
                  Reserved14:
                    <<: *reserved_unused
                    address: 127
                  Reserved15:
                    <<: *reserved_unused
                    address: 128
                  Reserved16:
                    <<: *reserved_unused
                    address: 129

                  ##################################
                  # Quick movement
                  ##################################
                  TriggerQuickMovement:
                    address: 130
                    type: U8
                    access: Write
                    maskType: StepperMotors
                    description: Triggers the quick movement in the correspondent motor with the currently configured settings.
                  Motor1QuickMovementPulseDistance: &quickmovement_pulsedistance
                    address: 131
                    type: Float
                    access: Write
                    description: Sets the single pulse distance for a quick movement, in millimeters, for the Motor 1.
                  Motor2QuickMovementPulseDistance:
                    <<: *quickmovement_pulsedistance
                    address: 132
                    description: Sets the single pulse distance for a quick movement, in millimeters, for the Motor 2.
                  Motor1QuickMovementNominalSpeed: &quickmovement_nominalspeed
                    address: 133
                    type: Float
                    access: Write
                    description: Sets the target speed for a quick movement, in millimeters per second, for the Motor 1.
                  Motor2QuickMovementNominalSpeed:
                    <<: *quickmovement_nominalspeed
                    address: 134
                    description: Sets the target speed for a quick movement, in millimeters per second, for the Motor 2.
                  Motor1QuickMovementInitialSpeed: &quickmovement_initialspeed
                    address: 135
                    type: Float
                    access: Write
                    description: Sets the initial speed for a quick movement, in millimeters per second, for the Motor 1.
                  Motor2QuickMovementInitialSpeed:
                    <<: *quickmovement_initialspeed
                    address: 136
                    description: Sets the initial speed for a quick movement, in millimeters per second, for the Motor 2.
                  Motor1QuickMovementAcceleration: &quickmovement_acceleration
                    address: 137
                    type: Float
                    access: Write
                    description: Sets the acceleration for a quick movement, in millimeters per second^2, for the Motor 1.
                  Motor2QuickMovementAcceleration:
                    <<: *quickmovement_acceleration
                    address: 138
                    description: Sets the acceleration for a quick movement, in millimeters per second^2, for the Motor 2.
                  Motor1QuickMovementDistance: &quickmovement_distance
                    address: 139
                    type: Float
                    access: Write
                    description: Sets the travel distance of a quick movement, in millimeters, for the Motor 1.
                  Motor2QuickMovementDistance:
                    <<: *quickmovement_distance
                    address: 140
                    description: Sets the travel distance of a quick movement, in millimeters, for the Motor 1.

                ##################################
                # Bit masks
                ##################################
                bitMasks:
                  StepperMotors:
                    description: Specifies the index of each motor.
                    bits:
                      Motor0: 0x01
                      Motor1: 0x02
                      Motor2: 0x04
                      Motor3: 0x08
                  QuadratureEncoders:
                    description: Specifies the index of each motor.
                    bits:
                      Encoder0: 0x01
                      Encoder1: 0x02
                      Encoder2: 0x04
                  DigitalInputs:
                    description: Specifies the available digital input lines.
                    bits:
                      Input0: 0x1
                      Input1: 0x2
                      Input2: 0x4
                      Input3: 0x8
                  DigitalInputStates:
                    description: Specifies the state of the port and digital input line that changed.
                    bits:
                      Input0: 0x1
                      Input1: 0x2
                      Input2: 0x4
                      Input3: 0x8
                      Input0Changed: 0x10
                      Input1Changed: 0x20
                      Input2Changed: 0x40
                      Input3Changed: 0x80
                ##################################
                # Group masks
                ##################################
                groupMasks:
                  EncoderModeConfig:
                    description: Specifies the type of reading made from the quadrature QuadratureEncoders.
                    values:
                      Position: 0
                      Displacement: 1
                  EncoderSamplingRateConfig:
                    description: Specifies the rate of the events from the quadrature QuadratureEncoders.
                    values:
                      Rate100Hz: 0
                      Rate200Hz: 1
                      Rate250Hz: 2
                      Rate500Hz: 3
                  MotorOperationMode:
                    description: Specifies the motor operation mode.
                    values:
                      QuietMode: 0
                      DynamicMovements: 1
                  MicrostepResolution:
                    description: Specifies the microstep resolution for each step pulse.
                    values:
                      Microstep8: 0
                      Microstep16: 1
                      Microstep32: 2
                      Microstep64: 3
                  HoldCurrentReduction:
                    description: Specifies the hold current reduction.
                    values:
                      ReductionTo50Percent: 0
                      ReductionTo25Percent: 1
                      ReductionTo12Percent: 2
                      NoReduction: 3
                  InputOpModeConfig:
                    description: Specifies the inputs operation mode.
                    values:
                      EventOnly: 0x0
                      StopMotor0OnRising: 0x10
                      StopMotor1OnRising: 0x11
                      StopMotor2OnRising: 0x12
                      StopMotor3OnRising: 0x13
                      StopMotor0OnFalling: 0x20
                      StopMotor1OnFalling: 0x21
                      StopMotor2OnFalling: 0x22
                      StopMotor3OnFalling: 0x23
                  TriggerConfig:
                    description: Specifies the input trigger configuration.
                    values:
                      FallingEdge: 0
                      RisingEdge: 1
                  InterlockEnabledConfig:
                    description: Specifies the external connector state that enables the device.
                    values:
                      Closed: 0
                      Open: 1
                  AccumulatedStepsSamplingRateConfig:
                    description: Specifies the rate of the accumulated steps events.
                    values:
                      Disabled: 0
                      Rate10Hz: 1
                      Rate50Hz: 2
                      Rate100Hz: 3
                  DeviceStateMode:
                    description: Specifies the current state of the device.
                    values:
                      Disabled: 0
                      Enabled: 1
              Modality=Behavior
              DeviceName=StepperDriver

            SubscribeSubject HarpAnalogInputEvents => #18
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #20
            Harp.AnalogInput.GetMetadata
            -> PropertyMapping(DeviceMetadata) => #22
            #18, #20, #22 -> IncludeWorkflow
              Path=AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai
              DeviceMetadata:
                %YAML 1.1
                ---
                # yaml-language-server: $schema=https://harp-tech.org/draft-02/schema/device.json
                device: AnalogInput
                whoAmI: 1236
                firmwareVersion: "1.2"
                hardwareTargets: "1.0"
                registers:
                  AcquisitionState:
                    address: 32
                    access: Write
                    type: U8
                    maskType: EnableFlag
                    description: Enables the data acquisition.
                  AnalogData:
                    address: 33
                    type: S16
                    length: 4
                    access: Event
                    description: Value from a single read of all ADC channels.
                    payloadSpec:
                      Channel0:
                        offset: 0
                      Channel1:
                        offset: 1
                      Channel2:
                        offset: 2
                      Channel3:
                        offset: 3
                  DigitalInputState:
                    address: 34
                    access: Event
                    type: U8
                    maskType: DigitalInputs
                    description: State of the digital input pin 0.
                  Reserved0: &ReservedReg
                    address: 35
                    access: Read
                    visibility: private
                    type: U8
                    description: Reserved
                  Reserved1:
                    <<: *ReservedReg
                    address: 36
                  RangeAndFilter:
                    address: 37
                    access: Write
                    type: U8
                    maskType: RangeAndFilterConfig
                    description: Sets the range and LowPass filter cutoff of the ADC.
                  SamplingRate:
                    address: 38
                    access: Write
                    type: U8
                    maskType: SamplingRateMode
                    description: Sets the sampling frequency of the ADC.
                  DI0Trigger:
                    address: 39
                    access: Write
                    type: U8
                    maskType: TriggerConfig
                    description: Configuration of the digital input pin 0.
                  DO0Sync:
                    address: 40
                    access: Write
                    type: U8
                    maskType: SyncConfig
                    description: Configuration of the digital output pin 0.
                  DO0PulseWidth:
                    address: 41
                    access: Write
                    type: U8
                    minValue: 1
                    maxValue: 250
                    description: Pulse duration (ms) for the digital output pin 0. The pulse will only be emitted when DO0Sync == Pulse.
                  DigitalOutputSet: &output
                    address: 42
                    type: U8
                    access: Write
                    maskType: DigitalOutputs
                    description: Set the specified digital output lines.
                  DigitalOutputClear:
                    <<: *output
                    address: 43
                    description: Clear the specified digital output lines.
                  DigitalOutputToggle:
                    <<: *output
                    address: 44
                    description: Toggle the specified digital output lines
                  DigitalOutputState:
                    <<: *output
                    address: 45
                    access: [Write, Event]
                    description: Write the state of all digital output lines. An event will be emitted when the value of any pin was changed by a threshold event.
                  Reserved2:
                    <<: *ReservedReg
                    address: 46
                  Reserved3:
                    <<: *ReservedReg
                    address: 47
                  SyncOutput:
                    address: 48
                    access: Write
                    type: U8
                    maskType: StartSyncOutputTarget
                    description: Digital output that will be set when acquisition starts.
                  Reserved4:
                    <<: *ReservedReg
                    address: 49
                  Reserved5:
                    <<: *ReservedReg
                    address: 50
                  Reserved6:
                    <<: *ReservedReg
                    address: 51
                  Reserved7:
                    <<: *ReservedReg
                    address: 52
                  Reserved8:
                    <<: *ReservedReg
                    address: 53
                  Reserved9:
                    <<: *ReservedReg
                    address: 54
                  Reserved10:
                    <<: *ReservedReg
                    address: 55
                  Reserved11:
                    <<: *ReservedReg
                    address: 56
                  Reserved12:
                    <<: *ReservedReg
                    address: 57
                  DO0TargetChannel: &targetchannel
                    address: 58
                    access: Write
                    type: U8
                    maskType: AdcChannel
                    description: Target ADC channel that will be used to trigger a threshold event on DO0 pin.
                  DO1TargetChannel:
                    <<: *targetchannel
                    address: 59
                    description: Target ADC channel that will be used to trigger a threshold event on DO1 pin.
                  DO2TargetChannel:
                    <<: *targetchannel
                    address: 60
                    description: Target ADC channel that will be used to trigger a threshold event on DO2 pin.
                  DO3TargetChannel:
                    <<: *targetchannel
                    address: 61
                    description: Target ADC channel that will be used to trigger a threshold event on DO3 pin.
                  Reserved13:
                    <<: *ReservedReg
                    address: 62
                  Reserved14:
                    <<: *ReservedReg
                    address: 63
                  Reserved15:
                    <<: *ReservedReg
                    address: 64
                  Reserved16:
                    <<: *ReservedReg
                    address: 65
                  DO0Threshold: &thresholdvalue
                    address: 66
                    access: Write
                    type: S16
                    description: Value used to threshold an ADC read, and trigger DO0 pin.
                  DO1Threshold:
                    <<: *thresholdvalue
                    address: 67
                    description: Value used to threshold an ADC read, and trigger DO1 pin.
                  DO2Threshold:
                    <<: *thresholdvalue
                    address: 68
                    description: Value used to threshold an ADC read, and trigger DO2 pin.
                  DO3Threshold:
                    <<: *thresholdvalue
                    address: 69
                    description: Value used to threshold an ADC read, and trigger DO3 pin.
                  Reserved17:
                    <<: *ReservedReg
                    address: 70
                  Reserved18:
                    <<: *ReservedReg
                    address: 71
                  Reserved19:
                    <<: *ReservedReg
                    address: 72
                  Reserved20:
                    <<: *ReservedReg
                    address: 73
                  DO0TimeAboveThreshold: &bufferedthreshold
                    address: 74
                    access: Write
                    type: U16
                    defaultValue: 0
                    description: Time (ms) above threshold value that is required to trigger a DO0 pin event.
                  DO1TimeAboveThreshold:
                    <<: *bufferedthreshold
                    address: 75
                    description: Time (ms) above threshold value that is required to trigger a DO1 pin event.
                  DO2TimeAboveThreshold:
                    <<: *bufferedthreshold
                    address: 76
                    description: Time (ms) above threshold value that is required to trigger a DO2 pin event.
                  DO3TimeAboveThreshold:
                    <<: *bufferedthreshold
                    address: 77
                    description: Time (ms) above threshold value that is required to trigger a DO3 pin event.
                  Reserved21:
                    <<: *ReservedReg
                    address: 78
                  Reserved22:
                    <<: *ReservedReg
                    address: 79
                  Reserved23:
                    <<: *ReservedReg
                    address: 80
                  Reserved24:
                    <<: *ReservedReg
                    address: 81
                  DO0TimeBelowThreshold:
                    <<: *bufferedthreshold
                    address: 82
                    description: Time (ms) below threshold value that is required to trigger a DO0 pin event.
                  DO1TimeBelowThreshold:
                    <<: *bufferedthreshold
                    address: 83
                    description: Time (ms) below threshold value that is required to trigger a DO1 pin event.
                  DO2TimeBelowThreshold:
                    <<: *bufferedthreshold
                    address: 84
                    description: Time (ms) below threshold value that is required to trigger a DO2 pin event.
                  DO3TimeBelowThreshold:
                    <<: *bufferedthreshold
                    address: 85
                    description: Time (ms) below threshold value that is required to trigger a DO3 pin event.
                  Reserved25:
                    <<: *ReservedReg
                    address: 86
                  Reserved26:
                    <<: *ReservedReg
                    address: 87
                  Reserved27:
                    <<: *ReservedReg
                    address: 88
                  Reserved28:
                    <<: *ReservedReg
                    address: 89
                  Reserved29:
                    <<: *ReservedReg
                    address: 90
                bitMasks:
                  DigitalInputs:
                    description: Available digital input lines.
                    bits:
                      DI0: 0x1
                  DigitalOutputs:
                    description: Specifies the state of port digital output lines.
                    bits:
                      DO0: 0x1
                      DO1: 0x2
                      DO2: 0x4
                      DO3: 0x8
                      DO0Changed: 0x10
                      DO1Changed: 0x20
                      DO2Changed: 0x40
                      DO4Changed: 0x80
                groupMasks:
                  RangeAndFilterConfig:
                    description: Available settings to set the range (Volt) and LowPass filter cutoff (Hz) of the ADC.
                    values:
                      Range5VLowPass1500Hz: 0x06
                      Range5VLowPass3000Hz: 0x05
                      Range5VLowPass6000Hz: 0x04
                      Range5VLowPass10300Hz: 0x03
                      Range5VLowPass13700Hz: 0x02
                      Range5VLowPass15000Hz: 0x01
                      Range10VLowPass1500Hz: 0x16
                      Range10VLowPass3000Hz: 0x15
                      Range10VLowPass6000Hz: 0x14
                      Range10VLowPass11900Hz: 0x13
                      Range10VLowPass18500Hz: 0x12
                      Range10VLowPass22000Hz: 0x11
                  SamplingRateMode:
                    description: Available sampling frequency settings of the ADC.
                    values:
                      SamplingRate1000Hz: 0x00
                      SamplingRate2000Hz: 0x01
                  TriggerConfig:
                    description: Available configurations for when using DI0 as an acquisition trigger.
                    values:
                      None: 0
                      StartOnRisingEdge: 1
                      StartOnFallingEdge: 2
                      SampleOnRisingEdge: 3
                  SyncConfig:
                    description: Available configurations when using DO0 pin to report firmware events.
                    values:
                      None: 0
                      Heartbeat: 1
                      Pulse: 2
                  StartSyncOutputTarget:
                    description: Available digital output pins that are able to be triggered on acquisition start.
                    values:
                      None: 0
                      DO0: 1
                      DO1: 2
                      DO2: 3
                      DO3: 4
                  AdcChannel:
                    description: Available target analog channels to be targeted for threshold events.
                    values:
                      Channel0: 0
                      Channel1: 1
                      Channel2: 2
                      Channel3: 3
                      None: 8
              Modality=Behavior
              DeviceName=AnalogInput

            SubscribeSubject HarpLoadCellsEvents => #24
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #26
            Harp.LoadCells.GetMetadata
            -> PropertyMapping(DeviceMetadata) => #28
            #24, #26, #28 -> IncludeWorkflow
              Path=AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai
              DeviceMetadata:
                %YAML 1.1
                ---
                # yaml-language-server: $schema=https://harp-tech.org/draft-02/schema/device.json
                device: LoadCells
                whoAmI: 1232
                firmwareVersion: "1.1"
                hardwareTargets: "1.0"
                registers:
                  AcquisitionState:
                    address: 32
                    access: Write
                    type: U8
                    maskType: EnableFlag
                    description: Enables the data acquisition.
                  LoadCellData:
                    address: 33
                    type: S16
                    length: 8
                    access: Event
                    description: Value of single ADC read from all load cell channels.
                    payloadSpec:
                      Channel0:
                        offset: 0
                      Channel1:
                        offset: 1
                      Channel2:
                        offset: 2
                      Channel3:
                        offset: 3
                      Channel4:
                        offset: 4
                      Channel5:
                        offset: 5
                      Channel6:
                        offset: 6
                      Channel7:
                        offset: 7
                  DigitalInputState:
                    address: 34
                    access: Event
                    type: U8
                    maskType: DigitalInputs
                    description: Status of the digital input pin 0. An event will be emitted when DI0Trigger == None.
                  SyncOutputState:
                    address: 35
                    access: Event
                    type: U8
                    maskType: SyncOutputs
                    description: Status of the digital output pin 0. An periodic event will be emitted when DO0Sync == ToggleEachSecond.
                  BufferThresholdState:
                    address: 36
                    access: Read
                    visibility: private
                    type: U8
                    description: State of the buffer thresholds.
                  Reserved0: &ReservedReg
                    address: 37
                    access: Read
                    visibility: private
                    type: U8
                    description: Reserved
                  Reserved1:
                    <<: *ReservedReg
                    address: 38
                  DI0Trigger:
                    address: 39
                    access: Write
                    type: U8
                    maskType: TriggerConfig
                    description: Configuration of the digital input pin 0.
                  DO0Sync:
                    address: 40
                    access: Write
                    type: U8
                    maskType: SyncConfig
                    description: Configuration of the digital output pin 0.
                  DO0PulseWidth:
                    address: 41
                    access: Write
                    type: U8
                    minValue: 1
                    maxValue: 255
                    description: Pulse duration (ms) for the digital output pin 0. The pulse will only be emitted when DO0Sync == Pulse.
                  DigitalOutputSet: &output
                    address: 42
                    type: U16
                    access: Write
                    maskType: DigitalOutputs
                    description: Set the specified digital output lines.
                  DigitalOutputClear:
                    <<: *output
                    address: 43
                    description: Clear the specified digital output lines.
                  DigitalOutputToggle:
                    <<: *output
                    address: 44
                    description: Toggle the specified digital output lines
                  DigitalOutputState:
                    <<: *output
                    address: 45
                    access: [Write, Event]
                    description: Write the state of all digital output lines. An event will be emitted when the value of any pin was changed by a threshold event.
                  Reserved2:
                    <<: *ReservedReg
                    address: 46
                  Reserved3:
                    <<: *ReservedReg
                    address: 47
                  OffsetLoadCell0: &offsetloadcell
                    address: 48
                    access: Write
                    type: S16
                    minValue: -255
                    maxValue: 255
                    defaultValue: 0
                    description: Offset value for Load Cell channel 0.
                  OffsetLoadCell1:
                    <<: *offsetloadcell
                    address: 49
                    description: Offset value for Load Cell channel 1.
                  OffsetLoadCell2:
                    <<: *offsetloadcell
                    address: 50
                    description: Offset value for Load Cell channel 2.
                  OffsetLoadCell3:
                    <<: *offsetloadcell
                    address: 51
                    description: Offset value for Load Cell channel 3.
                  OffsetLoadCell4:
                    <<: *offsetloadcell
                    address: 52
                    description: Offset value for Load Cell channel 4.
                  OffsetLoadCell5:
                    <<: *offsetloadcell
                    address: 53
                    description: Offset value for Load Cell channel 5.
                  OffsetLoadCell6:
                    <<: *offsetloadcell
                    address: 54
                    description: Offset value for Load Cell channel 6.
                  OffsetLoadCell7:
                    <<: *offsetloadcell
                    address: 55
                    description: Offset value for Load Cell channel 7.
                  Reserved4:
                    <<: *ReservedReg
                    address: 56
                  Reserved5:
                    <<: *ReservedReg
                    address: 57
                  DO1TargetLoadCell: &targetloadcell
                    address: 58
                    access: Write
                    type: U8
                    maskType: LoadCellChannel
                    description: Target Load Cell that will be used to trigger a threshold event on DO1 pin.
                  DO2TargetLoadCell:
                    <<: *targetloadcell
                    address: 59
                    description: Target Load Cell that will be used to trigger a threshold event on DO2 pin.
                  DO3TargetLoadCell:
                    <<: *targetloadcell
                    address: 60
                    description: Target Load Cell that will be used to trigger a threshold event on DO3 pin.
                  DO4TargetLoadCell:
                    <<: *targetloadcell
                    address: 61
                    description: Target Load Cell that will be used to trigger a threshold event on DO4 pin.
                  DO5TargetLoadCell:
                    <<: *targetloadcell
                    address: 62
                    description: Target Load Cell that will be used to trigger a threshold event on DO5 pin.
                  DO6TargetLoadCell:
                    <<: *targetloadcell
                    address: 63
                    description: Target Load Cell that will be used to trigger a threshold event on DO6 pin.
                  DO7TargetLoadCell:
                    <<: *targetloadcell
                    address: 64
                    description: Target Load Cell that will be used to trigger a threshold event on DO7 pin.
                  DO8TargetLoadCell:
                    <<: *targetloadcell
                    address: 65
                    description: Target Load Cell that will be used to trigger a threshold event on DO8 pin.
                  DO1Threshold: &thresholdvalue
                    address: 66
                    access: Write
                    type: S16
                    description: Value used to threshold a Load Cell read, and trigger DO1 pin.
                  DO2Threshold:
                    <<: *thresholdvalue
                    address: 67
                    description: Value used to threshold a Load Cell read, and trigger DO2 pin.
                  DO3Threshold:
                    <<: *thresholdvalue
                    address: 68
                    description: Value used to threshold a Load Cell read, and trigger DO3 pin.
                  DO4Threshold:
                    <<: *thresholdvalue
                    address: 69
                    description: Value used to threshold a Load Cell read, and trigger DO4 pin.
                  DO5Threshold:
                    <<: *thresholdvalue
                    address: 70
                    description: Value used to threshold a Load Cell read, and trigger DO5 pin.
                  DO6Threshold:
                    <<: *thresholdvalue
                    address: 71
                    description: Value used to threshold a Load Cell read, and trigger DO6 pin.
                  DO7Threshold:
                    <<: *thresholdvalue
                    address: 72
                    description: Value used to threshold a Load Cell read, and trigger DO7 pin.
                  DO8Threshold:
                    <<: *thresholdvalue
                    address: 73
                    description: Value used to threshold a Load Cell read, and trigger DO8 pin.
                  DO1TimeAboveThreshold: &bufferedthreshold
                    address: 74
                    access: Write
                    type: U16
                    defaultValue: 0
                    description: Time (ms) above threshold value that is required to trigger a DO1 pin event.
                  DO2TimeAboveThreshold:
                    <<: *bufferedthreshold
                    address: 75
                    description: Time (ms) above threshold value that is required to trigger a DO2 pin event.
                  DO3TimeAboveThreshold:
                    <<: *bufferedthreshold
                    address: 76
                    description: Time (ms) above threshold value that is required to trigger a DO3 pin event.
                  DO4TimeAboveThreshold:
                    <<: *bufferedthreshold
                    address: 77
                    description: Time (ms) above threshold value that is required to trigger a DO4 pin event.
                  DO5TimeAboveThreshold:
                    <<: *bufferedthreshold
                    address: 78
                    description: Time (ms) above threshold value that is required to trigger a DO5 pin event.
                  DO6TimeAboveThreshold:
                    <<: *bufferedthreshold
                    address: 79
                    description: Time (ms) above threshold value that is required to trigger a DO6 pin event.
                  DO7TimeAboveThreshold:
                    <<: *bufferedthreshold
                    address: 80
                    description: Time (ms) above threshold value that is required to trigger a DO7 pin event.
                  DO8TimeAboveThreshold:
                    <<: *bufferedthreshold
                    address: 81
                    description: Time (ms) above threshold value that is required to trigger a DO8 pin event.
                  DO1TimeBelowThreshold:
                    <<: *bufferedthreshold
                    address: 82
                    description: Time (ms) below threshold value that is required to trigger a DO1 pin event.
                  DO2TimeBelowThreshold:
                    <<: *bufferedthreshold
                    address: 83
                    description: Time (ms) below threshold value that is required to trigger a DO2 pin event.
                  DO3TimeBelowThreshold:
                    <<: *bufferedthreshold
                    address: 84
                    description: Time (ms) below threshold value that is required to trigger a DO3 pin event.
                  DO4TimeBelowThreshold:
                    <<: *bufferedthreshold
                    address: 85
                    description: Time (ms) below threshold value that is required to trigger a DO4 pin event.
                  DO5TimeBelowThreshold:
                    <<: *bufferedthreshold
                    address: 86
                    description: Time (ms) below threshold value that is required to trigger a DO5 pin event.
                  DO6TimeBelowThreshold:
                    <<: *bufferedthreshold
                    address: 87
                    description: Time (ms) below threshold value that is required to trigger a DO6 pin event.
                  DO7TimeBelowThreshold:
                    <<: *bufferedthreshold
                    address: 88
                    description: Time (ms) below threshold value that is required to trigger a DO7 pin event.
                  DO8TimeBelowThreshold:
                    <<: *bufferedthreshold
                    address: 89
                    description: Time (ms) below threshold value that is required to trigger a DO8 pin event.
                  EnableEvents:
                    address: 90
                    access: Write
                    type: U8
                    maskType: LoadCellEvents
                    description: Specifies the active events in the device.
                bitMasks:
                  DigitalInputs:
                    description: Available digital input lines.
                    bits:
                      DI0: 0x1
                  SyncOutputs:
                    description: Specifies the state output synchronization lines.
                    bits:
                      DO0: 0x1
                  DigitalOutputs:
                    description: Specifies the state of port digital output lines.
                    bits:
                      DO1: 0x1
                      DO2: 0x2
                      DO3: 0x4
                      DO4: 0x8
                      DO5: 0x10
                      DO6: 0x20
                      DO7: 0x40
                      DO8: 0x80
                  LoadCellEvents:
                    description: The events that can be enabled/disabled.
                    bits:
                      LoadCellData: 0x1
                      DigitalInput: 0x2
                      SyncOutput: 0x4
                      Thresholds: 0x8
                groupMasks:
                  TriggerConfig:
                    description: Available configurations when using a digital input as an acquisition trigger.
                    values:
                      None: 0
                      RisingEdge: 1
                      FallingEdge: 2
                  SyncConfig:
                    description: Available configurations when using a digital output pin to report firmware events.
                    values:
                      None: 0
                      Heartbeat: 1
                      Pulse: 2
                  LoadCellChannel:
                    description: Available target load cells to be targeted on threshold events.
                    values:
                      Channel0: 0
                      Channel1: 1
                      Channel2: 2
                      Channel3: 3
                      Channel4: 4
                      Channel5: 5
                      Channel6: 6
                      Channel7: 7
                      None: 8
              Modality=Behavior
              DeviceName=LoadCells

            SubscribeSubject HarpWhiteRabbitEvents => #30
            AllenNeuralDynamics.WhiteRabbit.GetMetadata
            -> PropertyMapping(DeviceMetadata) => #32
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #34
            #30, #32, #34 -> IncludeWorkflow
              Path=AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai
              DeviceMetadata:
                %YAML 1.1
                ---
                # yaml-language-server: $schema=https://harp-tech.org/draft-02/schema/device.json
                device: WhiteRabbit
                whoAmI: 1404
                firmwareVersion: "0.1"
                hardwareTargets: "0.1"
                registers:
                  ConnectedDevices:
                    address: 32
                    type: U16
                    access: Event
                    maskType: ClockOutChannels
                    description: "The currently connected output channels. An event will be generated when any of the channels are connected or disconnected."
                  Counter:
                    address: 33
                    type: U32
                    access: [Write, Event]
                    description: "The counter value. This value is incremented at the frequency specified by CounterFrequencyHz. Write to force a counter value."
                  CounterFrequencyHz:
                    address: 34
                    type: U16
                    access: Write
                    maxValue: 500
                    defaultValue: 0
                    minValue: 0
                    description: "The frequency at which the counter is incremented. A value of 0 disables the counter."
                  AuxPortMode:
                    address: 35
                    type: U8
                    access: Write
                    description: "The function of the auxiliary port."
                    maskType: AuxPortModeConfig
                  AuxPortBaudRate:
                    address: 36
                    type: U32
                    access: Write
                    defaultValue: 1000
                    minValue: 40
                    maxValue: 1000000
                    description: "The baud rate, in bps, of the auxiliary port when in HarpClock mode."

                bitMasks:
                  ClockOutChannels:
                    description: "Clock output channels"
                    bits:
                      None: 0x00
                      Channel0: 0x01
                      Channel1: 0x02
                      Channel2: 0x04
                      Channel3: 0x08
                      Channel4: 0x10
                      Channel5: 0x20
                      Channel6: 0x40
                      Channel7: 0x80
                      Channel8: 0x100
                      Channel9: 0x200
                      Channel10: 0x400
                      Channel11: 0x800
                      Channel12: 0x1000
                      Channel13: 0x2000
                      Channel14: 0x4000
                      Channel15: 0x8000
                groupMasks:
                  AuxPortModeConfig:
                    description: "Auxiliary port available configuration"
                    values:
                      Disabled: 0x0
                      HarpClock: 0x1
                      PPS: 0x2
              Modality=Behavior
              DeviceName=ClockGenerator

            SubscribeSubject HarpEnvironmentSensorEvents => #36
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #38
            AllenNeuralDynamics.EnvironmentSensor.GetMetadata
            -> PropertyMapping(DeviceMetadata) => #40
            #36, #38, #40 -> IncludeWorkflow
              Path=AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai
              DeviceMetadata:
                %YAML 1.1
                ---
                # yaml-language-server: $schema=https://harp-tech.org/draft-02/schema/device.json
                device: EnvironmentSensor
                whoAmI: 1405
                firmwareVersion: "0.1"
                hardwareTargets: "0.1"
                registers:
                  Pressure:
                    access: Read
                    address: 32
                    type: U32
                    description: Pressure, in Pa
                  Temperature:
                    access: Read
                    address: 33
                    type: Float
                    description: Temperature in degrees C
                  Humidity:
                    access: Read
                    address: 34
                    type: Float
                    description: Humidity, in %RH
                  SensorData:
                    access: Event
                    address: 35
                    type: Float
                    description: A periodic event will be emitted with aggregated data from all sensors.
                    length: 3
                    payloadSpec:
                      Pressure:
                        offset: 0
                        description: Pressure, in Pa
                      Temperature:
                        offset: 1
                        description: Temperature in degrees C
                      Humidity:
                        offset: 2
                        description: Humidity, in %RH
                  EnableEvents:
                    access: Write
                    address: 36
                    type: U8
                    maskType: Events
                    description: Enables (~2Hz) or disables the SensorData events
                  TemperatureOffsetC:
                    access: Read
                    address: 37
                    type: Float
                    description: Fixed experimentally-determined calibration offset added to nominal temperature sensor reading in degrees C
                bitMasks:
                  Events:
                    bits:
                      Disable: 0x0
                      SensorData: 0x1
                    description: Available events on the device
              Modality=Behavior
              DeviceName=EnvironmentSensor

        GroupWorkflow HarpCommandsLogging
            SubscribeSubject HarpBehaviorCommands => #0
            SubscribeSubject HarpTimestampSource => #1
            #0, #1 -> WithLatestFrom
            -> AllenNeuralDynamics.HarpUtils.ModifyMessage(Address=nil, MessageTypeModified=Write) => #3
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #5
            Harp.Behavior.GetDeviceMetadata
            -> PropertyMapping(DeviceMetadata) => #7
            #3, #5, #7 -> IncludeWorkflow
              Path=AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai
              DeviceMetadata:
                %YAML 1.1
                ---
                # yaml-language-server: $schema=https://harp-tech.org/draft-02/schema/device.json
                device: Behavior
                whoAmI: 1216
                firmwareVersion: "3.2"
                hardwareTargets: "1.1"
                registers:
                  DigitalInputState:
                    address: 32
                    access: Event
                    type: U8
                    maskType: DigitalInputs
                    description: Reflects the state of DI digital lines of each Port
                  Reserved0: &reserved
                    address: 33
                    type: U8
                    access: Read
                    description: Reserved for future use
                    visibility: private
                  OutputSet: &output
                    address: 34
                    type: U16
                    access: Write
                    maskType: DigitalOutputs
                    description: Set the specified digital output lines.
                  OutputClear:
                    <<: *output
                    address: 35
                    description: Clear the specified digital output lines
                  OutputToggle:
                    <<: *output
                    address: 36
                    description: Toggle the specified digital output lines
                  OutputState:
                    <<: *output
                    address: 37
                    description: Write the state of all digital output lines
                  PortDIOSet: &portDIO
                    address: 38
                    type: U8
                    access: Write
                    maskType: PortDigitalIOS
                    description: Set the specified port DIO lines
                  PortDIOClear:
                    <<: *portDIO
                    address: 39
                    description: Clear the specified port DIO lines
                  PortDIOToggle:
                    <<: *portDIO
                    address: 40
                    description: Toggle the specified port DIO lines
                  PortDIOState:
                    <<: *portDIO
                    address: 41
                    description: Write the state of all port DIO lines
                  PortDIODirection:
                    <<: *portDIO
                    address: 42
                    description: Specifies which of the port DIO lines are outputs
                  PortDIOStateEvent:
                    <<: *portDIO
                    address: 43
                    access: Event
                    description: Specifies the state of the port DIO lines on a line change
                  AnalogData:
                    address: 44
                    type: S16
                    length: 3
                    access: Event
                    description: Voltage at the ADC input and encoder value on Port 2
                    payloadSpec:
                      AnalogInput0:
                        offset: 0
                        description: The voltage at the output of the ADC channel 0.
                      Encoder:
                        offset: 1
                        description: The quadrature counter value on Port 2
                      AnalogInput1:
                        offset: 2
                        description: The voltage at the output of the ADC channel 1.
                  OutputPulseEnable:
                    <<: *output
                    address: 45
                    description: Enables the pulse function for the specified output lines
                  PulseDOPort0: &pulseDO
                    address: 46
                    type: U16
                    access: Write
                    minValue: 1
                    description: Specifies the duration of the output pulse in milliseconds.
                  PulseDOPort1:
                    <<: *pulseDO
                    address: 47
                  PulseDOPort2:
                    <<: *pulseDO
                    address: 48
                  PulseSupplyPort0:
                    <<: *pulseDO
                    address: 49
                  PulseSupplyPort1:
                    <<: *pulseDO
                    address: 50
                  PulseSupplyPort2:
                    <<: *pulseDO
                    address: 51
                  PulseLed0:
                    <<: *pulseDO
                    address: 52
                  PulseLed1:
                    <<: *pulseDO
                    address: 53
                  PulseRgb0:
                    <<: *pulseDO
                    address: 54
                  PulseRgb1:
                    <<: *pulseDO
                    address: 55
                  PulseDO0:
                    <<: *pulseDO
                    address: 56
                  PulseDO1:
                    <<: *pulseDO
                    address: 57
                  PulseDO2:
                    <<: *pulseDO
                    address: 58
                  PulseDO3:
                    <<: *pulseDO
                    address: 59
                  PwmFrequencyDO0: &pwmFreq
                    address: 60
                    type: U16
                    access: Write
                    minValue: 1
                    description: Specifies the frequency of the PWM at DO0.
                  PwmFrequencyDO1:
                    <<: *pwmFreq
                    address: 61
                    description: Specifies the frequency of the PWM at DO1.
                  PwmFrequencyDO2:
                    <<: *pwmFreq
                    address: 62
                    description: Specifies the frequency of the PWM at DO2.
                  PwmFrequencyDO3:
                    <<: *pwmFreq
                    address: 63
                    description: Specifies the frequency of the PWM at DO3.
                  PwmDutyCycleDO0: &pwmDutyCycle
                    address: 64
                    type: U8
                    access: Write
                    minValue: 1
                    maxValue: 99
                    description: Specifies the duty cycle of the PWM at DO0.
                  PwmDutyCycleDO1:
                    <<: *pwmDutyCycle
                    address: 65
                    description: Specifies the duty cycle of the PWM at DO1.
                  PwmDutyCycleDO2:
                    <<: *pwmDutyCycle
                    address: 66
                    description: Specifies the duty cycle of the PWM at DO2.
                  PwmDutyCycleDO3:
                    <<: *pwmDutyCycle
                    address: 67
                    description: Specifies the duty cycle of the PWM at DO3.
                  PwmStart: &pwmStartStop
                    address: 68
                    type: U8
                    access: Write
                    maskType: PwmOutputs
                    description: Starts the PWM on the selected output lines.
                  PwmStop:
                    <<: *pwmStartStop
                    address: 69
                    description: Stops the PWM on the selected output lines.
                  RgbAll:
                    address: 70
                    type: &rgbType U8
                    length: 6
                    access: &rgbAccess Write
                    description: Specifies the state of all RGB LED channels.
                    payloadSpec:
                      Green0:
                        offset: 0
                        description: The intensity of the green channel in the RGB0 LED.
                      Red0:
                        offset: 1
                        description: The intensity of the red channel in the RGB0 LED.
                      Blue0:
                        offset: 2
                        description: The intensity of the blue channel in the RGB0 LED.
                      Green1:
                        offset: 3
                        description: The intensity of the green channel in the RGB1 LED.
                      Red1:
                        offset: 4
                        description: The intensity of the red channel in the RGB1 LED.
                      Blue1:
                        offset: 5
                        description: The intensity of the blue channel in the RGB1 LED.
                  Rgb0: &rgbRegister
                    address: 71
                    type: *rgbType
                    length: 3
                    access: *rgbAccess
                    description: Specifies the state of the RGB0 LED channels.
                    interfaceType: RgbPayload
                    payloadSpec:
                      Green:
                        offset: 0
                        description: The intensity of the green channel in the RGB LED.
                      Red:
                        offset: 1
                        description: The intensity of the red channel in the RGB LED.
                      Blue:
                        offset: 2
                        description: The intensity of the blue channel in the RGB LED.
                  Rgb1:
                    <<: *rgbRegister
                    address: 72
                    description: Specifies the state of the RGB1 LED channels.
                  Led0Current: &ledCurrent
                    address: 73
                    type: U8
                    access: Write
                    minValue: 2
                    maxValue: 100
                    description: Specifies the configuration of current to drive LED 0.
                  Led1Current:
                    <<: *ledCurrent
                    address: 74
                    description: Specifies the configuration of current to drive LED 1.
                  Led0MaxCurrent: &ledMaxCurrent
                    address: 75
                    type: U8
                    access: Write
                    minValue: 5
                    maxValue: 100
                    description: Specifies the configuration of current to drive LED 0.
                  Led1MaxCurrent:
                    <<: *ledMaxCurrent
                    address: 76
                    description: Specifies the configuration of current to drive LED 1.
                  EventEnable:
                    address: 77
                    type: U8
                    access: Write
                    maskType: Events
                    description: Specifies the active events in the device.
                  StartCameras: &cameraControl
                    address: 78
                    type: U8
                    access: Write
                    maskType: CameraOutputs
                    description: Specifies the camera outputs to enable in the device.
                  StopCameras:
                    <<: *cameraControl
                    access: [Write, Event]
                    address: 79
                    description: Specifies the camera outputs to disable in the device. An event will be issued when the trigger signal is actually stopped being generated.
                  EnableServos: &servoControl
                    address: 80
                    type: U8
                    access: Write
                    maskType: ServoOutputs
                    description: Specifies the servo outputs to enable in the device.
                  DisableServos:
                    <<: *servoControl
                    address: 81
                    description: Specifies the servo outputs to disable in the device.
                  EnableEncoders:
                    address: 82
                    type: U8
                    access: Write
                    maskType: EncoderInputs
                    description: Specifies the port quadrature counters to enable in the device.
                  EncoderMode:
                    address: 83
                    type: U8
                    access: Write
                    maskType: EncoderModeConfig
                    description: Configures the operation mode of the quadrature encoders.
                  Reserved2:
                    <<: *reserved
                    address: 84
                  Reserved3:
                    <<: *reserved
                    address: 85
                  Reserved4:
                    <<: *reserved
                    address: 86
                  Reserved5:
                    <<: *reserved
                    address: 87
                  Reserved6:
                    <<: *reserved
                    address: 88
                  Reserved7:
                    <<: *reserved
                    address: 89
                  Reserved8:
                    <<: *reserved
                    address: 90
                  Reserved9:
                    <<: *reserved
                    address: 91
                  Camera0Frame: &frameAcquired
                    address: 92
                    type: U8
                    access: Event
                    maskType: FrameAcquired
                    description: Specifies that a frame was acquired on camera 0.
                  Camera0Frequency: &cameraFreq
                    address: 93
                    type: U16
                    access: Write
                    minValue: 1
                    maxValue: 600
                    description: Specifies the trigger frequency for camera 0.
                  Camera1Frame:
                    <<: *frameAcquired
                    address: 94
                    description: Specifies that a frame was acquired on camera 1.
                  Camera1Frequency:
                    <<: *cameraFreq
                    address: 95
                    description: Specifies the trigger frequency for camera 1.
                  Reserved10:
                    <<: *reserved
                    address: 96
                  Reserved11:
                    <<: *reserved
                    address: 97
                  Reserved12:
                    <<: *reserved
                    address: 98
                  Reserved13:
                    <<: *reserved
                    address: 99
                  ServoMotor2Period: &servoPeriod
                    address: 100
                    type: U16
                    access: Write
                    minValue: 2
                    maxValue: 65534
                    description: Specifies the period of the servo motor in DO2, in microseconds.
                  ServoMotor2Pulse: &servoPulse
                    address: 101
                    type: U16
                    access: Write
                    minValue: 6
                    maxValue: 65530
                    description: Specifies the pulse of the servo motor in DO2, in microseconds.
                  ServoMotor3Period:
                    <<: *servoPeriod
                    address: 102
                    description: Specifies the period of the servo motor in DO3, in microseconds.
                  ServoMotor3Pulse:
                    <<: *servoPulse
                    address: 103
                    description: Specifies the pulse of the servo motor in DO3, in microseconds.
                  Reserved14:
                    <<: *reserved
                    address: 104
                  Reserved15:
                    <<: *reserved
                    address: 105
                  Reserved16:
                    <<: *reserved
                    address: 106
                  Reserved17:
                    <<: *reserved
                    address: 107
                  EncoderReset:
                    address: 108
                    type: U8
                    access: Write
                    maskType: EncoderInputs
                    description: Reset the counter of the specified encoders to zero.
                  Reserved18:
                    <<: *reserved
                    address: 109
                  EnableSerialTimestamp:
                    address: 110
                    type: U8
                    access: Write
                    description: Enables the timestamp for serial TX.
                  MimicPort0IR: &mimic
                    address: 111
                    type: U8
                    access: Write
                    maskType: MimicOutput
                    description: Specifies the digital output to mimic the Port 0 IR state.
                  MimicPort1IR:
                    <<: *mimic
                    address: 112
                    description: Specifies the digital output to mimic the Port 1 IR state.
                  MimicPort2IR:
                    <<: *mimic
                    address: 113
                    description: Specifies the digital output to mimic the Port 2 IR state.
                  Reserved20:
                    <<: *reserved
                    address: 114
                  Reserved21:
                    <<: *reserved
                    address: 115
                  Reserved22:
                    <<: *reserved
                    address: 116
                  MimicPort0Valve:
                    <<: *mimic
                    address: 117
                    description: Specifies the digital output to mimic the Port 0 valve state.
                  MimicPort1Valve:
                    <<: *mimic
                    address: 118
                    description: Specifies the digital output to mimic the Port 1 valve state.
                  MimicPort2Valve:
                    <<: *mimic
                    address: 119
                    description: Specifies the digital output to mimic the Port 2 valve state.
                  Reserved23:
                    <<: *reserved
                    address: 120
                  Reserved24:
                    <<: *reserved
                    address: 121
                  PokeInputFilter:
                    address: 122
                    type: U8
                    access: Write
                    description: Specifies the low pass filter time value for poke inputs, in ms.
                bitMasks:
                  DigitalInputs:
                    description: Specifies the state of port digital input lines.
                    bits:
                      DIPort0: 0x1
                      DIPort1: 0x2
                      DIPort2: 0x4
                      DI3: 0x8
                  DigitalOutputs:
                    description: Specifies the state of port digital output lines.
                    bits:
                      DOPort0: 0x1
                      DOPort1: 0x2
                      DOPort2: 0x4
                      SupplyPort0: 0x8
                      SupplyPort1: 0x10
                      SupplyPort2: 0x20
                      Led0: 0x40
                      Led1: 0x80
                      Rgb0: 0x100
                      Rgb1: 0x200
                      DO0: 0x400
                      DO1: 0x800
                      DO2: 0x1000
                      DO3: 0x2000
                  PortDigitalIOS:
                    description: Specifies the state of the port DIO lines.
                    bits:
                      DIO0: 0x1
                      DIO1: 0x2
                      DIO2: 0x4
                  PwmOutputs:
                    description: Specifies the state of PWM output lines.
                    bits:
                      PwmDO0: 0x1
                      PwmDO1: 0x2
                      PwmDO2: 0x4
                      PwmDO3: 0x8
                  Events:
                    description: Specifies the active events in the device.
                    bits:
                      PortDI: 0x1
                      PortDIO: 0x2
                      AnalogData: 0x4
                      Camera0: 0x8
                      Camera1: 0x10
                  CameraOutputs:
                    description: Specifies camera output enable bits.
                    bits:
                      CameraOutput0: 0x1
                      CameraOutput1: 0x2
                  ServoOutputs:
                    description: Specifies servo output enable bits.
                    bits:
                      ServoOutput2: 0x4
                      ServoOutput3: 0x8
                  EncoderInputs:
                    description: Specifies quadrature counter enable bits.
                    bits:
                      EncoderPort2: 0x4
                  FrameAcquired:
                    description: Specifies that camera frame was acquired.
                    bits:
                      FrameAcquired: 0x1
                groupMasks:
                  MimicOutput:
                    description: Specifies the target IO on which to mimic the specified register.
                    values:
                      None: 0
                      DIO0: 1
                      DIO1: 2
                      DIO2: 3
                      DO0: 4
                      DO1: 5
                      DO2: 6
                      DO3: 7
                  EncoderModeConfig:
                    description: Specifies the type of reading made from the quadrature encoder.
                    values:
                      Position: 0
                      Displacement: 1
              Modality=Behavior
              DeviceName=HarpCommands/Behavior

            SubscribeSubject StepperDriverCommands => #9
            SubscribeSubject HarpTimestampSource => #10
            #9, #10 -> WithLatestFrom
            -> AllenNeuralDynamics.HarpUtils.ModifyMessage(Address=nil, MessageTypeModified=Write) => #12
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #14
            Harp.StepperDriver.GetDeviceMetadata
            -> PropertyMapping(DeviceMetadata) => #16
            #12, #14, #16 -> IncludeWorkflow
              Path=AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai
              DeviceMetadata:
                %YAML 1.1
                ---
                # yaml-language-server: $schema=https://harp-tech.org/draft-02/schema/device.json
                device: StepperDriver
                whoAmI: 1130
                firmwareVersion: "0.7"
                hardwareTargets: "1.0"
                registers:
                  ##################################
                  # Enable and disable
                  ##################################
                  EnableDriver:
                    address: 32
                    type: U8
                    access: Write
                    maskType: StepperMotors
                    description: Enables the driver for a specific motor. If the driver is already enabled, the driver remains enabled.
                  DisableDriver:
                    address: 33
                    type: U8
                    access: Write
                    maskType: StepperMotors
                    description: Disables the driver for a specific stepper motor, which prevents current from being sent to the motor or load. If the driver is already disabled, the driver remains disabled.
                  EnableEncoders:
                    address: 34
                    type: U8
                    access: Write
                    maskType: QuadratureEncoders
                    description: Specifies a set of port quadrature counters to enable in the device.
                  DisableEncoders:
                    address: 35
                    type: U8
                    access: Write
                    maskType: QuadratureEncoders
                    description: Specifies a set of port quadrature counters to disable in the device.
                  EnableDigitalInputs:
                    address: 36
                    type: U8
                    access: Write
                    maskType: DigitalInputs
                    description: Specifies a set of digital inputs to enable in the device.
                  DisableDigitalInputs:
                    address: 37
                    type: U8
                    access: Write
                    maskType: DigitalInputs
                    description: Specifies a set of digital inputs to disable in the device.

                  ##################################
                  # Configuration
                  ##################################
                  Motor0OperationMode: &opmode
                    address: 38
                    type: U8
                    access: Write
                    maskType: MotorOperationMode
                    description: Configures the operation mode for motor 0.
                  Motor1OperationMode:
                    <<: *opmode
                    address: 39
                    description: Configures the operation mode for motor 1.
                  Motor2OperationMode:
                    <<: *opmode
                    address: 40
                    description: Configures the operation mode for motor 2.
                  Motor3OperationMode:
                    <<: *opmode
                    address: 41
                    description: Configures the operation mode for motor 3.
                  Motor0MicrostepResolution: &microstep_resolution
                    address: 42
                    type: U8
                    access: Write
                    maskType: MicrostepResolution
                    description: Configures the microstep resolution for motor 0.
                  Motor1MicrostepResolution:
                    <<: *microstep_resolution
                    address: 43
                    description: Configures the microstep resolution for motor 1.
                  Motor2MicrostepResolution:
                    <<: *microstep_resolution
                    address: 44
                    description: Configures the microstep resolution for motor 2.
                  Motor3MicrostepResolution:
                    <<: *microstep_resolution
                    address: 45
                    description: Configures the microstep resolution for motor 3.

                  Motor0MaximumRunCurrent: &maxcurrent
                    address: 46
                    minValue: 0.139
                    maxValue: 2.1
                    defaultValue: 0.2
                    type: Float
                    access: Write
                    description: Configures the maximum run RMS current per phase for motor 0.
                  Motor1MaximumRunCurrent:
                    <<: *maxcurrent
                    address: 47
                    description: Configures the maximum run RMS current per phase for motor 1.
                  Motor2MaximumRunCurrent:
                    <<: *maxcurrent
                    address: 48
                    description: Configures the maximum run RMS current per phase for motor 2.
                  Motor3MaximumRunCurrent:
                    <<: *maxcurrent
                    address: 49
                    description: Configures the maximum run RMS current per phase for motor 3.

                  Motor0HoldCurrentReduction: &currentreduction
                    address: 50
                    type: U8
                    access: Write
                    maskType: HoldCurrentReduction
                    description: Configures the hold current reduction for motor 0.
                  Motor1HoldCurrentReduction:
                    <<: *currentreduction
                    address: 51
                    description: Configures the hold current reduction for motor 1.
                  Motor2HoldCurrentReduction:
                    <<: *currentreduction
                    address: 52
                    description: Configures the hold current reduction for motor 2.
                  Motor3HoldCurrentReduction:
                    <<: *currentreduction
                    address: 53
                    description: Configures the hold current reduction for motor 3.

                  Motor0StepInterval: &nominalinterval
                    address: 54
                    minValue: 100
                    maxValue: 20000
                    defaultValue: 250
                    type: U16
                    access: Write
                    description: Configures the time between step motor pulses (us) when running at nominal speed for motor 0.
                  Motor1StepInterval:
                    <<: *nominalinterval
                    address: 55
                    description: Configures the time between step motor pulses (us) when running at nominal speed for motor 1.
                  Motor2StepInterval:
                    <<: *nominalinterval
                    address: 56
                    description: Configures the time between step motor pulses (us) when running at nominal speed for motor 2.
                  Motor3StepInterval:
                    <<: *nominalinterval
                    address: 57
                    description: Configures the time between step motor pulses (us) when running at nominal speed for motor 3.

                  Motor0MaximumStepInterval: &maxinterval
                    address: 58
                    minValue: 100
                    maxValue: 20000
                    defaultValue: 2000
                    type: U16
                    access: Write
                    description: Configures the time between step motor pulses (us) used when starting or stopping a movement for motor 0.
                  Motor1MaximumStepInterval:
                    <<: *maxinterval
                    address: 59
                    description: Configures the time between step motor pulses (us) used when starting or stopping a movement for motor 1.
                  Motor2MaximumStepInterval:
                    <<: *maxinterval
                    address: 60
                    description: Configures the time between step motor pulses (us) used when starting or stopping a movement for motor 2.
                  Motor3MaximumStepInterval:
                    <<: *maxinterval
                    address: 61
                    description: Configures the time between step motor pulses (us) used when starting or stopping a movement for motor 3.

                  Motor0StepAccelerationInterval: &accperiod
                    address: 62
                    minValue: 2
                    maxValue: 2000
                    defaultValue: 10
                    type: U16
                    access: Write
                    description: Configures the acceleration for motor 0. The time between step pulses is decreased by this value when accelerating and increased when decelerating.
                  Motor1StepAccelerationInterval:
                    <<: *accperiod
                    address: 63
                    description: Configures the acceleration for motor 1. The time between step pulses is decreased by this value when accelerating and increased when decelerating.
                  Motor2StepAccelerationInterval:
                    <<: *accperiod
                    address: 64
                    description: Configures the acceleration for motor 2. The time between step pulses is decreased by this value when accelerating and increased when decelerating.
                  Motor3StepAccelerationInterval:
                    <<: *accperiod
                    address: 65
                    description: Configures the acceleration for motor 3. The time between step pulses is decreased by this value when accelerating and increased when decelerating.

                  EncoderMode:
                    address: 66
                    type: U8
                    access: Write
                    maskType: EncoderModeConfig
                    description: Configures the operation mode of the quadrature encoder.
                  EncoderSamplingRate:
                    address: 67
                    type: U8
                    access: Write
                    maskType: EncoderSamplingRateConfig
                    description: Configures the sampling rate of the quadrature encoder event.

                  Input0OpMode: &input_mode
                    address: 68
                    type: U8
                    access: Write
                    maskType: InputOpModeConfig
                    description: Configures the operation mode for digital input 0.
                  Input1OpMode:
                    <<: *input_mode
                    address: 69
                    description: Configures the operation mode for digital input 1.
                  Input2OpMode:
                    <<: *input_mode
                    address: 70
                    description: Configures the operation mode for digital input 2.
                  Input3OpMode:
                    <<: *input_mode
                    address: 71
                    description: Configures the operation mode for digital input 3.

                  InterlockEnabled:
                    address: 72
                    type: U8
                    access: Write
                    maskType: InterlockEnabledConfig
                    description: Configures the external interlock connector state required for the device to be enabled.

                  AccumulatedStepsSamplingRate:
                    address: 73
                    type: U8
                    access: Write
                    maskType: AccumulatedStepsSamplingRateConfig
                    description: Configures the dispatch rate of the accumulated steps event.

                  ##################################
                  # Events
                  ##################################
                  MotorStopped:
                    address: 74
                    type: U8
                    access: Event
                    description: Emitted when any of the motors stops.
                    payloadSpec:
                      State:
                        description: Specifies which motors are currently stopped.
                        maskType: StepperMotors
                        mask: 0x0F
                      Changed:
                        description: Specifies which motor just stopped.
                        maskType: StepperMotors
                        mask: 0xF0
                  MotorOverVoltageDetection:
                    address: 75
                    type: U8
                    access: Event
                    maskType: StepperMotors
                    description: Contains a bit mask specifying the motor where the over voltage detection and protection mechanism occurred, which can happen when the there's a quick deceleration from a high velocity or when the motor stalls (not implemented).
                  MotorRaisedError:
                    address: 76
                    type: U8
                    access: Event
                    maskType: StepperMotors
                    description: Contains a bit mask specifying the motor that triggered the error which can be happen in case of short-circuit or driver temperature above 165 degrees celsius.

                  Encoders:
                    address: 77
                    type: S16
                    length: 3
                    access: [Event, Write]
                    description: Contains the quadrature encoder readings.
                    payloadSpec:
                      Encoder0:
                        offset: 0
                        description: The quadrature counter on port ENC 0.
                      Encoder1:
                        offset: 1
                        description: The quadrature counter on port ENC 1.
                      Encoder2:
                        offset: 2
                        description: The quadrature counter on port ENC 2.

                  DigitalInputState:
                    address: 78
                    access: Event
                    type: U8
                    maskType: DigitalInputStates
                    description: Reflects the state of the digital input lines.

                  DeviceState:
                    address: 79
                    type: U8
                    access: Event
                    maskType: DeviceStateMode
                    description: Contains the state of the device.

                  ##################################
                  # Movement control
                  ##################################

                  MoveRelative:
                    address: 80
                    type: S32
                    length: 4
                    access: Write
                    description: Moves all motors by the number of steps written in this array register and set the direction according to the value's signal. If a motor is disable, the user should set the value to 0.
                    payloadSpec:
                      Motor0:
                        offset: 0
                        description: Contains the number of steps used to move motor 0.
                      Motor1:
                        offset: 1
                        description: Contains the number of steps used to move motor 1.
                      Motor2:
                        offset: 2
                        description: Contains the number of steps used to move motor 2.
                      Motor3:
                        offset: 3
                        description: Contains the number of steps used to move motor 3.

                  Motor0MoveRelative: &motorsteps
                    address: 81
                    type: S32
                    access: Write
                    description: Moves motor 0 by the number of steps written in this register and set the direction according to the value's signal.
                  Motor1MoveRelative:
                    <<: *motorsteps
                    address: 82
                    description: Moves motor 1 by the number of steps written in this register and set the direction according to the value's signal.
                  Motor2MoveRelative:
                    <<: *motorsteps
                    address: 83
                    description: Moves motor 2 by the number of steps written in this register and set the direction according to the value's signal.
                  Motor3MoveRelative:
                    <<: *motorsteps
                    address: 84
                    description: Moves motor 3 by the number of steps written in this register and set the direction according to the value's signal.

                  MoveAbsolute:
                    address: 85
                    type: S32
                    length: 4
                    access: Write
                    description: Moves all motors to the absolute position written in this array register. If a motor is disable, the user should set the value to 0.
                    payloadSpec:
                      Motor0:
                        offset: 0
                        description: Contains the absolute position to move motor 0.
                      Motor1:
                        offset: 1
                        description: Contains the absolute position to move motor 1.
                      Motor2:
                        offset: 2
                        description: Contains the absolute position to move motor 2.
                      Motor3:
                        offset: 3
                        description: Contains the absolute position to move motor 3.

                  Motor0MoveAbsolute: &motorabsolutesteps
                    address: 86
                    type: S32
                    access: Write
                    description: Moves motor 0 to the absolute position written in this register.
                  Motor1MoveAbsolute:
                    <<: *motorabsolutesteps
                    address: 87
                    description: Moves motor 1 to the absolute position written in this register.
                  Motor2MoveAbsolute:
                    <<: *motorabsolutesteps
                    address: 88
                    description: Moves motor 2 to the absolute position written in this register.
                  Motor3MoveAbsolute:
                    <<: *motorabsolutesteps
                    address: 89
                    description: Moves motor 3 to the absolute position written in this register.

                  AccumulatedSteps:
                    address: 90
                    type: S32
                    length: 4
                    access: [Event, Write]
                    description: Contains the accumulated steps of all motors. Write a value to set the accumulated steps. An event will be emitted with a dispatch rate defined in AccumulatedStepsSamplingRate.
                    payloadSpec:
                      Motor0:
                        offset: 0
                        description: Contains the accumulated steps of motor 0.
                      Motor1:
                        offset: 1
                        description: Contains the accumulated steps of motor 1.
                      Motor2:
                        offset: 2
                        description: Contains the accumulated steps of motor 2.
                      Motor3:
                        offset: 3
                        description: Contains the accumulated steps of motor 3.

                  Mortor0AccumulatedSteps: &motorsaccumulatedsteps
                    address: 91
                    type: S32
                    access: Write
                    description: Contains the accumulated number of steps of motor 0. Write a value to set the current number of accumulated steps.
                  Mortor1AccumulatedSteps:
                    <<: *motorsaccumulatedsteps
                    address: 92
                    description: Contains the accumulated number of steps of motor 1. Write a value to set the current number of accumulated steps.
                  Mortor2AccumulatedSteps:
                    <<: *motorsaccumulatedsteps
                    address: 93
                    description: Contains the accumulated number of steps of motor 2. Write a value to set the current number of accumulated steps.
                  Mortor3AccumulatedSteps:
                    <<: *motorsaccumulatedsteps
                    address: 94
                    description: Contains the accumulated number of steps of motor 3. Write a value to set the current number of accumulated steps.

                  MaxPosition:
                    address: 95
                    type: S32
                    length: 4
                    access: Write
                    description: Defines the limit of the accumulated steps for the positive movement of all motors. The device will not let the motors move further than this value. A value equal to 0 will disable the limits.
                    payloadSpec:
                      Motor0:
                        offset: 0
                        description: Defines the limit of the accumulated steps for the positive movement of motor 0. The device will not let the motor move further than this value.
                      Motor1:
                        offset: 1
                        description: Defines the limit of the accumulated steps for the positive movement of motor 1. The device will not let the motor move further than this value.
                      Motor2:
                        offset: 2
                        description: Defines the limit of the accumulated steps for the positive movement of motor 2. The device will not let the motor move further than this value.
                      Motor3:
                        offset: 3
                        description: Defines the limit of the accumulated steps for the positive movement of motor 3. The device will not let the motor move further than this value.

                  Motor0MaxPosition: &motorsmaxsteps
                    address: 96
                    type: S32
                    access: Write
                    description: Specifies the limit of the accumulated steps for the positive movement of motor 0. The device will not let the motor move further than this value. A value equal to 0 disables the feature.
                  Motor1MaxPosition:
                    <<: *motorsmaxsteps
                    address: 97
                    description: Specifies the limit of the accumulated steps for the positive movement of motor 1. The device will not let the motor move further than this value. A value equal to 0 disables the feature.
                  Motor2MaxPosition:
                    <<: *motorsmaxsteps
                    address: 98
                    description: Specifies the limit of the accumulated steps for the positive movement of motor 2. The device will not let the motor move further than this value. A value equal to 0 disables the feature.
                  Motor3MaxPosition:
                    <<: *motorsmaxsteps
                    address: 99
                    description: Specifies the limit of the accumulated steps for the positive movement of motor 3. The device will not let the motor move further than this value. A value equal to 0 disables the feature.

                  MinPosition:
                    address: 100
                    type: S32
                    length: 4
                    access: Write
                    description: Defines the limit of the accumulated steps for the negative movement of all motors. The device will not let the motors move further than this value. A value equal to 0 will disable the limits.
                    payloadSpec:
                      Motor0:
                        offset: 0
                        description: Defines the limit of the accumulated steps for the negative movement of motor 0. The device will not let the motor move further than this value.
                      Motor1:
                        offset: 1
                        description: Defines the limit of the accumulated steps for the negative movement of motor 1. The device will not let the motor move further than this value.
                      Motor2:
                        offset: 2
                        description: Defines the limit of the accumulated steps for the negative movement of motor 2. The device will not let the motor move further than this value.
                      Motor3:
                        offset: 3
                        description: Defines the limit of the accumulated steps for the negative movement of motor 3. The device will not let the motor move further than this value.

                  Motor0MinPosition: &motorsminsteps
                    address: 101
                    type: S32
                    access: Write
                    description: Specifies the limit of the accumulated steps for the negative movement of motor 0. The device will not let the motor move further than this value. A value equal to 0 disables the feature.
                  Motor1MinPosition:
                    <<: *motorsminsteps
                    address: 102
                    description: Specifies the limit of the accumulated steps for the negative movement of motor 1. The device will not let the motor move further than this value. A value equal to 0 disables the feature.
                  Motor2MinPosition:
                    <<: *motorsminsteps
                    address: 103
                    description: Specifies the limit of the accumulated steps for the negative movement of motor 2. The device will not let the motor move further than this value. A value equal to 0 disables the feature.
                  Motor3MinPosition:
                    <<: *motorsminsteps
                    address: 104
                    description: Specifies the limit of the accumulated steps for the negative movement of motor 3. The device will not let the motor move further than this value. A value equal to 0 disables the feature.

                  StepRelative:
                    address: 105
                    type: S32
                    length: 4
                    access: Write
                    description: Starts the movement of all motors with the step interval defined by this array. The value's signal defines the direction.
                    payloadSpec:
                      Motor0:
                        offset: 0
                        description: Starts the movement of motor 0 with the step interval defined by this register. The value's signal defines the direction.
                      Motor1:
                        offset: 1
                        description: Starts the movement of motor 1 with the step interval defined by this register. The value's signal defines the direction.
                      Motor2:
                        offset: 2
                        description: Starts the movement of motor 2 with the step interval defined by this register. The value's signal defines the direction.
                      Motor3:
                        offset: 3
                        description: Starts the movement of motor 3 with the step interval defined by this register. The value's signal defines the direction.

                  Motor0StepRelative: &immediatesteps
                    address: 106
                    type: S32
                    access: Write
                    description: Starts the movement of motor 0 with the step interval defined by this register, disregarding the acceleration protocol. The sign of the value specifies the direction.
                  Motor1StepRelative:
                    <<: *immediatesteps
                    address: 107
                    description: Starts the movement of motor 1 with the step interval defined by this register, disregarding the acceleration protocol. The sign of the value specifies the direction.
                  Motor2StepRelative:
                    <<: *immediatesteps
                    address: 108
                    description: Starts the movement of motor 2 with the step interval defined by this register, disregarding the acceleration protocol. The sign of the value specifies the direction.
                  Motor3StepRelative:
                    <<: *immediatesteps
                    address: 109
                    description: Starts the movement of motor 3 with the step interval defined by this register, disregarding the acceleration protocol. The sign of the value specifies the direction.

                  ##################################
                  # Actions
                  ##################################
                  StopMotors:
                    address: 110
                    type: U8
                    access: Write
                    maskType: StepperMotors
                    description: Stops the motors selected in the bit-mask immediately.
                  ResetMotors:
                    address: 111
                    type: U8
                    access: Write
                    visibility: private
                    maskType: StepperMotors
                    description: Resets the internal motor driver which also clears any eventual error (not implemented).
                  ResetEncoders:
                    address: 112
                    type: U8
                    access: Write
                    maskType: QuadratureEncoders
                    description: Resets the encoder.

                  ##################################
                  # Reserved
                  ##################################
                  Reserved0: &reserved
                    address: 113
                    type: U8
                    access: Write
                    visibility: private
                    description: Contains the CFG configuration pins of the TMC2210 driver that controls motor 0.
                  Reserved1:
                    <<: *reserved
                    address: 114
                    description: Contains the CFG configuration pins of the TMC2210 driver that controls motor 1.
                  Reserved2:
                    <<: *reserved
                    address: 115
                    description: Contains the CFG configuration pins of the TMC2210 driver that controls motor 2.
                  Reserved3:
                    <<: *reserved
                    address: 116
                    description: Contains the CFG configuration pins of the TMC2210 driver that controls motor 3.
                  Reserved4:
                    <<: *reserved
                    address: 117
                    visibility: private
                    description: Contains the raw data of the digital potentiometer that controls current limit of motor 0.
                  Reserved5:
                    <<: *reserved
                    address: 118
                    visibility: private
                    description: Contains the raw data of the digital potentiometer that controls current limit of motor 1.
                  Reserved6:
                    <<: *reserved
                    address: 119
                    visibility: private
                    description: Contains the raw data of the digital potentiometer that controls current limit of motor 2.
                  Reserved7:
                    <<: *reserved
                    address: 120
                    visibility: private
                    description: Contains the raw data of the digital potentiometer that controls current limit of motor 3.

                  ##################################
                  # Reserved block
                  ##################################
                  Reserved8: &reserved_unused
                    address: 121
                    visibility: private
                    type: U8
                    access: Read
                    description: Reserved register.
                  Reserved9:
                    <<: *reserved_unused
                    address: 122
                  Reserved10:
                    <<: *reserved_unused
                    address: 123
                  Reserved11:
                    <<: *reserved_unused
                    address: 124
                  Reserved12:
                    <<: *reserved_unused
                    address: 125
                  Reserved13:
                    <<: *reserved_unused
                    address: 126
                  Reserved14:
                    <<: *reserved_unused
                    address: 127
                  Reserved15:
                    <<: *reserved_unused
                    address: 128
                  Reserved16:
                    <<: *reserved_unused
                    address: 129

                  ##################################
                  # Quick movement
                  ##################################
                  TriggerQuickMovement:
                    address: 130
                    type: U8
                    access: Write
                    maskType: StepperMotors
                    description: Triggers the quick movement in the correspondent motor with the currently configured settings.
                  Motor1QuickMovementPulseDistance: &quickmovement_pulsedistance
                    address: 131
                    type: Float
                    access: Write
                    description: Sets the single pulse distance for a quick movement, in millimeters, for the Motor 1.
                  Motor2QuickMovementPulseDistance:
                    <<: *quickmovement_pulsedistance
                    address: 132
                    description: Sets the single pulse distance for a quick movement, in millimeters, for the Motor 2.
                  Motor1QuickMovementNominalSpeed: &quickmovement_nominalspeed
                    address: 133
                    type: Float
                    access: Write
                    description: Sets the target speed for a quick movement, in millimeters per second, for the Motor 1.
                  Motor2QuickMovementNominalSpeed:
                    <<: *quickmovement_nominalspeed
                    address: 134
                    description: Sets the target speed for a quick movement, in millimeters per second, for the Motor 2.
                  Motor1QuickMovementInitialSpeed: &quickmovement_initialspeed
                    address: 135
                    type: Float
                    access: Write
                    description: Sets the initial speed for a quick movement, in millimeters per second, for the Motor 1.
                  Motor2QuickMovementInitialSpeed:
                    <<: *quickmovement_initialspeed
                    address: 136
                    description: Sets the initial speed for a quick movement, in millimeters per second, for the Motor 2.
                  Motor1QuickMovementAcceleration: &quickmovement_acceleration
                    address: 137
                    type: Float
                    access: Write
                    description: Sets the acceleration for a quick movement, in millimeters per second^2, for the Motor 1.
                  Motor2QuickMovementAcceleration:
                    <<: *quickmovement_acceleration
                    address: 138
                    description: Sets the acceleration for a quick movement, in millimeters per second^2, for the Motor 2.
                  Motor1QuickMovementDistance: &quickmovement_distance
                    address: 139
                    type: Float
                    access: Write
                    description: Sets the travel distance of a quick movement, in millimeters, for the Motor 1.
                  Motor2QuickMovementDistance:
                    <<: *quickmovement_distance
                    address: 140
                    description: Sets the travel distance of a quick movement, in millimeters, for the Motor 1.

                ##################################
                # Bit masks
                ##################################
                bitMasks:
                  StepperMotors:
                    description: Specifies the index of each motor.
                    bits:
                      Motor0: 0x01
                      Motor1: 0x02
                      Motor2: 0x04
                      Motor3: 0x08
                  QuadratureEncoders:
                    description: Specifies the index of each motor.
                    bits:
                      Encoder0: 0x01
                      Encoder1: 0x02
                      Encoder2: 0x04
                  DigitalInputs:
                    description: Specifies the available digital input lines.
                    bits:
                      Input0: 0x1
                      Input1: 0x2
                      Input2: 0x4
                      Input3: 0x8
                  DigitalInputStates:
                    description: Specifies the state of the port and digital input line that changed.
                    bits:
                      Input0: 0x1
                      Input1: 0x2
                      Input2: 0x4
                      Input3: 0x8
                      Input0Changed: 0x10
                      Input1Changed: 0x20
                      Input2Changed: 0x40
                      Input3Changed: 0x80
                ##################################
                # Group masks
                ##################################
                groupMasks:
                  EncoderModeConfig:
                    description: Specifies the type of reading made from the quadrature QuadratureEncoders.
                    values:
                      Position: 0
                      Displacement: 1
                  EncoderSamplingRateConfig:
                    description: Specifies the rate of the events from the quadrature QuadratureEncoders.
                    values:
                      Rate100Hz: 0
                      Rate200Hz: 1
                      Rate250Hz: 2
                      Rate500Hz: 3
                  MotorOperationMode:
                    description: Specifies the motor operation mode.
                    values:
                      QuietMode: 0
                      DynamicMovements: 1
                  MicrostepResolution:
                    description: Specifies the microstep resolution for each step pulse.
                    values:
                      Microstep8: 0
                      Microstep16: 1
                      Microstep32: 2
                      Microstep64: 3
                  HoldCurrentReduction:
                    description: Specifies the hold current reduction.
                    values:
                      ReductionTo50Percent: 0
                      ReductionTo25Percent: 1
                      ReductionTo12Percent: 2
                      NoReduction: 3
                  InputOpModeConfig:
                    description: Specifies the inputs operation mode.
                    values:
                      EventOnly: 0x0
                      StopMotor0OnRising: 0x10
                      StopMotor1OnRising: 0x11
                      StopMotor2OnRising: 0x12
                      StopMotor3OnRising: 0x13
                      StopMotor0OnFalling: 0x20
                      StopMotor1OnFalling: 0x21
                      StopMotor2OnFalling: 0x22
                      StopMotor3OnFalling: 0x23
                  TriggerConfig:
                    description: Specifies the input trigger configuration.
                    values:
                      FallingEdge: 0
                      RisingEdge: 1
                  InterlockEnabledConfig:
                    description: Specifies the external connector state that enables the device.
                    values:
                      Closed: 0
                      Open: 1
                  AccumulatedStepsSamplingRateConfig:
                    description: Specifies the rate of the accumulated steps events.
                    values:
                      Disabled: 0
                      Rate10Hz: 1
                      Rate50Hz: 2
                      Rate100Hz: 3
                  DeviceStateMode:
                    description: Specifies the current state of the device.
                    values:
                      Disabled: 0
                      Enabled: 1
              Modality=Behavior
              DeviceName=HarpCommands/StepperDriver

            SubscribeSubject HarpAnalogInputCommands => #18
            SubscribeSubject HarpTimestampSource => #19
            #18, #19 -> WithLatestFrom
            -> AllenNeuralDynamics.HarpUtils.ModifyMessage(Address=nil, MessageTypeModified=nil) => #21
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #23
            Harp.AnalogInput.GetMetadata
            -> PropertyMapping(DeviceMetadata) => #25
            #21, #23, #25 -> IncludeWorkflow
              Path=AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai
              DeviceMetadata:
                %YAML 1.1
                ---
                # yaml-language-server: $schema=https://harp-tech.org/draft-02/schema/device.json
                device: AnalogInput
                whoAmI: 1236
                firmwareVersion: "1.2"
                hardwareTargets: "1.0"
                registers:
                  AcquisitionState:
                    address: 32
                    access: Write
                    type: U8
                    maskType: EnableFlag
                    description: Enables the data acquisition.
                  AnalogData:
                    address: 33
                    type: S16
                    length: 4
                    access: Event
                    description: Value from a single read of all ADC channels.
                    payloadSpec:
                      Channel0:
                        offset: 0
                      Channel1:
                        offset: 1
                      Channel2:
                        offset: 2
                      Channel3:
                        offset: 3
                  DigitalInputState:
                    address: 34
                    access: Event
                    type: U8
                    maskType: DigitalInputs
                    description: State of the digital input pin 0.
                  Reserved0: &ReservedReg
                    address: 35
                    access: Read
                    visibility: private
                    type: U8
                    description: Reserved
                  Reserved1:
                    <<: *ReservedReg
                    address: 36
                  RangeAndFilter:
                    address: 37
                    access: Write
                    type: U8
                    maskType: RangeAndFilterConfig
                    description: Sets the range and LowPass filter cutoff of the ADC.
                  SamplingRate:
                    address: 38
                    access: Write
                    type: U8
                    maskType: SamplingRateMode
                    description: Sets the sampling frequency of the ADC.
                  DI0Trigger:
                    address: 39
                    access: Write
                    type: U8
                    maskType: TriggerConfig
                    description: Configuration of the digital input pin 0.
                  DO0Sync:
                    address: 40
                    access: Write
                    type: U8
                    maskType: SyncConfig
                    description: Configuration of the digital output pin 0.
                  DO0PulseWidth:
                    address: 41
                    access: Write
                    type: U8
                    minValue: 1
                    maxValue: 250
                    description: Pulse duration (ms) for the digital output pin 0. The pulse will only be emitted when DO0Sync == Pulse.
                  DigitalOutputSet: &output
                    address: 42
                    type: U8
                    access: Write
                    maskType: DigitalOutputs
                    description: Set the specified digital output lines.
                  DigitalOutputClear:
                    <<: *output
                    address: 43
                    description: Clear the specified digital output lines.
                  DigitalOutputToggle:
                    <<: *output
                    address: 44
                    description: Toggle the specified digital output lines
                  DigitalOutputState:
                    <<: *output
                    address: 45
                    access: [Write, Event]
                    description: Write the state of all digital output lines. An event will be emitted when the value of any pin was changed by a threshold event.
                  Reserved2:
                    <<: *ReservedReg
                    address: 46
                  Reserved3:
                    <<: *ReservedReg
                    address: 47
                  SyncOutput:
                    address: 48
                    access: Write
                    type: U8
                    maskType: StartSyncOutputTarget
                    description: Digital output that will be set when acquisition starts.
                  Reserved4:
                    <<: *ReservedReg
                    address: 49
                  Reserved5:
                    <<: *ReservedReg
                    address: 50
                  Reserved6:
                    <<: *ReservedReg
                    address: 51
                  Reserved7:
                    <<: *ReservedReg
                    address: 52
                  Reserved8:
                    <<: *ReservedReg
                    address: 53
                  Reserved9:
                    <<: *ReservedReg
                    address: 54
                  Reserved10:
                    <<: *ReservedReg
                    address: 55
                  Reserved11:
                    <<: *ReservedReg
                    address: 56
                  Reserved12:
                    <<: *ReservedReg
                    address: 57
                  DO0TargetChannel: &targetchannel
                    address: 58
                    access: Write
                    type: U8
                    maskType: AdcChannel
                    description: Target ADC channel that will be used to trigger a threshold event on DO0 pin.
                  DO1TargetChannel:
                    <<: *targetchannel
                    address: 59
                    description: Target ADC channel that will be used to trigger a threshold event on DO1 pin.
                  DO2TargetChannel:
                    <<: *targetchannel
                    address: 60
                    description: Target ADC channel that will be used to trigger a threshold event on DO2 pin.
                  DO3TargetChannel:
                    <<: *targetchannel
                    address: 61
                    description: Target ADC channel that will be used to trigger a threshold event on DO3 pin.
                  Reserved13:
                    <<: *ReservedReg
                    address: 62
                  Reserved14:
                    <<: *ReservedReg
                    address: 63
                  Reserved15:
                    <<: *ReservedReg
                    address: 64
                  Reserved16:
                    <<: *ReservedReg
                    address: 65
                  DO0Threshold: &thresholdvalue
                    address: 66
                    access: Write
                    type: S16
                    description: Value used to threshold an ADC read, and trigger DO0 pin.
                  DO1Threshold:
                    <<: *thresholdvalue
                    address: 67
                    description: Value used to threshold an ADC read, and trigger DO1 pin.
                  DO2Threshold:
                    <<: *thresholdvalue
                    address: 68
                    description: Value used to threshold an ADC read, and trigger DO2 pin.
                  DO3Threshold:
                    <<: *thresholdvalue
                    address: 69
                    description: Value used to threshold an ADC read, and trigger DO3 pin.
                  Reserved17:
                    <<: *ReservedReg
                    address: 70
                  Reserved18:
                    <<: *ReservedReg
                    address: 71
                  Reserved19:
                    <<: *ReservedReg
                    address: 72
                  Reserved20:
                    <<: *ReservedReg
                    address: 73
                  DO0TimeAboveThreshold: &bufferedthreshold
                    address: 74
                    access: Write
                    type: U16
                    defaultValue: 0
                    description: Time (ms) above threshold value that is required to trigger a DO0 pin event.
                  DO1TimeAboveThreshold:
                    <<: *bufferedthreshold
                    address: 75
                    description: Time (ms) above threshold value that is required to trigger a DO1 pin event.
                  DO2TimeAboveThreshold:
                    <<: *bufferedthreshold
                    address: 76
                    description: Time (ms) above threshold value that is required to trigger a DO2 pin event.
                  DO3TimeAboveThreshold:
                    <<: *bufferedthreshold
                    address: 77
                    description: Time (ms) above threshold value that is required to trigger a DO3 pin event.
                  Reserved21:
                    <<: *ReservedReg
                    address: 78
                  Reserved22:
                    <<: *ReservedReg
                    address: 79
                  Reserved23:
                    <<: *ReservedReg
                    address: 80
                  Reserved24:
                    <<: *ReservedReg
                    address: 81
                  DO0TimeBelowThreshold:
                    <<: *bufferedthreshold
                    address: 82
                    description: Time (ms) below threshold value that is required to trigger a DO0 pin event.
                  DO1TimeBelowThreshold:
                    <<: *bufferedthreshold
                    address: 83
                    description: Time (ms) below threshold value that is required to trigger a DO1 pin event.
                  DO2TimeBelowThreshold:
                    <<: *bufferedthreshold
                    address: 84
                    description: Time (ms) below threshold value that is required to trigger a DO2 pin event.
                  DO3TimeBelowThreshold:
                    <<: *bufferedthreshold
                    address: 85
                    description: Time (ms) below threshold value that is required to trigger a DO3 pin event.
                  Reserved25:
                    <<: *ReservedReg
                    address: 86
                  Reserved26:
                    <<: *ReservedReg
                    address: 87
                  Reserved27:
                    <<: *ReservedReg
                    address: 88
                  Reserved28:
                    <<: *ReservedReg
                    address: 89
                  Reserved29:
                    <<: *ReservedReg
                    address: 90
                bitMasks:
                  DigitalInputs:
                    description: Available digital input lines.
                    bits:
                      DI0: 0x1
                  DigitalOutputs:
                    description: Specifies the state of port digital output lines.
                    bits:
                      DO0: 0x1
                      DO1: 0x2
                      DO2: 0x4
                      DO3: 0x8
                      DO0Changed: 0x10
                      DO1Changed: 0x20
                      DO2Changed: 0x40
                      DO4Changed: 0x80
                groupMasks:
                  RangeAndFilterConfig:
                    description: Available settings to set the range (Volt) and LowPass filter cutoff (Hz) of the ADC.
                    values:
                      Range5VLowPass1500Hz: 0x06
                      Range5VLowPass3000Hz: 0x05
                      Range5VLowPass6000Hz: 0x04
                      Range5VLowPass10300Hz: 0x03
                      Range5VLowPass13700Hz: 0x02
                      Range5VLowPass15000Hz: 0x01
                      Range10VLowPass1500Hz: 0x16
                      Range10VLowPass3000Hz: 0x15
                      Range10VLowPass6000Hz: 0x14
                      Range10VLowPass11900Hz: 0x13
                      Range10VLowPass18500Hz: 0x12
                      Range10VLowPass22000Hz: 0x11
                  SamplingRateMode:
                    description: Available sampling frequency settings of the ADC.
                    values:
                      SamplingRate1000Hz: 0x00
                      SamplingRate2000Hz: 0x01
                  TriggerConfig:
                    description: Available configurations for when using DI0 as an acquisition trigger.
                    values:
                      None: 0
                      StartOnRisingEdge: 1
                      StartOnFallingEdge: 2
                      SampleOnRisingEdge: 3
                  SyncConfig:
                    description: Available configurations when using DO0 pin to report firmware events.
                    values:
                      None: 0
                      Heartbeat: 1
                      Pulse: 2
                  StartSyncOutputTarget:
                    description: Available digital output pins that are able to be triggered on acquisition start.
                    values:
                      None: 0
                      DO0: 1
                      DO1: 2
                      DO2: 3
                      DO3: 4
                  AdcChannel:
                    description: Available target analog channels to be targeted for threshold events.
                    values:
                      Channel0: 0
                      Channel1: 1
                      Channel2: 2
                      Channel3: 3
                      None: 8
              Modality=Behavior
              DeviceName=HarpCommands/AnalogInput

            SubscribeSubject HarpLickometerCommands => #27
            SubscribeSubject HarpTimestampSource => #28
            #27, #28 -> WithLatestFrom
            -> AllenNeuralDynamics.HarpUtils.ModifyMessage(Address=nil, MessageTypeModified=Write) => #30
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #32
            AllenNeuralDynamics.LicketySplit.GetMetadata
            -> PropertyMapping(DeviceMetadata) => #34
            #30, #32, #34 -> IncludeWorkflow
              Path=AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai
              DeviceMetadata:
                %YAML 1.1
                ---
                # yaml-language-server: $schema=https://raw.githubusercontent.com/harp-tech/reflex-generator/main/schema/device.json
                device: LicketySplit
                whoAmI: 1400
                firmwareVersion: "0.0"
                hardwareTargets: "0.5"
                registers:
                  LickState:
                    address: 32
                    type: U8
                    access: Event
                    maskType: LickChannels
                    description: Emits an event when the state of any lick detector changes. Value will be High when lick detected and Low otherwise.
                  Channel0TriggerThreshold: &thresholdreg
                    address: 33
                    type: U8
                    access: Write
                    description: Threshold value to detect the lick. Values below this threshold will be considered a detected lick.
                  Channel0UntriggerThreshold:
                    <<: *thresholdreg
                    address: 34
                    description: Threshold value to release the lick detection state. Values above this threshold will untrigger a detected lick.
                bitMasks:
                  LickChannels:
                    description: The channel of the lick detector.
                    bits:
                      Channel0: 0x1
                      Channel1: 0x2
              Modality=Behavior
              DeviceName=HarpCommands/Lickometer

            SubscribeSubject HarpWhiteRabbitCommands => #36
            SubscribeSubject HarpTimestampSource => #37
            #36, #37 -> WithLatestFrom
            -> AllenNeuralDynamics.HarpUtils.ModifyMessage(Address=nil, MessageTypeModified=Write) => #39
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #41
            AllenNeuralDynamics.WhiteRabbit.GetMetadata
            -> PropertyMapping(DeviceMetadata) => #43
            #39, #41, #43 -> IncludeWorkflow
              Path=AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai
              DeviceMetadata:
                %YAML 1.1
                ---
                # yaml-language-server: $schema=https://harp-tech.org/draft-02/schema/device.json
                device: WhiteRabbit
                whoAmI: 1404
                firmwareVersion: "0.1"
                hardwareTargets: "0.1"
                registers:
                  ConnectedDevices:
                    address: 32
                    type: U16
                    access: Event
                    maskType: ClockOutChannels
                    description: "The currently connected output channels. An event will be generated when any of the channels are connected or disconnected."
                  Counter:
                    address: 33
                    type: U32
                    access: [Write, Event]
                    description: "The counter value. This value is incremented at the frequency specified by CounterFrequencyHz. Write to force a counter value."
                  CounterFrequencyHz:
                    address: 34
                    type: U16
                    access: Write
                    maxValue: 500
                    defaultValue: 0
                    minValue: 0
                    description: "The frequency at which the counter is incremented. A value of 0 disables the counter."
                  AuxPortMode:
                    address: 35
                    type: U8
                    access: Write
                    description: "The function of the auxiliary port."
                    maskType: AuxPortModeConfig
                  AuxPortBaudRate:
                    address: 36
                    type: U32
                    access: Write
                    defaultValue: 1000
                    minValue: 40
                    maxValue: 1000000
                    description: "The baud rate, in bps, of the auxiliary port when in HarpClock mode."

                bitMasks:
                  ClockOutChannels:
                    description: "Clock output channels"
                    bits:
                      None: 0x00
                      Channel0: 0x01
                      Channel1: 0x02
                      Channel2: 0x04
                      Channel3: 0x08
                      Channel4: 0x10
                      Channel5: 0x20
                      Channel6: 0x40
                      Channel7: 0x80
                      Channel8: 0x100
                      Channel9: 0x200
                      Channel10: 0x400
                      Channel11: 0x800
                      Channel12: 0x1000
                      Channel13: 0x2000
                      Channel14: 0x4000
                      Channel15: 0x8000
                groupMasks:
                  AuxPortModeConfig:
                    description: "Auxiliary port available configuration"
                    values:
                      Disabled: 0x0
                      HarpClock: 0x1
                      PPS: 0x2
              Modality=Behavior
              DeviceName=HarpCommands/ClockGenerator

            SubscribeSubject HarpEnvironmentSensorCommands => #45
            SubscribeSubject HarpTimestampSource => #46
            #45, #46 -> WithLatestFrom
            -> AllenNeuralDynamics.HarpUtils.ModifyMessage(Address=nil, MessageTypeModified=Write) => #48
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #50
            AllenNeuralDynamics.EnvironmentSensor.GetMetadata
            -> PropertyMapping(DeviceMetadata) => #52
            #48, #50, #52 -> IncludeWorkflow
              Path=AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai
              DeviceMetadata:
                %YAML 1.1
                ---
                # yaml-language-server: $schema=https://harp-tech.org/draft-02/schema/device.json
                device: EnvironmentSensor
                whoAmI: 1405
                firmwareVersion: "0.1"
                hardwareTargets: "0.1"
                registers:
                  Pressure:
                    access: Read
                    address: 32
                    type: U32
                    description: Pressure, in Pa
                  Temperature:
                    access: Read
                    address: 33
                    type: Float
                    description: Temperature in degrees C
                  Humidity:
                    access: Read
                    address: 34
                    type: Float
                    description: Humidity, in %RH
                  SensorData:
                    access: Event
                    address: 35
                    type: Float
                    description: A periodic event will be emitted with aggregated data from all sensors.
                    length: 3
                    payloadSpec:
                      Pressure:
                        offset: 0
                        description: Pressure, in Pa
                      Temperature:
                        offset: 1
                        description: Temperature in degrees C
                      Humidity:
                        offset: 2
                        description: Humidity, in %RH
                  EnableEvents:
                    access: Write
                    address: 36
                    type: U8
                    maskType: Events
                    description: Enables (~2Hz) or disables the SensorData events
                  TemperatureOffsetC:
                    access: Read
                    address: 37
                    type: Float
                    description: Fixed experimentally-determined calibration offset added to nominal temperature sensor reading in degrees C
                bitMasks:
                  Events:
                    bits:
                      Disable: 0x0
                      SensorData: 0x1
                    description: Available events on the device
              Modality=Behavior
              DeviceName=HarpCommands/EnvironmentSensor

            SubscribeSubject HarpLoadCellsEvents => #54
            SubscribeSubject HarpTimestampSource => #55
            #54, #55 -> WithLatestFrom
            -> AllenNeuralDynamics.HarpUtils.ModifyMessage(Address=nil, MessageTypeModified=nil) => #57
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #59
            Harp.LoadCells.GetMetadata
            -> PropertyMapping(DeviceMetadata) => #61
            #57, #59, #61 -> IncludeWorkflow
              Path=AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai
              DeviceMetadata:
                %YAML 1.1
                ---
                # yaml-language-server: $schema=https://harp-tech.org/draft-02/schema/device.json
                device: LoadCells
                whoAmI: 1232
                firmwareVersion: "1.1"
                hardwareTargets: "1.0"
                registers:
                  AcquisitionState:
                    address: 32
                    access: Write
                    type: U8
                    maskType: EnableFlag
                    description: Enables the data acquisition.
                  LoadCellData:
                    address: 33
                    type: S16
                    length: 8
                    access: Event
                    description: Value of single ADC read from all load cell channels.
                    payloadSpec:
                      Channel0:
                        offset: 0
                      Channel1:
                        offset: 1
                      Channel2:
                        offset: 2
                      Channel3:
                        offset: 3
                      Channel4:
                        offset: 4
                      Channel5:
                        offset: 5
                      Channel6:
                        offset: 6
                      Channel7:
                        offset: 7
                  DigitalInputState:
                    address: 34
                    access: Event
                    type: U8
                    maskType: DigitalInputs
                    description: Status of the digital input pin 0. An event will be emitted when DI0Trigger == None.
                  SyncOutputState:
                    address: 35
                    access: Event
                    type: U8
                    maskType: SyncOutputs
                    description: Status of the digital output pin 0. An periodic event will be emitted when DO0Sync == ToggleEachSecond.
                  BufferThresholdState:
                    address: 36
                    access: Read
                    visibility: private
                    type: U8
                    description: State of the buffer thresholds.
                  Reserved0: &ReservedReg
                    address: 37
                    access: Read
                    visibility: private
                    type: U8
                    description: Reserved
                  Reserved1:
                    <<: *ReservedReg
                    address: 38
                  DI0Trigger:
                    address: 39
                    access: Write
                    type: U8
                    maskType: TriggerConfig
                    description: Configuration of the digital input pin 0.
                  DO0Sync:
                    address: 40
                    access: Write
                    type: U8
                    maskType: SyncConfig
                    description: Configuration of the digital output pin 0.
                  DO0PulseWidth:
                    address: 41
                    access: Write
                    type: U8
                    minValue: 1
                    maxValue: 255
                    description: Pulse duration (ms) for the digital output pin 0. The pulse will only be emitted when DO0Sync == Pulse.
                  DigitalOutputSet: &output
                    address: 42
                    type: U16
                    access: Write
                    maskType: DigitalOutputs
                    description: Set the specified digital output lines.
                  DigitalOutputClear:
                    <<: *output
                    address: 43
                    description: Clear the specified digital output lines.
                  DigitalOutputToggle:
                    <<: *output
                    address: 44
                    description: Toggle the specified digital output lines
                  DigitalOutputState:
                    <<: *output
                    address: 45
                    access: [Write, Event]
                    description: Write the state of all digital output lines. An event will be emitted when the value of any pin was changed by a threshold event.
                  Reserved2:
                    <<: *ReservedReg
                    address: 46
                  Reserved3:
                    <<: *ReservedReg
                    address: 47
                  OffsetLoadCell0: &offsetloadcell
                    address: 48
                    access: Write
                    type: S16
                    minValue: -255
                    maxValue: 255
                    defaultValue: 0
                    description: Offset value for Load Cell channel 0.
                  OffsetLoadCell1:
                    <<: *offsetloadcell
                    address: 49
                    description: Offset value for Load Cell channel 1.
                  OffsetLoadCell2:
                    <<: *offsetloadcell
                    address: 50
                    description: Offset value for Load Cell channel 2.
                  OffsetLoadCell3:
                    <<: *offsetloadcell
                    address: 51
                    description: Offset value for Load Cell channel 3.
                  OffsetLoadCell4:
                    <<: *offsetloadcell
                    address: 52
                    description: Offset value for Load Cell channel 4.
                  OffsetLoadCell5:
                    <<: *offsetloadcell
                    address: 53
                    description: Offset value for Load Cell channel 5.
                  OffsetLoadCell6:
                    <<: *offsetloadcell
                    address: 54
                    description: Offset value for Load Cell channel 6.
                  OffsetLoadCell7:
                    <<: *offsetloadcell
                    address: 55
                    description: Offset value for Load Cell channel 7.
                  Reserved4:
                    <<: *ReservedReg
                    address: 56
                  Reserved5:
                    <<: *ReservedReg
                    address: 57
                  DO1TargetLoadCell: &targetloadcell
                    address: 58
                    access: Write
                    type: U8
                    maskType: LoadCellChannel
                    description: Target Load Cell that will be used to trigger a threshold event on DO1 pin.
                  DO2TargetLoadCell:
                    <<: *targetloadcell
                    address: 59
                    description: Target Load Cell that will be used to trigger a threshold event on DO2 pin.
                  DO3TargetLoadCell:
                    <<: *targetloadcell
                    address: 60
                    description: Target Load Cell that will be used to trigger a threshold event on DO3 pin.
                  DO4TargetLoadCell:
                    <<: *targetloadcell
                    address: 61
                    description: Target Load Cell that will be used to trigger a threshold event on DO4 pin.
                  DO5TargetLoadCell:
                    <<: *targetloadcell
                    address: 62
                    description: Target Load Cell that will be used to trigger a threshold event on DO5 pin.
                  DO6TargetLoadCell:
                    <<: *targetloadcell
                    address: 63
                    description: Target Load Cell that will be used to trigger a threshold event on DO6 pin.
                  DO7TargetLoadCell:
                    <<: *targetloadcell
                    address: 64
                    description: Target Load Cell that will be used to trigger a threshold event on DO7 pin.
                  DO8TargetLoadCell:
                    <<: *targetloadcell
                    address: 65
                    description: Target Load Cell that will be used to trigger a threshold event on DO8 pin.
                  DO1Threshold: &thresholdvalue
                    address: 66
                    access: Write
                    type: S16
                    description: Value used to threshold a Load Cell read, and trigger DO1 pin.
                  DO2Threshold:
                    <<: *thresholdvalue
                    address: 67
                    description: Value used to threshold a Load Cell read, and trigger DO2 pin.
                  DO3Threshold:
                    <<: *thresholdvalue
                    address: 68
                    description: Value used to threshold a Load Cell read, and trigger DO3 pin.
                  DO4Threshold:
                    <<: *thresholdvalue
                    address: 69
                    description: Value used to threshold a Load Cell read, and trigger DO4 pin.
                  DO5Threshold:
                    <<: *thresholdvalue
                    address: 70
                    description: Value used to threshold a Load Cell read, and trigger DO5 pin.
                  DO6Threshold:
                    <<: *thresholdvalue
                    address: 71
                    description: Value used to threshold a Load Cell read, and trigger DO6 pin.
                  DO7Threshold:
                    <<: *thresholdvalue
                    address: 72
                    description: Value used to threshold a Load Cell read, and trigger DO7 pin.
                  DO8Threshold:
                    <<: *thresholdvalue
                    address: 73
                    description: Value used to threshold a Load Cell read, and trigger DO8 pin.
                  DO1TimeAboveThreshold: &bufferedthreshold
                    address: 74
                    access: Write
                    type: U16
                    defaultValue: 0
                    description: Time (ms) above threshold value that is required to trigger a DO1 pin event.
                  DO2TimeAboveThreshold:
                    <<: *bufferedthreshold
                    address: 75
                    description: Time (ms) above threshold value that is required to trigger a DO2 pin event.
                  DO3TimeAboveThreshold:
                    <<: *bufferedthreshold
                    address: 76
                    description: Time (ms) above threshold value that is required to trigger a DO3 pin event.
                  DO4TimeAboveThreshold:
                    <<: *bufferedthreshold
                    address: 77
                    description: Time (ms) above threshold value that is required to trigger a DO4 pin event.
                  DO5TimeAboveThreshold:
                    <<: *bufferedthreshold
                    address: 78
                    description: Time (ms) above threshold value that is required to trigger a DO5 pin event.
                  DO6TimeAboveThreshold:
                    <<: *bufferedthreshold
                    address: 79
                    description: Time (ms) above threshold value that is required to trigger a DO6 pin event.
                  DO7TimeAboveThreshold:
                    <<: *bufferedthreshold
                    address: 80
                    description: Time (ms) above threshold value that is required to trigger a DO7 pin event.
                  DO8TimeAboveThreshold:
                    <<: *bufferedthreshold
                    address: 81
                    description: Time (ms) above threshold value that is required to trigger a DO8 pin event.
                  DO1TimeBelowThreshold:
                    <<: *bufferedthreshold
                    address: 82
                    description: Time (ms) below threshold value that is required to trigger a DO1 pin event.
                  DO2TimeBelowThreshold:
                    <<: *bufferedthreshold
                    address: 83
                    description: Time (ms) below threshold value that is required to trigger a DO2 pin event.
                  DO3TimeBelowThreshold:
                    <<: *bufferedthreshold
                    address: 84
                    description: Time (ms) below threshold value that is required to trigger a DO3 pin event.
                  DO4TimeBelowThreshold:
                    <<: *bufferedthreshold
                    address: 85
                    description: Time (ms) below threshold value that is required to trigger a DO4 pin event.
                  DO5TimeBelowThreshold:
                    <<: *bufferedthreshold
                    address: 86
                    description: Time (ms) below threshold value that is required to trigger a DO5 pin event.
                  DO6TimeBelowThreshold:
                    <<: *bufferedthreshold
                    address: 87
                    description: Time (ms) below threshold value that is required to trigger a DO6 pin event.
                  DO7TimeBelowThreshold:
                    <<: *bufferedthreshold
                    address: 88
                    description: Time (ms) below threshold value that is required to trigger a DO7 pin event.
                  DO8TimeBelowThreshold:
                    <<: *bufferedthreshold
                    address: 89
                    description: Time (ms) below threshold value that is required to trigger a DO8 pin event.
                  EnableEvents:
                    address: 90
                    access: Write
                    type: U8
                    maskType: LoadCellEvents
                    description: Specifies the active events in the device.
                bitMasks:
                  DigitalInputs:
                    description: Available digital input lines.
                    bits:
                      DI0: 0x1
                  SyncOutputs:
                    description: Specifies the state output synchronization lines.
                    bits:
                      DO0: 0x1
                  DigitalOutputs:
                    description: Specifies the state of port digital output lines.
                    bits:
                      DO1: 0x1
                      DO2: 0x2
                      DO3: 0x4
                      DO4: 0x8
                      DO5: 0x10
                      DO6: 0x20
                      DO7: 0x40
                      DO8: 0x80
                  LoadCellEvents:
                    description: The events that can be enabled/disabled.
                    bits:
                      LoadCellData: 0x1
                      DigitalInput: 0x2
                      SyncOutput: 0x4
                      Thresholds: 0x8
                groupMasks:
                  TriggerConfig:
                    description: Available configurations when using a digital input as an acquisition trigger.
                    values:
                      None: 0
                      RisingEdge: 1
                      FallingEdge: 2
                  SyncConfig:
                    description: Available configurations when using a digital output pin to report firmware events.
                    values:
                      None: 0
                      Heartbeat: 1
                      Pulse: 2
                  LoadCellChannel:
                    description: Available target load cells to be targeted on threshold events.
                    values:
                      Channel0: 0
                      Channel1: 1
                      Channel2: 2
                      Channel3: 3
                      Channel4: 4
                      Channel5: 5
                      Channel6: 6
                      Channel7: 7
                      None: 8
              Modality=Behavior
              DeviceName=HarpCommands/LoadCells

        GroupWorkflow SoftwareEvents
            SubscribeSubject SoftwareEvents => #0
            SubscribeSubject HarpTimestampSource => #1
            #0, #1 -> WithLatestFrom
            -> Bonsai.Harp.CreateTimestamped
            -> AllenNeuralDynamics.Core.TimestampSoftwareEvent
            -> Bonsai.Scripting.Expressions.ExpressionCondition ExcludePrivate => #5
              Expression: !it.Name.StartsWith("_")
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #7
            #5, #7 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogSoftwareEventsDemux.bonsai, LoggerName=SoftwareEvents, SubjectName=LoggingRootPath, Modality=Behavior)
            -> WorkflowOutput

            GroupWorkflow Metadata
                SubscribeSubject Repository
                -> AllenNeuralDynamics.VersionControl.IsRepositoryClean(IgnoreUntracked=false)
                -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=RepositoryStatus)
                -> MulticastSubject SoftwareEvents

                SubscribeSubject RngSeedValue
                -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=RngSeed)
                -> MulticastSubject SoftwareEvents

                SubscribeSubject LoadCellsCalibration
                -> Merge
                -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=LoadCellCalibration)
                -> MulticastSubject SoftwareEvents

                SubscribeSubject ReferenceManipulatorPosition
                -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=ReferenceManipulatorPosition)
                -> MulticastSubject SoftwareEvents

                SubscribeSubject Annotations
                -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=Annotations)
                -> MulticastSubject SoftwareEvents

                SubscribeSubject EndExperiment
                -> StringProperty(Value=ExperimentCompleted)
                -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=EndExperiment)
                -> MulticastSubject SoftwareEvents

                SubscribeSubject IsExperimentPaused
                -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=IsExperimentPaused)
                -> MulticastSubject SoftwareEvents
            -> DelaySubscription(DueTime=PT0.5S)

        Defer OperationControl
            StringProperty(Value=OperationControl)
            -> Take(Count=1)
            -> AsyncSubject deviceName

            Disable SubscribeSubject CurrentLut
            -> Disable MemberSelector(Selector=Item2) => #4
            Disable SubscribeSubject Modality
            -> Disable PropertyMapping(Modality) => #6
            Disable SubscribeSubject deviceName
            -> Disable PropertyMapping(DeviceName) => #8
            Annotation FIXME(Text=https://github.com/AllenNeuralDynamics/Aind.Behavior.Telekinesis/issues) => #9
            #4, #6, #8, #9 -> Disable IncludeWorkflow(Path=Extensions\LogImage.bonsai, SubjectName=LoggingRootPath, Modality=nil, LogName=Lut, DeviceName="")

            SubscribeSubject SpoutPosition => #11
            SubscribeSubject HarpTimestampSource => #12
            #11, #12 -> WithLatestFrom
            -> Bonsai.Harp.CreateTimestamped => #14
            SubscribeSubject deviceName
            -> PropertyMapping(DeviceName) => #16
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #18
            #14, #16, #18 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogCsv.bonsai, SubjectName=LoggingRootPath, Modality=Behavior, LogName=SpoutPosition, DeviceName=OperationControl)

            SubscribeSubject CurrentActionVector => #20
            SubscribeSubject deviceName
            -> PropertyMapping(DeviceName) => #22
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #24
            #20, #22, #24 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogCsv.bonsai, SubjectName=LoggingRootPath, Modality=Behavior, LogName=CurrentActionVector, DeviceName=OperationControl)

            SubscribeSubject TaskLogicParameters
            -> MemberSelector(Selector=OperationControl)
            -> MemberSelector(Selector=ActionLuts)
            -> Merge => #29
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #31
            SubscribeSubject deviceName
            -> PropertyMapping(DeviceName) => #33
            #29, #31, #33 -> SelectMany CopyImage
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject value

                SubscribeSubject value => #3
                ExternalizedMapping(Name(DisplayName=SubjectName))
                -> SubscribeSubject LoggingRootPath => #5
                ExternalizedMapping(Modality) => #6
                #5, #6 -> AllenNeuralDynamics.Core.AppendModalitySuffix(Modality=Behavior) => #7
                SubscribeSubject value
                -> MemberSelector(Selector=Key) => #9
                ExternalizedMapping(Value(DisplayName=DeviceName))
                -> StringProperty(Value=OperationControl) => #11
                #9, #11 -> Zip
                -> Take(Count=1)
                -> Bonsai.Scripting.Expressions.ExpressionTransform Rename => #14
                  Expression: new(Item1 as LogName, Item2 as DeviceName)
                #7, #14 -> Zip
                -> Format(Format={0}/{1}/{2}.tiff, Selector="Item1,Item2.DeviceName,Item2.LogName")
                -> PropertyMapping(DestinationPath) => #17
                SubscribeSubject value
                -> MemberSelector(Selector=Value)
                -> MemberSelector(Selector=Path)
                -> PropertyMapping(SourcePath) => #21
                #3, #17, #21 -> CopyFile(Overwrite=false)

        Defer Logs
            StringProperty(Value=Logs)
            -> Take(Count=1)
            -> AsyncSubject DeviceName

            GroupWorkflow ConfigSchemaLogging
                SubscribeSubject SubjectSchema
                -> AindBehaviorTelekinesisDataSchema.SerializeToJson(Formatting=None) => #1
                SubscribeSubject Modality
                -> PropertyMapping(Modality) => #3
                SubscribeSubject DeviceName
                -> PropertyMapping(DeviceName) => #5
                #1, #3, #5 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogDataSchema.bonsai, SubjectName=LoggingRootPath, Modality=Behavior, DeviceName=Logs, LogName=session_output)

                SubscribeSubject TaskLogicSchema
                -> AindBehaviorTelekinesisDataSchema.SerializeToJson(Formatting=None) => #8
                SubscribeSubject Modality
                -> PropertyMapping(Modality) => #10
                SubscribeSubject DeviceName
                -> PropertyMapping(DeviceName) => #12
                #8, #10, #12 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogDataSchema.bonsai, SubjectName=LoggingRootPath, Modality=Behavior, DeviceName=Logs, LogName=tasklogic_output)

                SubscribeSubject RigSchema
                -> AindBehaviorTelekinesisDataSchema.SerializeToJson(Formatting=None) => #15
                SubscribeSubject Modality
                -> PropertyMapping(Modality) => #17
                SubscribeSubject DeviceName
                -> PropertyMapping(DeviceName) => #19
                #15, #17, #19 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogDataSchema.bonsai, SubjectName=LoggingRootPath, Modality=Behavior, DeviceName=Logs, LogName=rig_output)

                SubscribeSubject RawRigSchema => #21
                SubscribeSubject Modality
                -> PropertyMapping(Modality) => #23
                SubscribeSubject DeviceName
                -> PropertyMapping(DeviceName) => #25
                #21, #23, #25 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogAllText.bonsai, SubjectName=LoggingRootPath, Modality=Behavior, DeviceName=Logs, LogName=rig_input, Extension=json)

                SubscribeSubject RawSessionSchema => #27
                SubscribeSubject Modality
                -> PropertyMapping(Modality) => #29
                SubscribeSubject DeviceName
                -> PropertyMapping(DeviceName) => #31
                #27, #29, #31 -> IncludeWorkflow
                  Path=AllenNeuralDynamics.Core:LogAllText.bonsai
                  SubjectName=LoggingRootPath
                  Modality=Behavior
                  DeviceName=Logs
                  LogName=session_input
                  Extension=json

                SubscribeSubject RawTaskLogicSchema => #33
                SubscribeSubject Modality
                -> PropertyMapping(Modality) => #35
                SubscribeSubject DeviceName
                -> PropertyMapping(DeviceName) => #37
                #33, #35, #37 -> IncludeWorkflow
                  Path=AllenNeuralDynamics.Core:LogAllText.bonsai
                  SubjectName=LoggingRootPath
                  Modality=Behavior
                  DeviceName=Logs
                  LogName=tasklogic_input
                  Extension=json

    Defer BehaviorVideos
        ExternalizedMapping(Value(DisplayName=Modality))
        -> PropertySource<AllenNeuralDynamics.Core.AppendModalitySuffix,System.Nullable(AllenNeuralDynamics.Core.Modality)>(MemberName=Modality, Value=BehaviorVideos)
        -> Take(Count=1)
        -> AsyncSubject Modality

        IncludeWorkflow(Path=Extensions\TriggeredCameras.bonsai)
-> WorkflowOutput
