WorkflowBuilder(Version=2.9.0)
GroupWorkflow RewardControl
    GroupWorkflow WaterValve
        BehaviorSubject<System.Double> ValveOpenTimeMs
        -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.PulseSupplyPort0)
        -> MulticastSubject HarpBehaviorCommands

        BehaviorSubject<System.Reactive.Unit> TriggerValve
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=SupplyPort0))
        -> MulticastSubject HarpBehaviorCommands
        -> WorkflowOutput

    BonVision.OptionalFloatProperty(Value=0, HasValue=true)
    -> Take(Count=1)
    -> BehaviorSubject GiveReward

    SubscribeSubject GiveReward
    -> PublishSubject HotGiveReward

    SubscribeSubject GiveReward
    -> Condition HasValue
        WorkflowInput Source1
        -> MemberSelector(Selector=HasValue)
        -> WorkflowOutput
    -> MemberSelector(Selector=Value)
    -> Condition GreaterThan0 => #9
        WorkflowInput Source1
        -> GreaterThan(Operand=IntProperty(Value=0))
        -> WorkflowOutput
    SubscribeSubject RigSchema
    -> MemberSelector(Selector=Calibration.WaterValve) => #11
    #9, #11 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform RewardToTime => #13
      Expression: ((Item1 * 0.001) - Item2.Offset) / Item2.Slope
    Annotation ToMilliseconds(Text="") => #14
    #13, #14 -> Multiply(Operand=DoubleProperty(Value=1000))
    -> InputMapping(Value(Selector=it))
    -> IntProperty(Value=0)
    -> Condition GreaterThan0
        WorkflowInput Source1
        -> GreaterThan(Operand=IntProperty(Value=0))
        -> WorkflowOutput
    -> MulticastSubject ValveOpenTimeMs
    -> Unit
    -> MulticastSubject TriggerValve

    SubscribeSubject GiveReward
    -> Condition HasValue
        WorkflowInput Source1
        -> MemberSelector(Selector=HasValue)
        -> WorkflowOutput
    -> MemberSelector(Selector=Value) => #24
    FloatProperty(Value=0) => #25
    #24, #25 -> Merge
    -> Accumulate
    -> BehaviorSubject SessionAccumulatedReward

    SubscribeSubject GiveReward
    -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=GiveReward)
    -> MulticastSubject SoftwareEvents

GroupWorkflow LickometerControl
    SubscribeSubject HarpLickometerEvents
    -> AllenNeuralDynamics.LicketySplit.Parse(Register=AllenNeuralDynamics.LicketySplit.TimestampedLickState) => #1
    -> MemberSelector(Selector=Value)
    -> HasFlag(Operand=WorkflowProperty<AllenNeuralDynamics.LicketySplit.LickChannels>(Value=Channel0))
    -> DistinctUntilChanged
    -> Condition => #5
        WorkflowInput Source1
        -> WorkflowOutput
    #5, #1 -> WithLatestFrom
    -> MemberSelector(Selector=Item2.Seconds)
    -> PublishSubject LickEvent

GroupWorkflow CameraControl
    SubscribeSubject HarpBehaviorHeartBeat
    -> Take(Count=1) => #1
    SubscribeSubject TriggeredCamerasReady => #2
    #1, #2 -> Zip
    -> Take(Count=1)
    -> Delay(DueTime=PT2S)
    -> BooleanProperty(Value=true)
    -> MulticastSubject CameraState

    BehaviorSubject<System.Boolean> CameraState => #8
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateStartCamerasPayload(StartCameras=CameraOutput0)) => #10
    #8 -> BitwiseNot
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateStopCamerasPayload(StopCameras=CameraOutput0)) => #13
    #10, #13 -> Merge
    -> MulticastSubject HarpBehaviorCommands

    SubscribeSubject StartLogging
    -> Take(Count=1)
    -> BooleanProperty(Value=false)
    -> MulticastSubject CameraState

    SubscribeSubject StartExperiment
    -> Take(Count=1)
    -> BooleanProperty(Value=true)
    -> MulticastSubject CameraState

    SubscribeSubject EndExperiment
    -> Take(Count=1)
    -> BooleanProperty(Value=false)
    -> MulticastSubject CameraState

GroupWorkflow AudioControl
    BehaviorSubject<System.Double> AudioDuration
    -> Multiply(Operand=IntProperty(Value=1000))
    -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.PulseDO2)
    -> MulticastSubject HarpBehaviorCommands

    BehaviorSubject<System.Int32> AudioFrequency
    -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.PwmFrequencyDO2)
    -> MulticastSubject HarpBehaviorCommands

    BehaviorSubject<System.Reactive.Unit> AudioTrigger
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePwmStartPayload(PwmStart=PwmDO2))
    -> MulticastSubject HarpBehaviorCommands

    GroupWorkflow InitialSettings => #10
        Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePwmDutyCycleDO2Payload(PwmDutyCycleDO2=1))
        -> Take(Count=1)
        -> MulticastSubject HarpBehaviorCommands

        Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePwmStopPayload(PwmStop=PwmDO2))
        -> Take(Count=1)
        -> MulticastSubject HarpBehaviorCommands
    SubscribeSubject HarpBehaviorEvents
    -> Take(Count=1) => #12
    #10, #12 -> SubscribeWhen

    BehaviorSubject<System.Reactive.Unit> TriggerResponseCue
    -> IncludeWorkflow(Path=Extensions\PlayAudioCue.bonsai, Duration=0.1, Frequency=300)

    BehaviorSubject<System.Boolean> TriggerFeedbackCue
    -> IncludeWorkflow(Path=Extensions\PlayAudioCue.bonsai, Duration=0.1, Frequency=1000)

    BehaviorSubject<System.Reactive.Unit> TriggerQuiescencePeriodCue
    -> IncludeWorkflow(Path=Extensions\PlayAudioCue.bonsai, Duration=0.1, Frequency=500)

GroupWorkflow BehaviorAnalogInput
    SubscribeSubject HarpBehaviorEvents
    -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedAnalogData)
    -> Harp.Behavior.AdcToVolt
    -> PublishSubject AnalogInputData

GroupWorkflow LoadCells
    SubscribeSubject HarpLoadCellsEvents
    -> Harp.LoadCells.FilterRegister(FilterType=Include, Register=Harp.LoadCells.LoadCellData)
    -> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(PayloadType=TimestampedS16, IsArray=true))
    -> PublishSubject RawLoadCellData => #3
    SubscribeSubject LoadCellsCalibration
    -> PropertyMapping(Calibration) => #5
    #3, #5 -> ApplyLoadCellsCalibration
    -> PublishSubject CalibratedLoadCellData

GroupWorkflow ContinuousFeedback
    BooleanProperty(Value=false)
    -> Take(Count=1)
    -> BehaviorSubject ContinuousFeedbackEnabled

    BehaviorSubject<System.Tuple(AindBehaviorTelekinesisDataSchema.ContinuousFeedback,System.IObservable(System.Double))> ContinuousFeedbackProcess

    SubscribeSubject ContinuousFeedbackProcess
    -> MemberSelector(Selector=Item1)
    -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=ContinuousFeedbackProcess)
    -> MulticastSubject SoftwareEvents

    SubscribeSubject ContinuousFeedbackProcess => #8
    -> MemberSelector(Selector=Item1)
    -> AindBehaviorTelekinesisDataSchema.MatchContinuousFeedback(Type=TypeMapping<AindBehaviorTelekinesisDataSchema.ManipulatorFeedback>) => #10
    #8 -> MemberSelector(Selector=Item2) => #11
    #10, #11 -> WithLatestFrom
    -> CreateObservable ContinuousFeedbackMotorSolver
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject thisFeedback

        SubscribeSubject thisFeedback
        -> MemberSelector(Selector=Item1)
        -> AsyncSubject deviceFeedback

        SubscribeSubject thisFeedback
        -> MemberSelector(Selector=Item2)
        -> AsyncSubject feedbackSource

        SubscribeSubject thisFeedback
        -> IncludeWorkflow(Path=Extensions\InterpolateContinuousFeedback.bonsai)
        -> PublishSubject interpolatedFeedback

        SubscribeSubject interpolatedFeedback => #12
        SubscribeSubject thisFeedback
        -> MemberSelector(Selector=Item1)
        -> AindBehaviorTelekinesisDataSchema.MatchContinuousFeedback => #15
        #12, #15 -> WithLatestFrom
        -> MulticastSubject ContinuousFeedbackMonitor

        SubscribeSubject interpolatedFeedback
        -> MulticastSubject SpoutOffset => #19
        SubscribeSubject ContinuousFeedbackEnabled
        -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> BehaviorSubject endFeedback => #22
        #19, #22 -> TakeUntil

        SubscribeSubject endFeedback => #24
        SubscribeSubject interpolatedFeedback => #25
        #24, #25 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> MulticastSubject SpoutOffset
        -> Take(Count=1)
        -> WorkflowOutput
    -> Switch

GroupWorkflow SpoutControl
    SubscribeSubject SpoutPosition
    -> WorkflowOutput

    SubscribeSubject RigSchema
    -> MemberSelector(Selector=Manipulator)
    -> MemberSelector(Selector=SpoutAxis) => #4
    BehaviorSubject<System.Single> SpoutPosition => #5
    Timer(DueTime=PT0S, Period=PT0.05S) => #6
    #5, #6 -> Gate
    -> DistinctUntilChanged
    -> Bonsai.Scripting.Expressions.ExpressionTransform "double(it)" => #9
      Expression: double(it)
    #4, #9 -> CombineLatest => #10
    GroupWorkflow GetCalibration
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Manipulator)
        -> MemberSelector(Selector=Calibration)
        -> WorkflowOutput
    -> PropertyMapping(Calibration) => #12
    #10, #12 -> AllenNeuralDynamics.AindManipulator.ManipulatorSiUnitConverter(ConverterMode=MmToStep) => #13
    SubscribeSubject RigSchema
    -> MemberSelector(Selector=Manipulator)
    -> MemberSelector(Selector=SpoutAxis)
    -> PropertyMapping(Axis) => #17
    #13, #17 -> MoveAbsoluteSingleAxis(Axis=Y1, MessageType=Write)
    -> MulticastSubject StepperDriverCommands

    BehaviorSubject<System.Double> SpoutOffset => #20
    SubscribeSubject ReferenceManipulatorPosition => #21
    SubscribeSubject RigSchema
    -> MemberSelector(Selector=Manipulator)
    -> MemberSelector(Selector=SpoutAxis)
    -> PropertyMapping(Value) => #25
    #21, #25 -> Index(Operand=WorkflowProperty<AllenNeuralDynamics.AindManipulator.Axis>(Value=None)) => #26
    #20, #26 -> WithLatestFrom
    -> Add
    -> MulticastSubject SpoutPosition

    SubscribeSubject RigSchema
    -> MemberSelector(Selector=Manipulator)
    -> MemberSelector(Selector=Calibration.InitialPosition)
    -> BehaviorSubject ReferenceManipulatorPosition

    BehaviorSubject<System.Boolean> ForceSpoutAvailability => #34
    SubscribeSubject ReferenceManipulatorPosition => #35
    SubscribeSubject RigSchema
    -> MemberSelector(Selector=Manipulator)
    -> MemberSelector(Selector=SpoutAxis)
    -> PropertyMapping(Value) => #39
    #35, #39 -> Index(Operand=WorkflowProperty<AllenNeuralDynamics.AindManipulator.Axis>(Value=None)) => #40
    SubscribeSubject TaskLogicParameters
    -> MemberSelector(Selector=OperationControl.Spout)
    -> MemberSelector(Selector=DefaultRetractionOffset) => #43
    #40, #43 -> CombineLatest => #44
    #34, #44 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: Item1 ? Item2.Item1 : Item2.Item1 + Item2.Item2
    -> MulticastSubject SpoutPosition => #47
    SubscribeSubject TaskLogicParameters
    -> MemberSelector(Selector=OperationControl.Spout)
    -> MemberSelector(Selector=Enabled)
    -> Condition => #51
        WorkflowInput Source1
        -> WorkflowOutput
    #47, #51 -> SubscribeWhen

GroupWorkflow LutLogic
    SubscribeSubject TaskLogicParameters
    -> MemberSelector(Selector=OperationControl.ActionLuts)
    -> Take(Count=1)
    -> Merge
    -> SelectMany LoadLuts
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject thisLut

        SubscribeSubject thisLut
        -> MemberSelector(Selector=Value)
        -> SelectMany LoadImage => #5
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject this

            SubscribeSubject this
            -> MemberSelector(Selector=Path)
            -> PropertyMapping(FileName)
            -> Bonsai.Vision.LoadImage(Mode=Unchanged)
            -> WorkflowOutput
        SubscribeSubject thisLut
        -> PropertyMapping(Scale(Selector=Value.Scale), Shift(Selector=Value.Offset)) => #7
        #5, #7 -> Bonsai.Dsp.ConvertScale(Depth=nil, Scale=1, Shift=0)
        -> Take(Count=1)
        -> Bonsai.Dsp.ConvertToMat => #10
        SubscribeSubject thisLut => #11
        #10, #11 -> WithLatestFrom
        -> Take(Count=1)
        -> WorkflowOutput
    -> ToDictionary(KeySelector=Item2.Key, ElementSelector="Item1,Item2")
    -> AsyncSubject ActionLuts

    BehaviorSubject<AindBehaviorTelekinesisDataSchema.Trial> ActiveTrial
    -> CreateObservable ParseAction
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject trial

        SubscribeSubject trial
        -> MemberSelector(Selector=Sampler) => #4
        -> AindBehaviorTelekinesisDataSchema.MatchSampler(Type=TypeMapping<AindBehaviorTelekinesisDataSchema.LutSampler2D>)
        -> CreateObservable => #6
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject sampler

            SubscribeSubject ActionLuts => #3
            SubscribeSubject sampler
            -> MemberSelector(Selector=LutReference)
            -> PropertyMapping(Value) => #6
            #3, #6 -> Index(Operand=StringProperty)
            -> Take(Count=1)
            -> AsyncSubject lutFactory
            -> MemberSelector(Selector=Item1)
            -> MulticastSubject CurrentLut

            SubscribeSubject trial
            -> MemberSelector(Selector=ActionSource0)
            -> IncludeWorkflow(Path=Extensions\SampleAction.bonsai) => #14
            SubscribeSubject trial
            -> MemberSelector(Selector=ActionSource1)
            -> IncludeWorkflow(Path=Extensions\SampleAction.bonsai) => #17
            GroupWorkflow NullAction1
                SubscribeSubject trial
                -> MemberSelector(Selector=ActionSource1)
                -> Bonsai.Scripting.Expressions.ExpressionCondition
                  Expression: it == null
                -> DoubleProperty(Value=NaN) => #3
                -> DoubleProperty(Value=0) => #4
                #3, #4 -> Zip
                -> Bonsai.Harp.CreateTimestamped
                -> WorkflowOutput
            -> Take(Count=1) => #19
            #17, #19 -> Merge => #20
            #14, #20 -> WithLatestFrom => #21
            -> MemberSelector(Selector="Item1.Value,Item2.Value") => #22
            #21 -> MemberSelector(Selector=Item1.Seconds) => #23
            #22, #23 -> Zip
            -> Bonsai.Harp.CreateTimestamped => #25
            SubscribeSubject lutFactory
            -> MemberSelector(Selector=Item1)
            -> PropertyMapping(LookUpTable) => #28
            SubscribeSubject lutFactory
            -> MemberSelector(Selector=Item2.Value)
            -> PropertyMapping(LutSettings) => #31
            #25, #28, #31 -> ParseAction
            -> WorkflowOutput
        #4 -> AindBehaviorTelekinesisDataSchema.MatchSampler(Type=TypeMapping<AindBehaviorTelekinesisDataSchema.Sampler1D>)
        -> CreateObservable => #8
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject sampler

            SubscribeSubject trial
            -> MemberSelector(Selector=ActionSource0)
            -> IncludeWorkflow(Path=Extensions\SampleAction.bonsai) => #5
            SubscribeSubject sampler
            -> PropertyMapping(Sampler) => #7
            #5, #7 -> ParseActionFromSampler1D
            -> WorkflowOutput
        #4 -> AindBehaviorTelekinesisDataSchema.MatchSampler(Type=TypeMapping<AindBehaviorTelekinesisDataSchema.Sampler2D>)
        -> CreateObservable => #10
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject sampler

            SubscribeSubject trial
            -> MemberSelector(Selector=ActionSource0)
            -> IncludeWorkflow(Path=Extensions\SampleAction.bonsai) => #5
            SubscribeSubject trial
            -> MemberSelector(Selector=ActionSource1)
            -> IncludeWorkflow(Path=Extensions\SampleAction.bonsai) => #8
            GroupWorkflow NullAction1
                SubscribeSubject trial
                -> MemberSelector(Selector=ActionSource1)
                -> Bonsai.Scripting.Expressions.ExpressionCondition
                  Expression: it == null
                -> DoubleProperty(Value=NaN) => #3
                -> DoubleProperty(Value=0) => #4
                #3, #4 -> Zip
                -> Bonsai.Harp.CreateTimestamped
                -> WorkflowOutput
            -> Take(Count=1) => #10
            #8, #10 -> Merge => #11
            #5, #11 -> WithLatestFrom => #12
            -> MemberSelector(Selector="Item1.Value,Item2.Value") => #13
            #12 -> MemberSelector(Selector=Item1.Seconds) => #14
            #13, #14 -> Zip
            -> Bonsai.Harp.CreateTimestamped
            -> ParseActionFromSampler2D
            -> WorkflowOutput
        #6, #8, #10 -> Merge
        -> Merge
        -> WorkflowOutput
    -> Switch
    -> PublishSubject CurrentActionVector => #10
    SubscribeSubject ActionLuts => #11
    #10, #11 -> SubscribeWhen

GroupWorkflow OphysInterface
    SubscribeSubject RigSchema
    -> MemberSelector(Selector=OphysInterface)
    -> IncludeWorkflow(Path=Extensions\IsNull.bonsai)
    -> BehaviorSubject SkipOphysInterfaceHandshake

    BehaviorSubject<System.Reactive.Unit> StartOphysInterface
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DOPort0)) => #5
    BehaviorSubject<System.Reactive.Unit> StopOphysInterface
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DOPort1)) => #7
    #5, #7 -> Merge
    -> MulticastSubject HarpBehaviorCommands

    SubscribeSubject HarpBehaviorEvents
    -> Take(Count=1)
    -> SelectMany ConfigurePulse
        Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePulseDOPort1Payload(PulseDOPort1=1))
        -> Take(Count=1) => #1
        Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePulseDOPort0Payload(PulseDOPort0=10))
        -> Take(Count=1) => #3
        #1, #3 -> Merge => #4
        Annotation "Ensure pulse mode"(Text="") => #5
        #4, #5 -> MulticastSubject HarpBehaviorCommands
        -> Last
        -> WorkflowOutput
    -> Unit
    -> MulticastSubject StopOphysInterface
    -> SelectMany GetReadyState => #15
        Timer(DueTime=PT0S, Period=PT0.1S)
        -> Harp.Behavior.CreateMessage(MessageType=Read, Payload=Harp.Behavior.CreateDigitalInputStatePayload(DigitalInputState=None))
        -> MulticastSubject HarpBehaviorCommands

        SubscribeSubject HarpBehaviorEvents
        -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedDigitalInputState)
        -> WorkflowOutput
    -> MemberSelector(Selector=Value)
    -> HasFlag(Operand=WorkflowProperty<Harp.Behavior.DigitalInputs>(Value=DIPort0)) => #17
    #15 -> MemberSelector(Selector=Seconds) => #18
    #17, #18 -> WithLatestFrom
    -> Bonsai.Harp.CreateTimestamped
    -> MemberSelector(Selector=Value)
    -> Take(Count=1)
    -> BehaviorSubject IsReadyOphysInterface

    SubscribeSubject HarpBehaviorEvents
    -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedDigitalInputState) => #25
    -> MemberSelector(Selector=Value) => #26
    ExternalizedMapping(Value(DisplayName=OphysStrobePin)) => #27
    #26, #27 -> HasFlag(Operand=WorkflowProperty<Harp.Behavior.DigitalInputs>(Value=DIPort0))
    -> DistinctUntilChanged
    -> Condition => #30
        WorkflowInput Source1
        -> WorkflowOutput
    #25 -> MemberSelector(Selector=Seconds) => #31
    #30, #31 -> WithLatestFrom
    -> Bonsai.Harp.CreateTimestamped
    -> PublishSubject OphysFrameStrobe
