<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:AindTelekinesisDataSchema.TaskLogic;assembly=Extensions"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="WorkflowInput">
        <Name>Source1</Name>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>SampleActionSource</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>Source</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Source</Name>
            </Expression>
            <Expression xsi:type="p1:MatchActionSource">
              <p1:Type xsi:type="TypeMapping" TypeArguments="p1:LoadCellActionSource" />
            </Expression>
            <Expression xsi:type="rx:CreateObservable">
              <Name>FromLoadCells</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>loadCellSource</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>CalibratedLoadCellData</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value</Selector>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>loadCellSource</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Channel</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Value" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Index">
                    <Operand xsi:type="IntProperty">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="dsp:Rescale">
                      <dsp:Min>0</dsp:Min>
                      <dsp:Max>1</dsp:Max>
                      <dsp:RangeMin>0</dsp:RangeMin>
                      <dsp:RangeMax>1</dsp:RangeMax>
                      <dsp:RescaleType>Linear</dsp:RescaleType>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Seconds</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="harp:CreateTimestamped" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="3" To="10" Label="Source1" />
                  <Edge From="4" To="8" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source2" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="11" Label="Source1" />
                  <Edge From="10" To="11" Label="Source2" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="p1:MatchActionSource">
              <p1:Type xsi:type="TypeMapping" TypeArguments="p1:BehaviorAnalogInputActionSource" />
            </Expression>
            <Expression xsi:type="rx:CreateObservable">
              <Name>FromAnalogInput</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>analogDataSource</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>AnalogInputData</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>analogDataSource</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Channel</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>SelectChannel</scr:Name>
                    <scr:Expression>new(
Item2 == 0 ? Item1.Value.AnalogInput0 : Item1.Value.AnalogInput1 as Value,
Item1.Seconds as Seconds)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="dsp:Rescale">
                      <dsp:Min>0</dsp:Min>
                      <dsp:Max>1</dsp:Max>
                      <dsp:RangeMin>0</dsp:RangeMin>
                      <dsp:RangeMax>1</dsp:RangeMax>
                      <dsp:RescaleType>Linear</dsp:RescaleType>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Seconds</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="harp:CreateTimestamped" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="3" To="6" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source2" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="7" To="10" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="11" Label="Source1" />
                  <Edge From="10" To="11" Label="Source2" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="3" To="6" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="8" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>