<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:Bonsai.Numerics.Distributions;assembly=Bonsai.Numerics"
                 xmlns:bv="clr-namespace:BonVision;assembly=BonVision"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="WorkflowInput">
        <Name>Source1</Name>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>DrawReward</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>RngSeed</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:CreateContinuousUniform">
                <p1:Lower>0</p1:Lower>
                <p1:Upper>1</p1:Upper>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:Sample" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Action</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>RewardProbability</Selector>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\SampleDistributionWithRngSeed.bonsai" />
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="LessThan">
              <Operand xsi:type="DoubleProperty">
                <Value>0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="BitwiseNot" />
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="bv:OptionalFloatProperty">
                <bv:Value xsi:nil="true" />
                <bv:HasValue>false</bv:HasValue>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Action</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>RewardAmount</Selector>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\SampleDistributionWithRngSeed.bonsai" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="Value" Selector="Item2" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="bv:OptionalFloatProperty">
                <bv:Value>0.5</bv:Value>
                <bv:HasValue>true</bv:HasValue>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="7" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source2" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="7" To="11" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="18" Label="Source1" />
            <Edge From="11" To="15" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source2" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source2" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>