WorkflowBuilder(Version=2.9.1)
GroupWorkflow DataVisualization
    IntProperty(Value=0)
    -> Visualizer TrialVisualizer
        SubscribeSubject CurrentActionVector
        -> Slice(Start=0, Step=25, Stop=nil)
        -> MemberSelector(Selector="Value.SampledCoordinate0,Value.SampledCoordinate1")
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(double.IsNaN(Item1.HasValue ? Item1.Value : double.NaN) ? 0 : Item1.Value as Action0, double.IsNaN(Item2.HasValue ? Item2.Value : double.NaN) ? 0 : Item2.Value as Action1)
        -> InputMapping(X(Selector=Action0), Y(Selector=Action1))
        -> Bonsai.Vision.CreatePoint2f(X=492.475, Y=501.953125) => #5
        SubscribeSubject CurrentLut
        -> Bonsai.Vision.ConvertToImage => #7
        Disable Annotation FIXME(Text="") => #8
        #7, #8 -> Bonsai.Vision.ConvertColor(Conversion=Gray2Bgr) => #9
        #5, #9 -> WithLatestFrom => #10
        -> MemberSelector(Selector=Item1)
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Vision.Design.PointVisualizer>) => #12
        #10, #12 -> MemberSelector(Selector=Item2)
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Vision.Design.IplImageVisualizer>) => #14
        Defer ActionInputsVisualizer
            Bonsai.ImGui.Visualizers.ImPlotVisualizerBuilder ActionInputsVisualizer
            -> PublishSubject PlotTick
            -> WorkflowOutput

            SubscribeSubject PlotTick
            -> PlotStyle(FontSize=24, LineWidth=3)
            -> Bonsai.ImPlot.PlotBuilder ActionInputsVisualizer(Visible=true, Size(X=-1, Y=-1), Flags=None, FlagsX="NoLabel NoTickLabels AutoFit", FlagsY=AutoFit, LabelX=Time, LabelY=ActionValue)
            -> PublishSubject Plot

            SubscribeSubject CurrentActionVector => #7
            -> MemberSelector(Selector=Value.Action0) => #8
            #7 -> MemberSelector(Selector=Value.Action1)
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #10
              Expression: it.HasValue ? it.Value : double.NaN
            #7 -> MemberSelector(Selector=Seconds) => #11
            #8, #10, #11 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: new (it.Item1 as Action0, it.Item2 as Action1, it.Item3 as Timestamp)
            -> Bonsai.ImGui.Visualizers.RollingBufferBuilder(Capacity=2000, IndexSelector=Timestamp, ValueSelector="Action0, Action1")
            -> Bonsai.ImGui.Visualizers.LatestOnNewFrame Plot
            -> Bonsai.ImGui.Visualizers.PlotLineSeriesBuilder(Visible=true, Flags=None)
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #16
        Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 14.25pt", Text=ActionVector)
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.LabelVisualizer>) => #18
        #16, #18 -> Bonsai.Gui.TableLayoutPanelBuilder ActionInputs(Enabled=true, Visible=true, ColumnCount=1, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
        -> VisualizerMapping => #20
        Defer CurrentActionVector
            Bonsai.ImGui.Visualizers.ImPlotVisualizerBuilder CurrentActionVector
            -> PublishSubject PlotTick
            -> WorkflowOutput

            SubscribeSubject PlotTick
            -> PlotStyle(FontSize=24, LineWidth=3)
            -> Bonsai.ImPlot.PlotBuilder CurrentActionVector(Visible=true, Size(X=-1, Y=-1), Flags=None, FlagsX="NoLabel NoTickLabels AutoFit", FlagsY=AutoFit, LabelX=Time, LabelY=ProjectAction)
            -> PublishSubject Plot

            SubscribeSubject CurrentActionVector
            -> Bonsai.ImGui.Visualizers.RollingBufferBuilder(Capacity=2000, IndexSelector=Seconds, ValueSelector=Value.ProjectedAction)
            -> Bonsai.ImGui.Visualizers.LatestOnNewFrame Plot
            -> Bonsai.ImGui.Visualizers.PlotLineSeriesBuilder(Visible=true, Flags=None)
        -> VisualizerMapping => #22
        Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 14.25pt", Text=ProjectedAction)
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.LabelVisualizer>) => #24
        #22, #24 -> Bonsai.Gui.TableLayoutPanelBuilder ProjectedAction(Enabled=true, Visible=true, ColumnCount=1, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #26
        #20, #26 -> Bonsai.Gui.TabControlBuilder(Enabled=true, Visible=true)
        -> VisualizerMapping => #28
        Defer TrialOutcomeVisualizer
            Bonsai.ImGui.Visualizers.ImPlotVisualizerBuilder TrialOutcomeVisualizer
            -> PublishSubject _UiTick
            -> WorkflowOutput

            SubscribeSubject _UiTick => #3
            SubscribeSubject SoftwareEvents
            -> Bonsai.Scripting.Expressions.ExpressionCondition FilterTrialOutcome
              Expression: it.name == "_ActionOutcome"
            -> MemberSelector(Selector=Data)
            -> CastAsTrialOutcome => #7
            #3, #7 -> TrialOutcomeVisualizer(Visible=true, FontSize=16, WindowSize=40, RollingWindowSize=10)
        -> VisualizerMapping
        -> Bonsai.Gui.TableLayoutPanelBuilder HitVisualizer(Enabled=true, Visible=true, ColumnCount=1, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
        -> VisualizerMapping => #32
        Defer LiveHarvestOutcomeVisualizer
            Bonsai.ImGui.Visualizers.ImPlotVisualizerBuilder LiveHarvestOutcomeVisualizer
            -> PublishSubject PlotTick
            -> WorkflowOutput

            SubscribeSubject PlotTick
            -> PlotStyle(FontSize=24, LineWidth=3)
            -> Bonsai.ImPlot.PlotBuilder LiveHarvestOutcomeVisualizer(Visible=true, Size(X=-1, Y=-1), Flags=None, FlagsX="NoLabel NoTickLabels AutoFit", FlagsY=AutoFit, LabelX=Time, LabelY=ActionValue)
            -> PublishSubject Plot

            SubscribeSubject LiveHarvestOutcome
            -> Bonsai.Scripting.Expressions.ExpressionTransform Label
              Expression:
                new(
                Item1.Seconds as Seconds,
                Item1.Value as CachedProjectedAction,
                Item2.Item1 as TrialAction,
                Item2.Item2 as UpperThr,
                Item2.Item3 as LowerThr)
            -> Bonsai.ImGui.Visualizers.RollingBufferBuilder(Capacity=2000, IndexSelector=Seconds, ValueSelector="CachedProjectedAction, UpperThr, LowerThr")
            -> Bonsai.ImGui.Visualizers.LatestOnNewFrame Plot
            -> Bonsai.ImGui.Visualizers.PlotLineSeriesBuilder(Visible=true, Flags=None)
        -> VisualizerMapping => #34
        Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 14.25pt", Text=LiveHarvestOutcome)
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.LabelVisualizer>) => #36
        #34, #36 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=1, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #38
        #14, #28, #32, #38 -> Bonsai.Gui.TableLayoutPanelBuilder ActionVisualization(Enabled=true, Visible=true, ColumnCount=2, RowCount=2, ColumnStyles="", RowStyles="", CellSpans="")
        -> WorkflowOutput
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #2
    Defer SoftwareEventsVisualizer
        Bonsai.ImGui.Visualizers.ImPlotVisualizerBuilder SoftwareEventsVisualizer
        -> PublishSubject _UiTick
        -> WorkflowOutput

        SubscribeSubject _UiTick => #3
        SubscribeSubject SoftwareEvents => #4
        SubscribeSubject LickEvent
        -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=__LickEvent) => #6
        #4, #6 -> Merge => #7
        #3, #7 -> SoftwareEventVisualizer
          Visible=true
          FontSize=16
          TimeWindow=30
          ShadedAreaPlotters
            ShadedAreaPlotter(EventName=QuiescencePeriod, Color=#E41A1C, Alpha=0.3)
            ShadedAreaPlotter(EventName=ResponsePeriod, Color=#377EB8, Alpha=0.3)
            ShadedAreaPlotter(EventName=IsValidTrial, Color=Green, Alpha=0.3)
          PointPlotters
            PointPlotter(EventName="GiveReward ", Color=Blue, YPosition=0.5, MarkerSize=6, Marker=Circle)
            PointPlotter(EventName="ChoiceMiss ", Color=SpringGreen, YPosition=0.5, MarkerSize=6, Marker=Cross)
            PointPlotter(EventName="PerformedAction ", Color=Green, YPosition=0.5, MarkerSize=6, Marker=Diamond)
            PointPlotter(EventName=__LickEvent, Color=Black, YPosition=0.8, MarkerSize=6, Marker=Up)
          TrialBreakEventName=""
          MaxTrials=5
    -> VisualizerMapping => #4
    Defer ManualOverrides
        ExternalizedMapping(Value(DisplayName=OverrideThreshold))
        -> PropertySource<OverrideUpperThreshold,System.Nullable(System.Double)>(MemberName=UpperThreshold, Value=nil)
        -> MulticastSubject OverrideUpperThreshold

        Bonsai.Gui.PropertyGridBuilder ManualOverrides(Enabled=true, Visible=true, HelpVisible=false, ToolbarVisible=false, AutoRefresh=false)
        -> WorkflowOutput
    -> VisualizerMapping => #6
    #4, #6 -> Bonsai.Gui.TableLayoutPanelBuilder SoftwareEvents
      Enabled=true
      Visible=true
      ColumnCount=2
      RowCount=1
      ColumnStyles(ColumnStyle(SizeType=Percent, Width=0.8), ColumnStyle(SizeType=Percent, Width=0.2))
      RowStyles=""
      CellSpans=""
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #8
    #2, #8 -> Bonsai.Gui.TableLayoutPanelBuilder TaskVisualization
      Enabled=true
      Visible=true
      ColumnCount=1
      RowCount=2
      ColumnStyles=""
      RowStyles(RowStyle(SizeType=Percent, Height=0.7), RowStyle(SizeType=Percent, Height=0.3))
      CellSpans=""
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #10
    IntProperty(Value=0)
    -> Visualizer ActionInputs
        Defer AnalogInput
            Bonsai.ImGui.Visualizers.ImPlotVisualizerBuilder AnalogInput
            -> PublishSubject PlotTick
            -> WorkflowOutput

            SubscribeSubject PlotTick
            -> PlotStyle(FontSize=24, LineWidth=3)
            -> Bonsai.ImPlot.PlotBuilder AnalogInput(Visible=true, Size(X=-1, Y=-1), Flags=None, FlagsX="NoLabel NoTickLabels AutoFit", FlagsY=AutoFit, LabelX=Time, LabelY=Volt)
            -> SetAxisLimits(MinX=nil, MaxX=nil, MinY=0, MaxY=5)
            -> PublishSubject Plot

            SubscribeSubject AnalogInputData
            -> Bonsai.ImGui.Visualizers.RollingBufferBuilder(Capacity=5000, IndexSelector=Seconds, ValueSelector="Value.AnalogInput0,Value.AnalogInput1")
            -> Bonsai.ImGui.Visualizers.LatestOnNewFrame Plot
            -> Bonsai.ImGui.Visualizers.PlotLineSeriesBuilder(Visible=true, Flags=None)
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #1
        Defer LoadCells
            Defer RawData
                Bonsai.ImGui.Visualizers.ImPlotVisualizerBuilder LoadCells
                -> PublishSubject PlotTick
                -> WorkflowOutput

                SubscribeSubject PlotTick
                -> PlotStyle(FontSize=24, LineWidth=3)
                -> Bonsai.ImPlot.PlotBuilder LoadCells(Visible=true, Size(X=-1, Y=-1), Flags=None, FlagsX="NoLabel NoTickLabels AutoFit", FlagsY=AutoFit, LabelX=Timestmap, LabelY=AdcUnit)
                -> SetAxisLimits(MinX=nil, MaxX=nil, MinY=nil, MaxY=nil)
                -> PublishSubject Plot

                SubscribeSubject HarpLoadCellsEvents
                -> Harp.LoadCells.Parse(Register=Harp.LoadCells.TimestampedLoadCellData)
                -> Bonsai.ImGui.Visualizers.RollingBufferBuilder
                  Capacity=5000
                  IndexSelector=Seconds
                  ValueSelector="Value.Channel0,Value.Channel1,Value.Channel2,Value.Channel3,Value.Channel4,Value.Channel5,Value.Channel6,Value.Channel7"
                -> Bonsai.ImGui.Visualizers.LatestOnNewFrame Plot
                -> Bonsai.ImGui.Visualizers.PlotLineSeriesBuilder(Visible=true, Flags=None)
            -> VisualizerMapping => #1
            Defer CalibratedData
                Bonsai.ImGui.Visualizers.ImPlotVisualizerBuilder LoadCells
                -> PublishSubject PlotTick
                -> WorkflowOutput

                SubscribeSubject PlotTick
                -> PlotStyle(FontSize=24, LineWidth=3)
                -> Bonsai.ImPlot.PlotBuilder LoadCells(Visible=true, Size(X=-1, Y=-1), Flags=None, FlagsX="NoLabel NoTickLabels AutoFit", FlagsY=AutoFit, LabelX=Timestmap, LabelY=AdcUnit)
                -> SetAxisLimits(MinX=nil, MaxX=nil, MinY=nil, MaxY=nil)
                -> PublishSubject Plot

                SubscribeSubject CalibratedLoadCellData
                -> Bonsai.Scripting.Expressions.ExpressionTransform Label
                  Expression:
                    new(
                    it.Seconds as Seconds,
                    it.Value[0] as Channel0,
                    it.Value[1] as Channel1,
                    it.Value[2] as Channel2,
                    it.Value[3] as Channel3,
                    it.Value[4] as Channel4,
                    it.Value[5] as Channel5,
                    it.Value[6] as Channel6,
                    it.Value[7] as Channel7
                    )
                -> Bonsai.ImGui.Visualizers.RollingBufferBuilder(Capacity=5000, IndexSelector=Seconds, ValueSelector="Channel0,Channel1,Channel2,Channel3,Channel4,Channel5,Channel6,Channel7")
                -> Bonsai.ImGui.Visualizers.LatestOnNewFrame Plot
                -> Bonsai.ImGui.Visualizers.PlotLineSeriesBuilder(Visible=true, Flags=None)
            -> VisualizerMapping => #3
            SubscribeSubject EnableExperimentUI
            -> PropertyMapping(Enabled) => #5
            SubscribeSubject CalibratingLoadCells
            -> Bonsai.Scripting.Expressions.ExpressionTransform Prompt
              Expression: it ? "Calibrating..." : "Calibrate Load Cells"
            -> PropertyMapping(Text) => #8
            #5, #8 -> Bonsai.Gui.ButtonBuilder TriggerLoadCellCalibration(Enabled=true, Visible=true, Text="Calibrate Load Cells")
            -> Sink
                WorkflowInput Source1
                -> Unit
                -> MulticastSubject CalibrateLoadCells
                -> WorkflowOutput
            -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ButtonVisualizer>) => #11
            #1, #3, #11 -> Bonsai.Gui.TableLayoutPanelBuilder RawLoadCells
              Enabled=true
              Visible=true
              ColumnCount=1
              RowCount=3
              ColumnStyles=""
              RowStyles(RowStyle(SizeType=Percent, Height=0.47), RowStyle(SizeType=Percent, Height=0.47), RowStyle(SizeType=Percent, Height=0.06))
              CellSpans=""
            -> Disable WorkflowOutput
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #3
        #1, #3 -> Bonsai.Gui.TabControlBuilder ActionInputs(Enabled=true, Visible=true)
        -> WorkflowOutput
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TabControlVisualizer>) => #13
    IntProperty(Value=0)
    -> Visualizer OphysInterfaceVisualizer
        SubscribeSubject SkipOphysInterfaceHandshake
        -> Bonsai.Scripting.Expressions.ExpressionTransform "Label Button"
          Expression: it? "Ophys Disabled" : "Ophys Enabled"
        -> PropertyMapping(Text)
        -> Bonsai.Gui.ButtonBuilder SkipOphysInterfaceHandshake(Enabled=true, Visible=true, Text="Ophys Enabled")
        -> Sink Override
            WorkflowInput Source1
            -> SelectMany
                SubscribeSubject SkipOphysInterfaceHandshake
                -> Take(Count=1)
                -> BitwiseNot
                -> MulticastSubject SkipOphysInterfaceHandshake
                -> WorkflowOutput
            -> WorkflowOutput
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ButtonVisualizer>) => #5
        SubscribeSubject StartOphysInterface
        -> BooleanProperty(Value=true) => #7
        -> BitwiseNot
        -> Delay(DueTime=PT0.1S) => #9
        #7, #9 -> Merge => #10
        SubscribeSubject HarpTimestampSource => #11
        #10, #11 -> WithLatestFrom
        -> Bonsai.Harp.CreateTimestamped
        -> Bonsai.Gui.ZedGraph.RollingGraphBuilder
          IndexSelector=Seconds
          ValueSelector=Value
          SymbolType=None
          LineWidth=2
          CurveSettings(CurveConfiguration(Label=StartTrigger, Color=#00C000))
          Capacity=nil
          Min=nil
          Max=nil
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ZedGraph.RollingGraphVisualizer>) => #15
        SubscribeSubject StopOphysInterface
        -> BooleanProperty(Value=true) => #17
        -> BitwiseNot
        -> Delay(DueTime=PT0.1S) => #19
        #17, #19 -> Merge => #20
        SubscribeSubject HarpTimestampSource => #21
        #20, #21 -> WithLatestFrom
        -> Bonsai.Harp.CreateTimestamped
        -> Bonsai.Gui.ZedGraph.RollingGraphBuilder
          IndexSelector=Seconds
          ValueSelector=Value
          SymbolType=None
          LineWidth=2
          CurveSettings(CurveConfiguration(Label=StopTrigger, Color=Red))
          Capacity=nil
          Min=nil
          Max=nil
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ZedGraph.RollingGraphVisualizer>) => #25
        SubscribeSubject IsReadyOphysInterface => #26
        SubscribeSubject HarpTimestampSource => #27
        #26, #27 -> WithLatestFrom
        -> Bonsai.Harp.CreateTimestamped
        -> Bonsai.Gui.ZedGraph.RollingGraphBuilder
          IndexSelector=Seconds
          ValueSelector=Value
          SymbolType=None
          LineWidth=2
          CurveSettings(CurveConfiguration(Label=IsArmed, Color=#8080FF))
          Capacity=nil
          Min=nil
          Max=nil
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ZedGraph.RollingGraphVisualizer>) => #31
        SubscribeSubject OphysFrameStrobe
        -> Bonsai.Gui.ZedGraph.RollingGraphBuilder
          IndexSelector=Seconds
          ValueSelector=Value
          SymbolType=None
          LineWidth=1
          CurveSettings(CurveConfiguration(Label=FrameStrobe, Color=#E0E0E0))
          Capacity=nil
          Min=nil
          Max=nil
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ZedGraph.RollingGraphVisualizer>) => #34
        #15, #25, #31, #34 -> Bonsai.Gui.ZedGraph.RollingGraphPanelBuilder OphysInterfaceState(ReverseX=false, ReverseY=false, Span=30, Capacity=nil, BaseAxis=X, BarType=Cluster, Min=nil, Max=nil)
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ZedGraph.RollingGraphPanelVisualizer>) => #36
        #5, #36 -> Bonsai.Gui.TableLayoutPanelBuilder OphysInterface
          Enabled=true
          Visible=true
          ColumnCount=1
          RowCount=2
          ColumnStyles=""
          RowStyles(RowStyle(SizeType=Percent, Height=0.05), RowStyle(SizeType=Percent, Height=0.95))
          CellSpans=""
        -> WorkflowOutput
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #16
    #10, #13, #16 -> Bonsai.Gui.TabControlBuilder(Enabled=true, Visible=true)
    -> WorkflowOutput
-> VisualizerMapping => #1
GroupWorkflow ControlUserInterface
    ExternalizedMapping(Value(DisplayName=EnableExperimentUI))
    -> BooleanProperty(Value=true)
    -> Take(Count=1)
    -> BehaviorSubject EnableExperimentUI

    GroupWorkflow LauncherControl
        IncludeWorkflow(Path=Extensions\Annotation.bonsai)
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #1
        SubscribeSubject ExperimentState
        -> BitwiseNot
        -> PropertyMapping(Enabled)
        -> Bonsai.Gui.ButtonBuilder Start(Enabled=true, Visible=true, Text="Start Experiment")
        -> PublishSubject StartExperimentToggleButton
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ButtonVisualizer>) => #7
        Bonsai.Gui.ButtonBuilder End(Enabled=true, Visible=true, Text="End Experiment")
        -> PublishSubject EndExperimentButton
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ButtonVisualizer>) => #10
        #1, #7, #10 -> Bonsai.Gui.TableLayoutPanelBuilder LauncherControl
          Enabled=true
          Visible=true
          Font="Microsoft Sans Serif, 26pt"
          ColumnCount=2
          RowCount=2
          ColumnStyles=""
          RowStyles=""
          CellSpans(CellSpan(ColumnSpan=1, RowSpan=2), CellSpan(ColumnSpan=1, RowSpan=1), CellSpan(ColumnSpan=1, RowSpan=1))
        -> WorkflowOutput

        SubscribeSubject StartExperimentToggleButton
        -> Take(Count=1)
        -> Unit
        -> MulticastSubject StartExperimentShortcut

        SubscribeSubject EndExperimentButton
        -> Take(Count=1)
        -> Unit
        -> MulticastSubject EndExperiment => #20
        SubscribeSubject StartExperiment => #21
        #20, #21 -> SubscribeWhen
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #5
    SubscribeSubject TriggeredCamerasStream
    -> IncludeWorkflow(Path=Extensions\SpinnakerCameraControllerVisualizer.bonsai, Maximum=253, Minimum=2, OverlayAlpha=0.5)
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #8
    #5, #8 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 12pt", ColumnCount=1, RowCount=2, ColumnStyles="", RowStyles="", CellSpans="")
    -> VisualizerMapping => #10
    IncludeWorkflow(Path=Extensions\AindManipulatorGui.bonsai)
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #12
    SubscribeSubject EnableExperimentUI
    -> PropertyMapping(Enabled)
    -> Bonsai.Gui.ButtonBuilder SaveCurrentPosition(Enabled=true, Visible=true, Text="Save Reference Position")
    -> Sink
        WorkflowInput Source1 => #0
        SubscribeSubject ManipulatorPosition => #1
        #0, #1 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> MulticastSubject ReferenceManipulatorPosition
        -> WorkflowOutput
    -> VisualizerMapping => #17
    SubscribeSubject IsExperimentPaused
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: it ? "Resume... ▶️" : "Pause ⏸️"
    -> PropertyMapping(Text)
    -> Bonsai.Gui.ButtonBuilder PauseExperiment(Enabled=true, Visible=true, Text="Pause Task")
    -> Sink
        WorkflowInput Source1 => #0
        SubscribeSubject IsExperimentPaused => #1
        #0, #1 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> BitwiseNot
        -> MulticastSubject IsExperimentPaused
        -> WorkflowOutput
    -> VisualizerMapping => #23
    #17, #23 -> Bonsai.Gui.TableLayoutPanelBuilder
      Enabled=true
      Visible=true
      Font="Microsoft Sans Serif, 13.875pt"
      ColumnCount=2
      RowCount=1
      ColumnStyles=""
      RowStyles(RowStyle(SizeType=Percent, Height=0.9), RowStyle(SizeType=Percent, Height=0.1))
      CellSpans=""
    -> VisualizerMapping => #25
    #12, #25 -> Bonsai.Gui.TableLayoutPanelBuilder
      Enabled=true
      Visible=true
      Font="Microsoft Sans Serif, 12pt"
      ColumnCount=1
      RowCount=2
      ColumnStyles=""
      RowStyles(RowStyle(SizeType=Percent, Height=0.9), RowStyle(SizeType=Percent, Height=0.1))
      CellSpans=""
    -> VisualizerMapping => #27
    #10, #27 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 12pt", ColumnCount=2, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
    -> VisualizerMapping => #29
    GroupWorkflow ValveGui
        Bonsai.Gui.PropertyGridBuilder(Enabled=true, Visible=true, HelpVisible=true, ToolbarVisible=true, AutoRefresh=false)
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.PropertyGridVisualizer>) => #1
        Bonsai.Gui.ButtonBuilder RunCalibration(Enabled=true, Visible=true, Text=RunCalibration)
        -> PublishSubject RunCalibration
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ButtonVisualizer>) => #4
        BooleanProperty(Value=false)
        -> Take(Count=1) => #6
        SubscribeSubject ValveFlushState => #7
        #6, #7 -> Concat => #8
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> StringProperty(Value="Close Valves") => #10
        #8 -> BitwiseNot
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> StringProperty(Value="Open Valves") => #13
        #10, #13 -> Merge
        -> PropertyMapping(Text)
        -> Bonsai.Gui.ToggleButtonBuilder FlushValves(Enabled=true, Visible=true, Text="Open Valves", Checked=false)
        -> MulticastSubject ValveFlushState
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ToggleButtonVisualizer>) => #18
        SubscribeSubject EnableExperimentUI
        -> PropertyMapping(Enabled) => #20
        #1, #4, #18, #20 -> Bonsai.Gui.TableLayoutPanelBuilder ValveCalibration
          Enabled=true
          Visible=true
          ColumnCount=2
          RowCount=2
          ColumnStyles=""
          RowStyles=""
          CellSpans(CellSpan(ColumnSpan=1, RowSpan=2), CellSpan(ColumnSpan=1, RowSpan=1), CellSpan(ColumnSpan=1, RowSpan=1))
        -> WorkflowOutput

        SubscribeSubject RunCalibration
        -> Take(Count=1) => #24
        ExternalizedMapping(Interval(Category=ValveCalibration), OpeningTimeMs(Category=ValveCalibration), Repeats(Category=ValveCalibration)) => #25
        #24, #25 -> SelectMany LoopValve
            ExternalizedMapping(DueTime(DisplayName=Interval))
            -> Timer(DueTime=PT0.5S) => #1
            ExternalizedMapping(Value(DisplayName=OpeningTimeMs)) => #2
            #1, #2 -> IntProperty(Value=100)
            -> MulticastSubject ValveOpenTimeMs
            -> Unit
            -> MulticastSubject TriggerValve => #6
            ExternalizedMapping(Count(DisplayName=Repeats)) => #7
            #6, #7 -> RepeatCount(Count=200) => #8
            Bonsai.Windows.Input.KeyDown(Filter="LButton ShiftKey ControlKey A P Q Shift", SuppressRepetitions=true) => #9
            #8, #9 -> TakeUntil
            -> ElementIndex
            -> MemberSelector(Selector=Index)
            -> WorkflowOutput
        -> Repeat

        BehaviorSubject<System.Boolean> ValveFlushState
        -> CreateObservable Flush
            WorkflowInput Source1
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> IntProperty(Value=200)
            -> MulticastSubject ValveOpenTimeMs
            -> Unit
            -> MulticastSubject TriggerValve
            -> Delay(DueTime=PT0.2S)
            -> RepeatCount(Count=20)
            -> LastOrDefault
            -> WorkflowOutput
        -> Switch
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #31
    GroupWorkflow HwShortcuts
        SubscribeSubject EnableExperimentUI
        -> PropertyMapping(Enabled)
        -> Bonsai.Gui.ButtonBuilder TriggerAudio(Enabled=true, Visible=true, Text=TriggerAudio)
        -> Sink
            WorkflowInput Source1
            -> Unit
            -> MulticastSubject AudioTrigger
            -> WorkflowOutput
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ButtonVisualizer>) => #4
        Bonsai.Gui.ButtonBuilder ForceReward(Enabled=true, Visible=true, Text=ForceReward)
        -> PublishSubject ForceReward
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ButtonVisualizer>) => #7
        #4, #7 -> Bonsai.Gui.TableLayoutPanelBuilder HwShortcuts(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 20pt", ColumnCount=5, RowCount=5, ColumnStyles="", RowStyles="", CellSpans="")
        -> WorkflowOutput

        SubscribeSubject ForceReward => #10
        Annotation DefaultRewardAmount(Text="")
        -> FloatProperty(Value=3)
        -> Take(Count=1) => #13
        #10, #13 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> MulticastSubject GiveReward
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #33
    #29, #31, #33 -> Bonsai.Gui.TabControlBuilder ControlUserInterface(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 10pt")
    -> WorkflowOutput
-> VisualizerMapping => #3
#1, #3 -> Bonsai.Gui.TableLayoutPanelBuilder
  Enabled=true
  Visible=true
  ColumnCount=1
  RowCount=2
  ColumnStyles=""
  RowStyles(RowStyle(SizeType=Percent, Height=0.5), RowStyle(SizeType=Percent, Height=0.5))
  CellSpans=""
-> WorkflowOutput

SubscribeSubject StartExperiment
-> BooleanProperty(Value=false)
-> MulticastSubject EnableExperimentUI
