WorkflowBuilder(Version=2.9.0)
ExternalizedMapping(TaskLogicPath, RigPath, SessionPath)
-> IncludeWorkflow(Path=AllenNeuralDynamics.Core:ReadSchemas.bonsai, TaskLogicPath="", RigPath="", SessionPath="")

GroupWorkflow LoadSchemas
    SubscribeSubject RawSessionSchema
    -> AindBehaviorTelekinesisDataSchema.DeserializeFromJson(Type=TypeMapping<AindBehaviorTelekinesisDataSchema.AindBehaviorSessionModel>)
    -> Take(Count=1)
    -> AsyncSubject SubjectSchema

    SubscribeSubject RawRigSchema
    -> AindBehaviorTelekinesisDataSchema.DeserializeFromJson(Type=TypeMapping<AindBehaviorTelekinesisDataSchema.AindBehaviorTelekinesisRig>)
    -> Take(Count=1)
    -> AsyncSubject RigSchema

    SubscribeSubject RawTaskLogicSchema
    -> AindBehaviorTelekinesisDataSchema.DeserializeFromJson(Type=TypeMapping<AindBehaviorTelekinesisDataSchema.AindBehaviorTelekinesisTaskLogic>)
    -> Take(Count=1)
    -> AsyncSubject TaskLogicSchema
    -> MemberSelector(Selector=TaskParameters)
    -> AsyncSubject TaskLogicParameters

Annotation(Text="")
-> GroupWorkflow Hardware
    SubscribeSubject HarpWhiteRabbitEvents
    -> AllenNeuralDynamics.WhiteRabbit.Parse(Register=AllenNeuralDynamics.WhiteRabbit.TimestampedCounter)
    -> MemberSelector(Selector=Seconds)
    -> BehaviorSubject HarpTimestampSource

    GroupWorkflow HarpDevices
        SubscribeSubject StartExperiment
        -> Unit
        -> PublishSubject TriggerHarpReadDump

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpBehavior.PortName)
        -> PropertyMapping(PortName)
        -> IncludeWorkflow(Path=Extensions\HarpBehaviorDevice.bonsai, PortName=COM5)

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpLickometer.PortName)
        -> PropertyMapping(PortName)
        -> IncludeWorkflow(Path=Extensions\HarpLicketySplitDevice.bonsai, PortName=COMx, TriggerHarpReadDumpSubjectName=TriggerHarpReadDump)

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpClockGenerator.PortName)
        -> PropertyMapping(PortName)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.HarpUtils:HarpWhiteRabbit.bonsai, PortName=COMx, TriggerHarpReadDumpSubjectName=TriggerHarpReadDump)

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpLoadCells.PortName)
        -> PropertyMapping(PortName)
        -> IncludeWorkflow(Path=Extensions\HarpLoadCellsDevice.bonsai, PortName=COMx, TriggerHarpReadDumpSubjectName=TriggerHarpReadDump) => #18
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpLoadCells)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai) => #21
        #18, #21 -> SubscribeWhen

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpAnalogInput.PortName)
        -> PropertyMapping(PortName)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.HarpUtils:HarpAnalogInputDevice.bonsai, PortName=COMx, TriggerHarpReadDumpSubjectName=TriggerHarpReadDump) => #26
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpAnalogInput)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai) => #29
        #26, #29 -> SubscribeWhen

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Manipulator)
        -> MemberSelector(Selector=Calibration)
        -> MemberSelector(Selector=Input)
        -> AindBehaviorTelekinesisDataSchema.SerializeToJson(Formatting=None)
        -> AllenNeuralDynamics.AindManipulator.DeserializeFromJson(Type=TypeMapping<AllenNeuralDynamics.AindManipulator.AindManipulatorCalibrationInput>) => #36
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Manipulator)
        -> MemberSelector(Selector=PortName)
        -> PropertyMapping(PortName) => #40
        #36, #40 -> IncludeWorkflow(Path=Extensions\AindManipulator.bonsai, PortName=COMx, TriggerHarpReadDumpSubjectName=TriggerHarpReadDump)

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpEnvironmentSensor.PortName)
        -> PropertyMapping(PortName)
        -> IncludeWorkflow(Path=Extensions\HarpEnvironmentSensor.bonsai, PortName=COMx) => #45
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpEnvironmentSensor)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai) => #48
        #45, #48 -> SubscribeWhen

    GroupWorkflow Cameras
        GroupWorkflow TriggeredCameras
            SubscribeSubject RigSchema
            -> Take(Count=1)
            -> MemberSelector(Selector=TriggeredCameraController)
            -> AsyncSubject TriggeredCameraController
            -> MemberSelector(Selector=FrameRate.Value)
            -> AsyncSubject CameraFrameRate

            SubscribeSubject CameraFrameRate
            -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.Camera0Frequency)
            -> MulticastSubject HarpBehaviorCommands

            SubscribeSubject HarpBehaviorEvents
            -> Bonsai.Harp.FilterMessageType(FilterType=Include, MessageType=Event)
            -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedCamera0Frame) => #11
            -> MemberSelector(Selector=Value)
            -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.FrameAcquired>(Value=FrameAcquired))
            -> GreaterThan(Operand=WorkflowProperty<System.Byte>(Value=0))
            -> Condition => #15
                WorkflowInput Source1
                -> WorkflowOutput
            #15, #11 -> WithLatestFrom
            -> MemberSelector(Selector=Item2.Seconds)
            -> PublishSubject FrameEvent

            SubscribeSubject TriggeredCameraController
            -> MemberSelector(Selector=Cameras)
            -> Merge
            -> CreateObservable InstantiateCamera => #22
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject ThisCamera

                BooleanProperty(Value=true)
                -> MulticastSubject TriggeredCamerasInitialized
                -> Take(Count=1) => #5
                SubscribeSubject ThisCamera
                -> MemberSelector(Selector=Value)
                -> PropertyMapping => #8
                  SerialNumber(Selector=SerialNumber)
                  ExposureTime(Selector=Exposure)
                  Gain(Selector=Gain)
                  Binning(Selector=Binning)
                  ColorProcessing(Selector=ColorProcessing)
                  Gamma(Selector=Gamma)
                  PixelFormat(Selector=PixelFormat)
                  AdcBitDepth(Selector=AdcBitDepth)
                SubscribeSubject ThisCamera
                -> MemberSelector(Selector=Value)
                -> MemberSelector(Selector=RegionOfInterest)
                -> InputMapping(Value(Selector="X,Y,Width,Height"))
                -> PropertySource<Bonsai.Vision.Crop,OpenCV.Net.Rect>(MemberName=RegionOfInterest, Value(X=0, Y=0, Width=0, Height=0))
                -> PropertyMapping(RegionOfInterest) => #14
                #5, #8, #14 -> AllenNeuralDynamics.Core.AindSpinnakerCapture => #15
                  Index=nil
                  ColorProcessing=Default
                  ExposureTime=19000
                  Gain=0
                  Binning=1
                  Gamma=nil
                  PixelFormat=Mono8
                  RegionOfInterest(X=0, Y=0, Width=0, Height=0)
                  AdcBitDepth=nil
                SubscribeSubject FrameEvent => #16
                #15, #16 -> Zip
                -> Bonsai.Harp.CreateTimestamped => #18
                SubscribeSubject ThisCamera
                -> MemberSelector(Selector=Key) => #20
                #18, #20 -> WithLatestFrom
                -> WorkflowOutput
            Annotation SpinnakerApiNote(Text="For some reason, if you try to access the spinnaker API back to back, a threading error is emitted")
            -> Timer(DueTime=PT0S, Period=PT0.1S) => #24
            #22, #24 -> Zip
            -> MemberSelector(Selector=Item1)
            -> Merge
            -> GroupBy(KeySelector=Item2, ElementSelector=Item1)
            -> ReplaySubject TriggeredCamerasStream(BufferSize=nil)

            BehaviorSubject<System.Boolean> TriggeredCamerasInitialized
            -> IntProperty(Value=1) => #31
            IntProperty(Value=0)
            -> Take(Count=1) => #33
            #31, #33 -> Merge
            -> Accumulate => #35
            SubscribeSubject TriggeredCameraController
            -> MemberSelector(Selector=Cameras)
            -> MemberSelector(Selector=Count)
            -> PropertyMapping(Value) => #39
            #35, #39 -> GreaterThanOrEqual(Operand=IntProperty(Value=0))
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> Take(Count=1)
            -> Delay(DueTime=PT0.1S)
            -> BehaviorSubject TriggeredCamerasReady

    GroupWorkflow Networking
        SubscribeSubject SoftwareEvents
        -> AllenNeuralDynamics.AindBehaviorServices.DataTypes.SerializeToJson(Formatting=None) => #1
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Networking.ZmqPublisher)
        -> PropertyMapping(ConnectionString(Selector=ConnectionString), Topic(Selector=Topic)) => #4
        #1, #4 -> Bonsai.ZeroMQ.Publisher(ConnectionString=@tcp://localhost:5556, Topic=telekinesis)
        -> WorkflowOutput

GroupWorkflow SessionSettings
    SubscribeSubject TaskLogicParameters
    -> MemberSelector(Selector=RngSeed) => #1
    Bonsai.Numerics.CreateRandom(Seed=nil)
    -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=10)
    -> Bonsai.Numerics.Distributions.Sample => #4
    #1, #4 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform CheckNull
      Expression: Item1.HasValue ? Item1.Value : Item2
    -> Take(Count=1)
    -> AsyncSubject RngSeedValue
    -> PropertyMapping(Seed)
    -> Bonsai.Numerics.CreateRandom(Seed=nil)
    -> Take(Count=1)
    -> AsyncSubject RngSeed

    AllenNeuralDynamics.VersionControl.CreateRepository(Path=../.)
    -> AsyncSubject Repository

    SubscribeSubject SubjectSchema
    -> PropertyMapping(RootFolder(Selector=RootPath), SessionName(Selector=SessionName))
    -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:GenerateRootLoggingPathFromSession.bonsai, RootFolder="", SessionName=nil, SubjectName=LoggingRootPath)
    -> Take(Count=1)
    -> AsyncSubject CompoundRootPath

GroupWorkflow Initialization
    Annotation Label
      Text:
        new(
        Item1.Seconds as Seconds,
        Item1.Value as CachedProjectedAction,
        Item2.Item1 as TrialAction,
        Item2.Item2 as UpperThr,
        Item2.Item3 as LowerThr)
    -> BehaviorSubject<System.Tuple(Bonsai.Harp.Timestamped(System.Double),System.Tuple(AindBehaviorTelekinesisDataSchema.Action,System.Double,System.Double))> LiveHarvestOutcome

    BehaviorSubject<System.Reactive.Unit> StartExperiment
    BehaviorSubject<System.Tuple(System.Double,AindBehaviorTelekinesisDataSchema.ContinuousFeedback)> ContinuousFeedbackMonitor
    BehaviorSubject<OpenCV.Net.Mat> CurrentLut
    BehaviorSubject<AllenNeuralDynamics.AindBehaviorServices.DataTypes.SoftwareEvent> SoftwareEvents
    BehaviorSubject<AllenNeuralDynamics.AindBehaviorServices.DataTypes.SoftwareEvent> RuntimeLogging
    BehaviorSubject<System.Reactive.Unit> EndExperiment
    BehaviorSubject<System.Reactive.Unit> StartLogging
    BehaviorSubject<System.String> Annotations

    IntProperty(Value=0)
    -> Take(Count=1)
    -> BehaviorSubject TrialNumber

    SubscribeSubject TrialNumber
    -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=TrialNumber)
    -> MulticastSubject SoftwareEvents

    BooleanProperty(Value=false)
    -> Take(Count=1) => #17
    SubscribeSubject StartExperiment
    -> Take(Count=1)
    -> BooleanProperty(Value=true) => #20
    SubscribeSubject EndExperiment
    -> Take(Count=1)
    -> BooleanProperty(Value=false) => #23
    #17, #20, #23 -> Merge
    -> BehaviorSubject ExperimentState

GroupWorkflow HardwareChecks
    Defer ProtocolValidation => #0
        GroupWorkflow CameraChecks
            SubscribeSubject TriggeredCamerasStream
            -> CreateObservable CheckDroppedFrames
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject InputSequence

                SubscribeSubject InputSequence
                -> Merge
                -> MemberSelector(Selector=Value.ChunkData)
                -> MemberSelector(Selector=FrameID)
                -> Bonsai.Dsp.Difference(Order=1)
                -> Subtract(Operand=DoubleProperty(Value=1))
                -> GreaterThan(Operand=DoubleProperty(Value=0))
                -> Condition => #10
                    WorkflowInput Source1
                    -> WorkflowOutput
                SubscribeSubject InputSequence
                -> MemberSelector(Selector=Key) => #12
                #10, #12 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> WorkflowOutput
            -> Merge
            -> Format(Format="Camera {0} dropped frame detected during pre-session!", Selector=it)
            -> InputMapping(Selector=it, Message(Selector=it))
            -> AllenNeuralDynamics.Core.ThrowException(Message="Dropped frame detected during pre-session!") => #5
            SubscribeSubject StartExperiment => #6
            #5, #6 -> TakeUntil

            SubscribeSubject TriggeredCameraController
            -> MemberSelector(Selector=Cameras)
            -> Merge
            -> CreateObservable CheckCameraSettings
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject ThisCamera

                SubscribeSubject ThisCamera
                -> MemberSelector(Selector=Value.Exposure) => #4
                SubscribeSubject TriggeredCameraController
                -> MemberSelector(Selector=FrameRate)
                -> MemberSelector(Selector=Value) => #7
                #4, #7 -> Zip
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: ((1.0 / Item2) * 1000000) < double(Item1) + 1000
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> Take(Count=1) => #11
                SubscribeSubject ThisCamera
                -> MemberSelector(Selector=Key) => #13
                #11, #13 -> WithLatestFrom
                -> WorkflowOutput
            -> Merge
            -> Format(Format="Camera {0} exposure setting not compatible with requested frame rate!", Selector=it)
            -> InputMapping(Selector=it, Message(Selector=it))
            -> AllenNeuralDynamics.Core.ThrowException(Message="Dropped frame detected during pre-session!")

            SubscribeSubject TriggeredCameraController
            -> MemberSelector(Selector=FrameRate.HasValue)
            -> BitwiseNot
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> AllenNeuralDynamics.Core.ThrowException(Message="TriggeredCameraControl must specify a valid FrameRate property!")

            SubscribeSubject TriggeredCamerasStream
            -> CreateObservable OnlineQC
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject InputSequence

                SubscribeSubject InputSequence
                -> Merge => #4
                -> MemberSelector(Selector=Value.ChunkData)
                -> MemberSelector(Selector=Timestamp)
                -> Bonsai.Dsp.Difference(Order=1)
                -> Multiply(Operand=DoubleProperty(Value=1E-09)) => #8
                #4 -> MemberSelector(Selector=Seconds)
                -> Bonsai.Dsp.Difference(Order=1) => #10
                #8, #10 -> Zip
                -> Subtract
                -> Bonsai.Dsp.Abs => #13
                ExternalizedMapping(Value(DisplayName=JitterThreshold)) => #14
                #13, #14 -> GreaterThan(Operand=DoubleProperty(Value=0.0005))
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> ObserveOn(Scheduler=TaskPoolScheduler) => #17
                ExternalizedMapping(Period(DisplayName=SnoozeTime))
                -> Timer(DueTime=PT0S, Period=PT10S) => #19
                #17, #19 -> Gate
                -> SelectMany MakeUI
                    SubscribeSubject InputSequence
                    -> MemberSelector(Selector=Key)
                    -> Format(Format="Camera {0} out-of-alignment qc was triggered.", Selector=it)
                    -> InputMapping(Text(Selector=it))
                    -> AllenNeuralDynamics.Core.Design.MessageBox(Text="", Title=Warning, MessageBoxIcon=Exclamation)
            -> Merge

        SubscribeSubject Repository
        -> AllenNeuralDynamics.VersionControl.IsRepositoryClean(IgnoreUntracked=false)
        -> BitwiseNot => #3
        SubscribeSubject SubjectSchema
        -> MemberSelector(Selector=AllowDirtyRepo) => #5
        #3, #5 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform AllowDirty?
          Expression: Item2 ? False : Item1
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> AllenNeuralDynamics.Core.ThrowException(Message="Repository is not clean! Please discard all local changes.")

        IncludeWorkflow(Path=Extensions\ValidateHarpClkOutput.bonsai)
    SubscribeSubject SubjectSchema
    -> MemberSelector(Selector=SkipHardwareValidation)
    -> BitwiseNot
    -> Condition => #4
        WorkflowInput Source1
        -> WorkflowOutput
    #0, #4 -> SubscribeWhen
    -> DelaySubscription(DueTime=PT2S)
    -> WorkflowOutput

GroupWorkflow OperationControl
    GroupWorkflow RewardControl
        GroupWorkflow WaterValve
            BehaviorSubject<System.Double> ValveOpenTimeMs
            -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.PulseSupplyPort0)
            -> MulticastSubject HarpBehaviorCommands

            BehaviorSubject<System.Reactive.Unit> TriggerValve
            -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=SupplyPort0))
            -> MulticastSubject HarpBehaviorCommands
            -> WorkflowOutput

        BonVision.OptionalFloatProperty(Value=0, HasValue=true)
        -> Take(Count=1)
        -> BehaviorSubject GiveReward

        SubscribeSubject GiveReward
        -> PublishSubject HotGiveReward

        SubscribeSubject GiveReward
        -> Condition HasValue
            WorkflowInput Source1
            -> MemberSelector(Selector=HasValue)
            -> WorkflowOutput
        -> MemberSelector(Selector=Value)
        -> Condition GreaterThan0 => #9
            WorkflowInput Source1
            -> GreaterThan(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Calibration.WaterValve)
        -> MemberSelector(Selector=Output) => #12
        #9, #12 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform RewardToTime => #14
          Expression: ((Item1 * 0.001) - Item2.Offset) / Item2.Slope
        Annotation ToMilliseconds(Text="") => #15
        #14, #15 -> Multiply(Operand=DoubleProperty(Value=1000))
        -> InputMapping(Value(Selector=it))
        -> IntProperty(Value=0)
        -> Condition GreaterThan0
            WorkflowInput Source1
            -> GreaterThan(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> MulticastSubject ValveOpenTimeMs
        -> Unit
        -> MulticastSubject TriggerValve

        SubscribeSubject GiveReward
        -> Condition HasValue
            WorkflowInput Source1
            -> MemberSelector(Selector=HasValue)
            -> WorkflowOutput
        -> MemberSelector(Selector=Value) => #25
        FloatProperty(Value=0) => #26
        #25, #26 -> Merge
        -> Accumulate
        -> BehaviorSubject SessionAccumulatedReward

        SubscribeSubject GiveReward
        -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=GiveReward)
        -> MulticastSubject SoftwareEvents

    GroupWorkflow LickometerControl
        SubscribeSubject HarpLickometerEvents
        -> AllenNeuralDynamics.LicketySplit.Parse(Register=AllenNeuralDynamics.LicketySplit.TimestampedLickState) => #1
        -> MemberSelector(Selector=Value)
        -> HasFlag(Operand=WorkflowProperty<AllenNeuralDynamics.LicketySplit.LickChannels>(Value=Channel0))
        -> DistinctUntilChanged
        -> Condition => #5
            WorkflowInput Source1
            -> WorkflowOutput
        #5, #1 -> WithLatestFrom
        -> MemberSelector(Selector=Item2.Seconds)
        -> PublishSubject LickEvent

    GroupWorkflow CameraControl
        SubscribeSubject HarpBehaviorHeartBeat
        -> Take(Count=1) => #1
        SubscribeSubject TriggeredCamerasReady => #2
        #1, #2 -> Zip
        -> Take(Count=1)
        -> Delay(DueTime=PT2S)
        -> BooleanProperty(Value=true)
        -> MulticastSubject CameraState

        BehaviorSubject<System.Boolean> CameraState => #8
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateStartCamerasPayload(StartCameras=CameraOutput0)) => #10
        #8 -> BitwiseNot
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateStopCamerasPayload(StopCameras=CameraOutput0)) => #13
        #10, #13 -> Merge
        -> MulticastSubject HarpBehaviorCommands

        SubscribeSubject StartLogging
        -> Take(Count=1)
        -> BooleanProperty(Value=false)
        -> MulticastSubject CameraState

        SubscribeSubject StartExperiment
        -> Take(Count=1)
        -> BooleanProperty(Value=true)
        -> MulticastSubject CameraState

        SubscribeSubject EndExperiment
        -> Take(Count=1)
        -> BooleanProperty(Value=false)
        -> MulticastSubject CameraState

    GroupWorkflow AudioControl
        BehaviorSubject<System.Double> AudioDuration
        -> Multiply(Operand=IntProperty(Value=1000))
        -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.PulseDO2)
        -> MulticastSubject HarpBehaviorCommands

        BehaviorSubject<System.Int32> AudioFrequency
        -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.PwmFrequencyDO2)
        -> MulticastSubject HarpBehaviorCommands

        BehaviorSubject<System.Reactive.Unit> AudioTrigger
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePwmStartPayload(PwmStart=PwmDO2))
        -> MulticastSubject HarpBehaviorCommands

        GroupWorkflow InitialSettings => #10
            Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePwmDutyCycleDO2Payload(PwmDutyCycleDO2=1))
            -> Take(Count=1)
            -> MulticastSubject HarpBehaviorCommands

            Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePwmStopPayload(PwmStop=PwmDO2))
            -> Take(Count=1)
            -> MulticastSubject HarpBehaviorCommands
        SubscribeSubject HarpBehaviorEvents
        -> Take(Count=1) => #12
        #10, #12 -> SubscribeWhen

        BehaviorSubject<System.Reactive.Unit> TriggerResponseCue
        -> IncludeWorkflow(Path=Extensions\PlayAudioCue.bonsai, Duration=0.1, Frequency=300)

        BehaviorSubject<System.Boolean> TriggerFeedbackCue
        -> IncludeWorkflow(Path=Extensions\PlayAudioCue.bonsai, Duration=0.1, Frequency=1000)

        BehaviorSubject<System.Reactive.Unit> TriggerQuiescencePeriodCue
        -> IncludeWorkflow(Path=Extensions\PlayAudioCue.bonsai, Duration=0.1, Frequency=500)

    GroupWorkflow BehaviorAnalogInput
        SubscribeSubject HarpBehaviorEvents
        -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedAnalogData)
        -> Harp.Behavior.AdcToVolt
        -> PublishSubject AnalogInputData

    GroupWorkflow LoadCells
        SubscribeSubject HarpLoadCellsEvents
        -> Harp.LoadCells.FilterRegister(FilterType=Include, Register=Harp.LoadCells.LoadCellData)
        -> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(PayloadType=TimestampedS16, IsArray=true))
        -> PublishSubject RawLoadCellData => #3
        SubscribeSubject LoadCellsCalibration
        -> PropertyMapping(Calibration) => #5
        #3, #5 -> ApplyLoadCellsCalibration
        -> PublishSubject CalibratedLoadCellData

    GroupWorkflow ContinuousFeedback
        BooleanProperty(Value=false)
        -> Take(Count=1)
        -> BehaviorSubject ContinuousFeedbackEnabled

        AindBehaviorTelekinesisDataSchema.ContinuousFeedback => #3
        IntProperty(Value=0)
        -> CreateObservable => #5
            DoubleProperty(Value=0)
            -> WorkflowOutput
        #3, #5 -> Zip
        -> IgnoreElements
        -> BehaviorSubject ContinuousFeedbackProcess

        SubscribeSubject ContinuousFeedbackProcess
        -> MemberSelector(Selector=Item1)
        -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=ContinuousFeedbackProcess)
        -> MulticastSubject SoftwareEvents

        SubscribeSubject ContinuousFeedbackProcess => #13
        -> MemberSelector(Selector=Item1)
        -> AindBehaviorTelekinesisDataSchema.MatchContinuousFeedback(Type=TypeMapping<AindBehaviorTelekinesisDataSchema.ManipulatorFeedback>) => #15
        #13 -> MemberSelector(Selector=Item2) => #16
        #15, #16 -> WithLatestFrom
        -> CreateObservable ContinuousFeedbackMotorSolver
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject thisFeedback

            SubscribeSubject thisFeedback
            -> MemberSelector(Selector=Item1)
            -> AsyncSubject deviceFeedback

            SubscribeSubject thisFeedback
            -> MemberSelector(Selector=Item2)
            -> AsyncSubject feedbackSource

            SubscribeSubject thisFeedback
            -> IncludeWorkflow(Path=Extensions\InterpolateContinuousFeedback.bonsai)
            -> PublishSubject interpolatedFeedback

            SubscribeSubject interpolatedFeedback => #12
            SubscribeSubject thisFeedback
            -> MemberSelector(Selector=Item1)
            -> AindBehaviorTelekinesisDataSchema.MatchContinuousFeedback => #15
            #12, #15 -> WithLatestFrom
            -> MulticastSubject ContinuousFeedbackMonitor

            SubscribeSubject interpolatedFeedback
            -> MulticastSubject SpoutPosition => #19
            SubscribeSubject ContinuousFeedbackEnabled
            -> Condition
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            -> BehaviorSubject endFeedback => #22
            #19, #22 -> TakeUntil

            SubscribeSubject endFeedback => #24
            SubscribeSubject interpolatedFeedback => #25
            #24, #25 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> MulticastSubject SpoutPosition
            -> Take(Count=1)
            -> WorkflowOutput
        -> Switch

    GroupWorkflow SpoutControl
        SubscribeSubject SpoutPosition
        -> WorkflowOutput

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Manipulator)
        -> MemberSelector(Selector=AdditionalSettings)
        -> MemberSelector(Selector=SpoutAxis)
        -> InputMapping(Value(Selector=value__))
        -> PropertySource<AllenNeuralDynamics.AindManipulator.AxisConfiguration,AllenNeuralDynamics.AindManipulator.Axis>(MemberName=Axis, Value=None) => #7
        BehaviorSubject<System.Single> SpoutPosition => #8
        Timer(DueTime=PT0S, Period=PT0.05S) => #9
        #8, #9 -> Gate
        -> DistinctUntilChanged
        -> Bonsai.Scripting.Expressions.ExpressionTransform "double(it)" => #12
          Expression: double(it)
        #7, #12 -> CombineLatest => #13
        GroupWorkflow GetCalibration
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=Manipulator)
            -> MemberSelector(Selector=Calibration)
            -> MemberSelector(Selector=Input)
            -> AindBehaviorTelekinesisDataSchema.SerializeToJson(Formatting=None)
            -> AllenNeuralDynamics.AindManipulator.DeserializeFromJson(Type=TypeMapping<AllenNeuralDynamics.AindManipulator.AindManipulatorCalibrationInput>)
            -> WorkflowOutput
        -> PropertyMapping(Calibration) => #15
        #13, #15 -> AllenNeuralDynamics.AindManipulator.ManipulatorSiUnitConverter(ConverterMode=MmToStep) => #16
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Manipulator)
        -> MemberSelector(Selector=AdditionalSettings)
        -> MemberSelector(Selector=SpoutAxis)
        -> PropertyMapping(Axis) => #21
        #16, #21 -> MoveAbsoluteSingleAxis(Axis=Y1, MessageType=Write)
        -> MulticastSubject StepperDriverCommands

        BehaviorSubject<System.Boolean> ForceSpoutAvailability => #24
        SubscribeSubject TaskLogicParameters
        -> MemberSelector(Selector=OperationControl.Spout) => #26
        #24, #26 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: Item1 ? Item2.DefaultExtendedPosition : Item2.DefaultRetractedPosition
        -> MulticastSubject SpoutPosition => #29
        SubscribeSubject TaskLogicParameters
        -> MemberSelector(Selector=OperationControl.Spout)
        -> MemberSelector(Selector=Enabled)
        -> Condition => #33
            WorkflowInput Source1
            -> WorkflowOutput
        #29, #33 -> SubscribeWhen

    GroupWorkflow LutLogic
        SubscribeSubject TaskLogicParameters
        -> MemberSelector(Selector=OperationControl.ActionLuts)
        -> Take(Count=1)
        -> Merge
        -> SelectMany LoadLuts
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject thisLut

            SubscribeSubject thisLut
            -> MemberSelector(Selector=Value)
            -> SelectMany LoadImage => #5
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject this

                SubscribeSubject this
                -> MemberSelector(Selector=Path)
                -> PropertyMapping(FileName)
                -> Bonsai.Vision.LoadImage(Mode=Unchanged)
                -> WorkflowOutput
            SubscribeSubject thisLut
            -> PropertyMapping(Scale(Selector=Value.Scale), Shift(Selector=Value.Offset)) => #7
            #5, #7 -> Bonsai.Dsp.ConvertScale(Depth=nil, Scale=1, Shift=0)
            -> Take(Count=1)
            -> Bonsai.Dsp.ConvertToMat => #10
            SubscribeSubject thisLut => #11
            #10, #11 -> WithLatestFrom
            -> Take(Count=1)
            -> WorkflowOutput
        -> ToDictionary(KeySelector=Item2.Key, ElementSelector="Item1,Item2")
        -> AsyncSubject ActionLuts

        BehaviorSubject<AindBehaviorTelekinesisDataSchema.Trial> ActiveTrial
        -> CreateObservable ParseAction
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject trial

            SubscribeSubject ActionLuts => #3
            SubscribeSubject trial
            -> MemberSelector(Selector=LutReference)
            -> PropertyMapping(Value) => #6
            #3, #6 -> Index(Operand=StringProperty)
            -> Take(Count=1)
            -> AsyncSubject lutFactory
            -> MemberSelector(Selector=Item1)
            -> MulticastSubject CurrentLut

            SubscribeSubject trial
            -> MemberSelector(Selector=ActionSource0)
            -> IncludeWorkflow(Path=Extensions\SampleAction.bonsai) => #14
            SubscribeSubject trial
            -> MemberSelector(Selector=ActionSource1)
            -> IncludeWorkflow(Path=Extensions\SampleAction.bonsai) => #17
            GroupWorkflow NullAction1
                SubscribeSubject trial
                -> MemberSelector(Selector=ActionSource1)
                -> Bonsai.Scripting.Expressions.ExpressionCondition
                  Expression: it == null
                -> DoubleProperty(Value=NaN) => #3
                -> DoubleProperty(Value=0) => #4
                #3, #4 -> Zip
                -> Bonsai.Harp.CreateTimestamped
                -> WorkflowOutput
            -> Take(Count=1) => #19
            #17, #19 -> Merge => #20
            #14, #20 -> WithLatestFrom => #21
            -> MemberSelector(Selector="Item1.Value,Item2.Value") => #22
            #21 -> MemberSelector(Selector=Item1.Seconds) => #23
            #22, #23 -> Zip
            -> Bonsai.Harp.CreateTimestamped => #25
            SubscribeSubject lutFactory
            -> MemberSelector(Selector=Item1)
            -> PropertyMapping(LookUpTable) => #28
            SubscribeSubject lutFactory
            -> MemberSelector(Selector=Item2.Value)
            -> PropertyMapping(LutSettings) => #31
            #25, #28, #31 -> ParseAction
            -> WorkflowOutput
        -> Switch
        -> PublishSubject CurrentActionVector => #10
        SubscribeSubject ActionLuts => #11
        #10, #11 -> SubscribeWhen

    GroupWorkflow OphysInterface
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=OphysInterface)
        -> IncludeWorkflow(Path=Extensions\IsNull.bonsai)
        -> BehaviorSubject SkipOphysInterfaceHandshake

        BehaviorSubject<System.Reactive.Unit> StartOphysInterface
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DOPort0)) => #5
        BehaviorSubject<System.Reactive.Unit> StopOphysInterface
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DOPort1)) => #7
        #5, #7 -> Merge
        -> MulticastSubject HarpBehaviorCommands

        SubscribeSubject HarpBehaviorEvents
        -> Take(Count=1)
        -> SelectMany ConfigurePulse
            Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePulseDOPort1Payload(PulseDOPort1=1))
            -> Take(Count=1) => #1
            Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePulseDOPort0Payload(PulseDOPort0=10))
            -> Take(Count=1) => #3
            #1, #3 -> Merge => #4
            Annotation "Ensure pulse mode"(Text="") => #5
            #4, #5 -> MulticastSubject HarpBehaviorCommands
            -> Last
            -> WorkflowOutput
        -> Unit
        -> MulticastSubject StopOphysInterface
        -> SelectMany GetReadyState => #15
            Timer(DueTime=PT0S, Period=PT0.1S)
            -> Harp.Behavior.CreateMessage(MessageType=Read, Payload=Harp.Behavior.CreateDigitalInputStatePayload(DigitalInputState=None))
            -> MulticastSubject HarpBehaviorCommands

            SubscribeSubject HarpBehaviorEvents
            -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedDigitalInputState)
            -> WorkflowOutput
        -> MemberSelector(Selector=Value)
        -> HasFlag(Operand=WorkflowProperty<Harp.Behavior.DigitalInputs>(Value=DIPort0)) => #17
        #15 -> MemberSelector(Selector=Seconds) => #18
        #17, #18 -> WithLatestFrom
        -> Bonsai.Harp.CreateTimestamped
        -> MemberSelector(Selector=Value)
        -> Take(Count=1)
        -> BehaviorSubject IsReadyOphysInterface

        SubscribeSubject HarpBehaviorEvents
        -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedDigitalInputState) => #25
        -> MemberSelector(Selector=Value) => #26
        ExternalizedMapping(Value(DisplayName=OphysStrobePin)) => #27
        #26, #27 -> HasFlag(Operand=WorkflowProperty<Harp.Behavior.DigitalInputs>(Value=DIPort0))
        -> DistinctUntilChanged
        -> Condition => #30
            WorkflowInput Source1
            -> WorkflowOutput
        #25 -> MemberSelector(Selector=Seconds) => #31
        #30, #31 -> WithLatestFrom
        -> Bonsai.Harp.CreateTimestamped
        -> PublishSubject OphysFrameStrobe

Defer TaskLogic => #9
    SubscribeSubject TaskLogicParameters
    -> GroupWorkflow PermutateBlocks
        WorkflowInput Source1
        -> MemberSelector(Selector=Environment) => #1
        -> Condition Shuffle
            WorkflowInput Source1
            -> MemberSelector(Selector=Shuffle)
            -> WorkflowOutput
        -> MemberSelector(Selector=BlockStatistics)
        -> Merge => #4
        SubscribeSubject RngSeed => #5
        #4, #5 -> Bonsai.Numerics.Permutation => #6
        #1 -> Condition DontShuffle
            WorkflowInput Source1
            -> MemberSelector(Selector=Shuffle)
            -> BitwiseNot
            -> WorkflowOutput
        -> MemberSelector(Selector=BlockStatistics)
        -> Merge => #9
        #6, #9 -> Merge
        -> ToList
        -> WorkflowOutput
    -> AsyncSubject BlockStatistics

    IntProperty(Value=0)
    -> Take(Count=1)
    -> BehaviorSubject BlockIndex

    SubscribeSubject BlockStatistics => #6
    SubscribeSubject BlockIndex
    -> PropertyMapping(Value) => #8
    #6, #8 -> Index(Operand=IntProperty(Value=0))
    -> Take(Count=1)
    -> BehaviorSubject ActiveBlock
    -> IncludeWorkflow(Path=Extensions\CreateSoftwareEventInline.bonsai, EventName=ActiveBlock)
    -> IncludeWorkflow(Path=Extensions\BlockLogic.bonsai)
    -> Last
    -> SelectMany BlockIndex++
        SubscribeSubject BlockIndex
        -> Take(Count=1)
        -> Add(Operand=IntProperty(Value=1))
        -> MulticastSubject BlockIndex
        -> WorkflowOutput
    -> Repeat
    -> TakeWhile
        SubscribeSubject BlockIndex
        -> Add(Operand=IntProperty(Value=1)) => #1
        SubscribeSubject BlockStatistics
        -> MemberSelector(Selector=Count) => #3
        #1, #3 -> CombineLatest
        -> LessThanOrEqual
        -> WorkflowOutput
    -> WorkflowOutput
SubscribeSubject EndExperiment => #10
#9, #10 -> TakeUntil => #11
SubscribeSubject StartExperiment => #12
#11, #12 -> SubscribeWhen

IncludeWorkflow(Path=Extensions\Logging.bonsai) => #14
SubscribeSubject EndExperiment
-> Delay(DueTime=PT1S) => #16
#14, #16 -> TakeUntil => #17
SubscribeSubject StartLogging => #18
#17, #18 -> SubscribeWhen

GroupWorkflow ControlUserInterface
    ExternalizedMapping(Value(DisplayName=EnableExperimentUI))
    -> BooleanProperty(Value=true)
    -> Take(Count=1)
    -> BehaviorSubject EnableExperimentUI

    IncludeWorkflow(Path=AllenNeuralDynamics.AindManipulator:AindManipulatorGui.bonsai)
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #5
    GroupWorkflow LauncherControl
        IncludeWorkflow(Path=Extensions\Annotation.bonsai)
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #1
        SubscribeSubject ExperimentState
        -> BitwiseNot
        -> PropertyMapping(Enabled)
        -> Bonsai.Gui.ButtonBuilder Start(Enabled=true, Visible=true, Text="Start Experiment")
        -> PublishSubject StartExperimentToggleButton
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ButtonVisualizer>) => #7
        Bonsai.Gui.ButtonBuilder End(Enabled=true, Visible=true, Text="End Experiment")
        -> PublishSubject EndExperimentButton
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ButtonVisualizer>) => #10
        #1, #7, #10 -> Bonsai.Gui.TableLayoutPanelBuilder LauncherControl
          Enabled=true
          Visible=true
          Font="Microsoft Sans Serif, 26pt"
          ColumnCount=2
          RowCount=2
          ColumnStyles=""
          RowStyles=""
          CellSpans(CellSpan(ColumnSpan=1, RowSpan=2), CellSpan(ColumnSpan=1, RowSpan=1), CellSpan(ColumnSpan=1, RowSpan=1))
        -> WorkflowOutput

        SubscribeSubject StartExperimentToggleButton
        -> Take(Count=1)
        -> Unit
        -> MulticastSubject StartExperimentShortcut

        SubscribeSubject EndExperimentButton
        -> Take(Count=1)
        -> Unit
        -> MulticastSubject EndExperiment => #20
        SubscribeSubject StartExperiment => #21
        #20, #21 -> SubscribeWhen
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #7
    GroupWorkflow ValveGui
        Bonsai.Gui.PropertyGridBuilder(Enabled=true, Visible=true, HelpVisible=true, ToolbarVisible=true, AutoRefresh=false)
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.PropertyGridVisualizer>) => #1
        Bonsai.Gui.ButtonBuilder RunCalibration(Enabled=true, Visible=true, Text=RunCalibration)
        -> PublishSubject RunCalibration
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ButtonVisualizer>) => #4
        BooleanProperty(Value=false)
        -> Take(Count=1) => #6
        SubscribeSubject ValveFlushState => #7
        #6, #7 -> Concat => #8
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> StringProperty(Value="Close Valves") => #10
        #8 -> BitwiseNot
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> StringProperty(Value="Open Valves") => #13
        #10, #13 -> Merge
        -> PropertyMapping(Text)
        -> Bonsai.Gui.ToggleButtonBuilder FlushValves(Enabled=true, Visible=true, Text="Open Valves", Checked=false)
        -> MulticastSubject ValveFlushState
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ToggleButtonVisualizer>) => #18
        SubscribeSubject EnableExperimentUI
        -> PropertyMapping(Enabled) => #20
        #1, #4, #18, #20 -> Bonsai.Gui.TableLayoutPanelBuilder ValveCalibration
          Enabled=true
          Visible=true
          ColumnCount=2
          RowCount=2
          ColumnStyles=""
          RowStyles=""
          CellSpans(CellSpan(ColumnSpan=1, RowSpan=2), CellSpan(ColumnSpan=1, RowSpan=1), CellSpan(ColumnSpan=1, RowSpan=1))
        -> WorkflowOutput

        SubscribeSubject RunCalibration
        -> Take(Count=1) => #24
        ExternalizedMapping(Interval(Category=ValveCalibration), OpeningTimeMs(Category=ValveCalibration), Repeats(Category=ValveCalibration)) => #25
        #24, #25 -> SelectMany LoopValve
            ExternalizedMapping(DueTime(DisplayName=Interval))
            -> Timer(DueTime=PT0.5S) => #1
            ExternalizedMapping(Value(DisplayName=OpeningTimeMs)) => #2
            #1, #2 -> IntProperty(Value=100)
            -> MulticastSubject ValveOpenTimeMs
            -> Unit
            -> MulticastSubject TriggerValve => #6
            ExternalizedMapping(Count(DisplayName=Repeats)) => #7
            #6, #7 -> RepeatCount(Count=200) => #8
            Bonsai.Windows.Input.KeyDown(Filter="LButton ShiftKey ControlKey A P Q Shift", SuppressRepetitions=true) => #9
            #8, #9 -> TakeUntil
            -> ElementIndex
            -> MemberSelector(Selector=Index)
            -> WorkflowOutput
        -> Repeat

        BehaviorSubject<System.Boolean> ValveFlushState
        -> CreateObservable Flush
            WorkflowInput Source1
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> IntProperty(Value=200)
            -> MulticastSubject ValveOpenTimeMs
            -> Unit
            -> MulticastSubject TriggerValve
            -> Delay(DueTime=PT0.2S)
            -> RepeatCount(Count=20)
            -> LastOrDefault
            -> WorkflowOutput
        -> Switch
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #9
    GroupWorkflow HwShortcuts
        SubscribeSubject EnableExperimentUI
        -> PropertyMapping(Enabled)
        -> Bonsai.Gui.ButtonBuilder TriggerAudio(Enabled=true, Visible=true, Text=TriggerAudio)
        -> Sink
            WorkflowInput Source1
            -> Unit
            -> MulticastSubject AudioTrigger
            -> WorkflowOutput
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ButtonVisualizer>) => #4
        Bonsai.Gui.ButtonBuilder ForceReward(Enabled=true, Visible=true, Text=ForceReward)
        -> PublishSubject ForceReward
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ButtonVisualizer>) => #7
        #4, #7 -> Bonsai.Gui.TableLayoutPanelBuilder HwShortcuts(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 20pt", ColumnCount=5, RowCount=5, ColumnStyles="", RowStyles="", CellSpans="")
        -> WorkflowOutput

        SubscribeSubject ForceReward => #10
        Annotation DefaultRewardAmount(Text="")
        -> FloatProperty(Value=3)
        -> Take(Count=1) => #13
        #10, #13 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> MulticastSubject GiveReward
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #11
    #5, #7, #9, #11 -> Bonsai.Gui.TabControlBuilder ControlUserInterface(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 10pt")
    -> WorkflowOutput

    SubscribeSubject StartExperiment
    -> BooleanProperty(Value=false)
    -> MulticastSubject EnableExperimentUI

GroupWorkflow Visualizers
    IntProperty(Value=0)
    -> Visualizer TrialVisualizer
        SubscribeSubject CurrentActionVector
        -> Slice(Start=0, Step=25, Stop=nil)
        -> MemberSelector(Selector="Value.LookUpIndex.Action0,Value.LookUpIndex.Action1")
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(Item1 as Action0, double.IsNaN(Item2) ? 0 : Item2 as Action1)
        -> InputMapping(X(Selector=Action0), Y(Selector=Action1))
        -> Bonsai.Vision.CreatePoint2f(X=492.475, Y=501.953125) => #5
        SubscribeSubject CurrentLut
        -> Bonsai.Vision.ConvertToImage => #7
        Annotation FIXME(Text="") => #8
        #7, #8 -> Bonsai.Vision.ConvertColor(Conversion=Gray2Bgr) => #9
        #5, #9 -> WithLatestFrom => #10
        -> MemberSelector(Selector=Item1)
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Vision.Design.PointVisualizer>) => #12
        #10, #12 -> MemberSelector(Selector=Item2)
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Vision.Design.IplImageVisualizer>) => #14
        SubscribeSubject CurrentActionVector
        -> Bonsai.Gui.ZedGraph.RollingGraphBuilder
          IndexSelector=Seconds
          ValueSelector="Value.ActionVector.Action0,Value.ActionVector.Action1"
          SymbolType=None
          LineWidth=2
          CurveSettings(CurveConfiguration(Label=Left, Color=Blue), CurveConfiguration(Label=Right, Color=Red))
          Capacity=2000
          Min=nil
          Max=nil
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ZedGraph.RollingGraphVisualizer>) => #17
        Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 14.25pt", Text=ActionVector)
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.LabelVisualizer>) => #19
        #17, #19 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=1, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #21
        SubscribeSubject CurrentActionVector
        -> Bonsai.Gui.ZedGraph.RollingGraphBuilder
          IndexSelector=Seconds
          ValueSelector=Value.ProjectedAction
          SymbolType=None
          LineWidth=2
          CurveSettings(CurveConfiguration(Label=Left, Color=Blue), CurveConfiguration(Label=Right, Color=Red))
          Capacity=2000
          Min=nil
          Max=nil
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ZedGraph.RollingGraphVisualizer>) => #24
        Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 14.25pt", Text=ProjectedAction)
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.LabelVisualizer>) => #26
        #24, #26 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=1, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #28
        SubscribeSubject LiveHarvestOutcome
        -> Bonsai.Scripting.Expressions.ExpressionTransform Label
          Expression:
            new(
            Item1.Seconds as Seconds,
            Item1.Value as CachedProjectedAction,
            Item2.Item1 as TrialAction,
            Item2.Item2 as UpperThr,
            Item2.Item3 as LowerThr)
        -> Bonsai.Gui.ZedGraph.RollingGraphBuilder
          IndexSelector=Seconds
          ValueSelector="CachedProjectedAction, UpperThr, LowerThr"
          SymbolType=None
          LineWidth=2
          CurveSettings(CurveConfiguration(Label=Left, Color=Blue), CurveConfiguration(Color=Black), CurveConfiguration(Color=Black))
          Capacity=2000
          Min=nil
          Max=nil
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ZedGraph.RollingGraphVisualizer>) => #32
        Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 14.25pt", Text=LiveHarvestOutcome)
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.LabelVisualizer>) => #34
        #32, #34 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=1, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #36
        #14, #21, #28, #36 -> Bonsai.Gui.TableLayoutPanelBuilder ActionVisualization(Enabled=true, Visible=true, ColumnCount=2, RowCount=2, ColumnStyles="", RowStyles="", CellSpans="")
        -> WorkflowOutput
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #2
    SubscribeSubject SoftwareEvents
    -> VisualizerMapping
    -> Bonsai.Gui.TableLayoutPanelBuilder SoftwareEvents(Enabled=true, Visible=true, ColumnCount=1, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #6
    #2, #6 -> Bonsai.Gui.TableLayoutPanelBuilder TaskVisualization
      Enabled=true
      Visible=true
      ColumnCount=1
      RowCount=2
      ColumnStyles=""
      RowStyles(RowStyle(SizeType=Percent, Height=0.8), RowStyle(SizeType=Percent, Height=0.2))
      CellSpans=""
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #8
    SubscribeSubject TriggeredCamerasStream
    -> IncludeWorkflow(Path=AllenNeuralDynamics.Core.Design:SpinnakerCameraControllerVisualizer.bonsai)
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #11
    IntProperty(Value=0)
    -> Visualizer ActionInputs
        GroupWorkflow LoadCells
            SubscribeSubject HarpLoadCellsEvents
            -> Harp.LoadCells.Parse(Register=Harp.LoadCells.TimestampedLoadCellData)
            -> Bonsai.Gui.ZedGraph.RollingGraphBuilder
              IndexSelector=Seconds
              ValueSelector="Value.Channel0,Value.Channel1,Value.Channel2,Value.Channel3,Value.Channel4,Value.Channel5,Value.Channel6,Value.Channel7"
              SymbolType=None
              LineWidth=1
              CurveSettings=""
              Capacity=5000
              Min=nil
              Max=nil
            -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ZedGraph.RollingGraphVisualizer>) => #3
            SubscribeSubject CalibratedLoadCellData
            -> Bonsai.Scripting.Expressions.ExpressionTransform Label
              Expression:
                new(
                it.Seconds as Seconds,
                it.Value[0] as Channel0,
                it.Value[1] as Channel1,
                it.Value[2] as Channel2,
                it.Value[3] as Channel3,
                it.Value[4] as Channel4,
                it.Value[5] as Channel5,
                it.Value[6] as Channel6,
                it.Value[7] as Channel7
                )
            -> Bonsai.Gui.ZedGraph.RollingGraphBuilder
              IndexSelector=Seconds
              ValueSelector="Channel0,Channel1,Channel2,Channel3,Channel4,Channel5,Channel6,Channel7"
              SymbolType=None
              LineWidth=1
              CurveSettings=""
              Capacity=5000
              Min=nil
              Max=nil
            -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ZedGraph.RollingGraphVisualizer>) => #7
            SubscribeSubject EnableExperimentUI
            -> PropertyMapping(Enabled) => #9
            SubscribeSubject CalibratingLoadCells
            -> Bonsai.Scripting.Expressions.ExpressionTransform Prompt
              Expression: it ? "Calibrating..." : "Calibrate Load Cells"
            -> PropertyMapping(Text) => #12
            #9, #12 -> Bonsai.Gui.ButtonBuilder TriggerLoadCellCalibration(Enabled=true, Visible=true, Text="Calibrate Load Cells")
            -> Sink
                WorkflowInput Source1
                -> Unit
                -> MulticastSubject CalibrateLoadCells
                -> WorkflowOutput
            -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ButtonVisualizer>) => #15
            #3, #7, #15 -> Bonsai.Gui.TableLayoutPanelBuilder RawLoadCells
              Enabled=true
              Visible=true
              ColumnCount=1
              RowCount=3
              ColumnStyles=""
              RowStyles(RowStyle(SizeType=Percent, Height=0.47), RowStyle(SizeType=Percent, Height=0.47), RowStyle(SizeType=Percent, Height=0.06))
              CellSpans=""
            -> WorkflowOutput
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #1
        GroupWorkflow AnalogInput
            SubscribeSubject AnalogInputData
            -> Bonsai.Gui.ZedGraph.RollingGraphBuilder
              IndexSelector=Seconds
              ValueSelector="Value.AnalogInput0,Value.AnalogInput1"
              SymbolType=None
              LineWidth=3
              CurveSettings=""
              Capacity=5000
              Min=0
              Max=5
            -> VisualizerMapping
            -> Bonsai.Gui.TableLayoutPanelBuilder AnalogInputData(Enabled=true, Visible=true, ColumnCount=1, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
            -> WorkflowOutput
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #3
        #1, #3 -> Bonsai.Gui.TabControlBuilder ActionInputs(Enabled=true, Visible=true)
        -> WorkflowOutput
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TabControlVisualizer>) => #14
    IntProperty(Value=0)
    -> Visualizer OphysInterfaceVisualizer
        SubscribeSubject SkipOphysInterfaceHandshake
        -> Bonsai.Scripting.Expressions.ExpressionTransform "Label Button"
          Expression: it? "Ophys Disabled" : "Ophys Enabled"
        -> PropertyMapping(Text)
        -> Bonsai.Gui.ButtonBuilder SkipOphysInterfaceHandshake(Enabled=true, Visible=true, Text="Ophys Disabled")
        -> Sink Override
            WorkflowInput Source1
            -> SelectMany
                SubscribeSubject SkipOphysInterfaceHandshake
                -> Take(Count=1)
                -> BitwiseNot
                -> MulticastSubject SkipOphysInterfaceHandshake
                -> WorkflowOutput
            -> WorkflowOutput
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ButtonVisualizer>) => #5
        SubscribeSubject StartOphysInterface
        -> BooleanProperty(Value=true) => #7
        -> BitwiseNot
        -> Delay(DueTime=PT0.1S) => #9
        #7, #9 -> Merge => #10
        SubscribeSubject HarpTimestampSource => #11
        #10, #11 -> WithLatestFrom
        -> Bonsai.Harp.CreateTimestamped
        -> Bonsai.Gui.ZedGraph.RollingGraphBuilder
          IndexSelector=Seconds
          ValueSelector=Value
          SymbolType=None
          LineWidth=2
          CurveSettings(CurveConfiguration(Label=StartTrigger, Color=#00C000))
          Capacity=nil
          Min=nil
          Max=nil
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ZedGraph.RollingGraphVisualizer>) => #15
        SubscribeSubject StopOphysInterface
        -> BooleanProperty(Value=true) => #17
        -> BitwiseNot
        -> Delay(DueTime=PT0.1S) => #19
        #17, #19 -> Merge => #20
        SubscribeSubject HarpTimestampSource => #21
        #20, #21 -> WithLatestFrom
        -> Bonsai.Harp.CreateTimestamped
        -> Bonsai.Gui.ZedGraph.RollingGraphBuilder
          IndexSelector=Seconds
          ValueSelector=Value
          SymbolType=None
          LineWidth=2
          CurveSettings(CurveConfiguration(Label=StopTrigger, Color=Red))
          Capacity=nil
          Min=nil
          Max=nil
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ZedGraph.RollingGraphVisualizer>) => #25
        SubscribeSubject IsReadyOphysInterface => #26
        SubscribeSubject HarpTimestampSource => #27
        #26, #27 -> WithLatestFrom
        -> Bonsai.Harp.CreateTimestamped
        -> Bonsai.Gui.ZedGraph.RollingGraphBuilder
          IndexSelector=Seconds
          ValueSelector=Value
          SymbolType=None
          LineWidth=2
          CurveSettings(CurveConfiguration(Label=IsArmed, Color=#8080FF))
          Capacity=nil
          Min=nil
          Max=nil
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ZedGraph.RollingGraphVisualizer>) => #31
        SubscribeSubject OphysFrameStrobe
        -> Bonsai.Gui.ZedGraph.RollingGraphBuilder
          IndexSelector=Seconds
          ValueSelector=Value
          SymbolType=None
          LineWidth=1
          CurveSettings(CurveConfiguration(Label=FrameStrobe, Color=#E0E0E0))
          Capacity=nil
          Min=nil
          Max=nil
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ZedGraph.RollingGraphVisualizer>) => #34
        #15, #25, #31, #34 -> Bonsai.Gui.ZedGraph.RollingGraphPanelBuilder OphysInterfaceState(ReverseX=false, ReverseY=false, Span=30, Capacity=nil, BaseAxis=X, BarType=Cluster, Min=nil, Max=nil)
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ZedGraph.RollingGraphPanelVisualizer>) => #36
        #5, #36 -> Bonsai.Gui.TableLayoutPanelBuilder OphysInterface
          Enabled=true
          Visible=true
          ColumnCount=1
          RowCount=2
          ColumnStyles=""
          RowStyles(RowStyle(SizeType=Percent, Height=0.05), RowStyle(SizeType=Percent, Height=0.95))
          CellSpans=""
        -> WorkflowOutput
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #17
    IntProperty(Value=0)
    -> Visualizer ContinuousFeedbackMonitor
        Annotation TODO(Text="This should be generalized across all feedback modes")
        -> SubscribeSubject ContinuousFeedbackMonitor
        -> MemberSelector(Selector=Item1) => #2
        SubscribeSubject HarpTimestampSource => #3
        #2, #3 -> WithLatestFrom
        -> Bonsai.Harp.CreateTimestamped
        -> Bonsai.Gui.ZedGraph.RollingGraphBuilder
          IndexSelector=Seconds
          ValueSelector=Value
          SymbolType=Circle
          LineWidth=2
          CurveSettings(CurveConfiguration(Color=#C000C0))
          Capacity=5000
          Min=nil
          Max=nil
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ZedGraph.RollingGraphVisualizer>)
        -> Bonsai.Gui.TableLayoutPanelBuilder MotorFeedback(Enabled=true, Visible=true, ColumnCount=1, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
        -> WorkflowOutput
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #20
    #8, #11, #14, #17, #20 -> Bonsai.Gui.TabControlBuilder(Enabled=true, Visible=true)
    -> WorkflowOutput

GroupWorkflow StartCondition
    BehaviorSubject<System.Reactive.Unit> StartExperimentShortcut => #0
    SubscribeSubject TriggeredCamerasReady => #1
    #0, #1 -> Zip
    -> Take(Count=1)
    -> MemberSelector(Selector=Item1)
    -> MulticastSubject StartLogging => #5
    ExternalizedMapping(DueTime(DisplayName=LogDelay)) => #6
    #5, #6 -> Delay(DueTime=PT3S)
    -> MulticastSubject StartExperiment
    -> WorkflowOutput

SubscribeSubject EndExperiment
-> Delay(DueTime=PT1S)
-> SelectMany EndRoutine
    WorkflowInput Source1
    -> WorkflowOutput
-> Delay(DueTime=PT2S)
-> Take(Count=1)
-> WorkflowOutput
